PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = AcademicSR
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Routines
  Routine Instructions
    TextComponent instruct
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.4
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      text:
        In this part of the study, you will be choosing between answering practice questions for standardized tests, or playing a videogame.

        You will be completing 5 rounds of the chosen option, and will then be given a chance to choose again.

        Prior to choosing, you will be given a regulation strategy to use. Please employ this strategy while making your decision.

        Press SPACE to begin!
    KeyboardComponent space
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Choice
    TextComponent choiceQ
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      stopVal [condition] = blank.status == FINISHED
      text = Please indicate which option you would like to complete by pressing '1' for the choice on the left, or '2' for the choice on the right. 
      wrapWidth = 1.4
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    KeyboardComponent choiceResp
      allowedKeys = '1','2'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [condition] = choiceQ.status == FINISHED
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    TextComponent testChoice
      letterHeight = 0.04
      pos = (-0.41, 0.15)
      startVal [time (s)] = 0.0
      stopVal [condition] = blank.status == FINISHED
      text = Practice Standardized Test Questions
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    TextComponent videogameChoice
      letterHeight = 0.04
      pos = (0.41, 0.15)
      startVal [time (s)] = 0.0
      stopVal [condition] = blank.status == FINISHED
      text = Play a Videogame
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    ImageComponent gre
      image = gre.png
      pos = (-.41, 0.02)
      size = (0.3, 0.105)
      startVal [time (s)] = 0.0
      stopVal [condition] = blank.status == FINISHED
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    ImageComponent gmat
      image = gmat.png
      pos = (-0.41, -0.13)
      size = (0.3, 0.11)
      startVal [time (s)] = 0.0
      stopVal [condition] = blank.status == FINISHED
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    ImageComponent lsat
      image = lsat.png
      pos = (-0.41, -0.27)
      size = (0.3, 0.11)
      startVal [time (s)] = 0.0
      stopVal [condition] = blank.status == FINISHED
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    ImageComponent game
      image = game.png
      pos = (0.41, -0.19)
      size = (0.4, 0.5)
      startVal [time (s)] = 0.0
      stopVal [condition] = blank.status == FINISHED
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        doTestPractice = []
        doGame = []
      Begin Routine:
        doGame = []
        doTestPractice = []
      Each Frame:
        if choiceResp.keys == '1':
            testChoice.setColor('green')
        if choiceResp.keys == '2':
            videogameChoice.setColor('green')

        if choiceResp.keys == '2' or choiceResp.keys == '1':
            choiceResp.status = FINISHED
      End Routine:
        videogameChoice.setColor('white')
        testChoice.setColor('white')

        if blank.status == FINISHED:
            choiceQ.setAutoDraw(False)
            testChoice.setAutoDraw(False)
            videogameChoice.setAutoDraw(False)
            gre.setAutoDraw(False)
            gmat.setAutoDraw(False)
            lsat.setAutoDraw(False)
            continueRoutine = False

        if choiceResp.keys == '1':
            doTestPractice = 1
            doGame = 0
        if choiceResp.keys == '2':
            doTestPractice = 0
            doGame = 1
    TextComponent blank
      letterHeight = 0.1
      startVal [condition] = len(choiceResp.keys) > 0
      stopVal [duration (s)] = 1.5
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  Routine Cue
    TextComponent regCue
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $rows3
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  Routine testQuestionsChoice
    TextComponent testQChoice
      letterHeight = 0.055
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text = What test would you like to practice questions for? Use the keys '1', '2', '3' to move up and down, then press ENTER to select.
      wrapWidth = 1.3
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    ImageComponent image
      image = gre.png
      pos = (0, 0.105)
      size = (0.3, 0.11)
      startVal [time (s)] = 0.0
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    ImageComponent image_2
      image = gmat.png
      pos = (0, -0.05)
      size = (0.3, 0.11)
      startVal [time (s)] = 0.0
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    ImageComponent image_3
      image = lsat.png
      pos = (0, -0.2)
      size = (0.3, 0.11)
      startVal [time (s)] = 0.0
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    KeyboardComponent upDown
      allowedKeys = '1','2', '3'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    PolygonComponent polygon
      fillColor = $None
      lineColor = $[-1.000,-1.000,-1.000]
      lineWidth [set every repeat] = 8
      opacity [set every repeat] = 1
      ori [set every repeat] = 0
      pos [set every frame] = [0,y]
      shape = rectangle
      size [set every repeat] = (0.32, 0.13)
      startVal [condition] = upDown.keys == '1' or upDown.keys == '2' or upDown.keys == '3' or upDown.keys == '4'
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    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        y = 0
        q = []
        '''

        if upDown.keys == '1':
            polygon.setPosition = [0, 0.105]
        elif upDown.keys == '2':
            polygon.setPosition = [0, -0.05]
        elif upDown.keys == '3':
            polygon.setPosition = [0, -0.2]
        elif upDown.keys == '4':
            polygon.setPosition = [0, -0.35]
            '''
        if upDown.keys == '1':
            y = 0.105
        elif upDown.keys == '2':
            y = -0.05
        elif upDown.keys == '3':
            y = -0.2
      Each Frame:
        '''

        if upDown.keys == '1':
            polygon.setPosition = [0, 0.105]
        elif upDown.keys == '2':
            polygon.setPosition = [0, -0.05]
        elif upDown.keys == '3':
            polygon.setPosition = [0, -0.2]
        elif upDown.keys == '4':
            polygon.setPosition = [0, -0.35]
            '''



        if upDown.keys == '1':
            y = 0.105
        elif upDown.keys == '2':
            y = -0.05
        elif upDown.keys == '3':
            y = -0.2
      End Routine:
        if upDown.keys == '1' and enter.keys != 0:
            q = 1
        elif upDown.keys == '2' and enter.keys != 0:
            q = 2
        elif upDown.keys == '3' and enter.keys != 0:
            q = 3
    KeyboardComponent enter
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine testQs
    TextComponent TextQuestion
      letterHeight = 0.028
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      stopVal [condition] = conBlank.status == FINISHED or t>=180
      text [set every repeat] = PLACEHOLDER
      wrapWidth = 1.45
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    KeyboardComponent letterKey
      allowedKeys = 'a', 'b', 'c', 'd', 'e'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [condition] = conBlank.status == STARTED
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    KeyboardComponent enterKey
      allowedKeys = 'return'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [condition] = conBlank.status == STARTED
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    TextComponent choiceA
      letterHeight = 0.026
      startVal [time (s)] = 0.0
      stopVal [condition] = conBlank.status == FINISHED or t>=180
      text [set every repeat] = QA
      wrapWidth = 1.4
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    TextComponent choiceB
      letterHeight = 0.026
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      stopVal [condition] = conBlank.status == FINISHED or t>=180
      text [set every repeat] = QB
      wrapWidth = 1.4
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    TextComponent choiceC
      letterHeight = 0.026
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [condition] = conBlank.status == FINISHED or t>=180
      text [set every repeat] = QC
      wrapWidth = 1.4
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    TextComponent choiceD
      letterHeight = 0.026
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [condition] = conBlank.status == FINISHED or t>=180
      text [set every repeat] = QD
      wrapWidth = 1.4
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    TextComponent choiceE
      letterHeight = 0.026
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [condition] = conBlank.status == FINISHED or t>=180
      text [set every repeat] = QE
      wrapWidth = 1.4
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    CodeComponent code_4
      Code Type = Py
      Begin Routine:
        answerKey = []

        if q == 3:
            TextQuestion.setText(LSAT)
            choiceA.setText(LSATQA)
            choiceB.setText(LSATQB)
            choiceC.setText(LSATQC)
            choiceD.setText(LSATQD)
            choiceE.setText(LSATQE)
            answerKey = (LSATAs)

        if q == 2:
            TextQuestion.setText(GMAT)
            choiceA.setText(GMATQA)
            choiceB.setText(GMATQB)
            choiceC.setText(GMATQC)
            choiceD.setText(GMATQD)
            choiceE.setText(GMATQE)
            answerKey = (GMATAs)

        if q == 1:
            TextQuestion.setText(GRE)
            choiceA.setText(GREQA)
            choiceB.setText(GREQB)
            choiceC.setText(GREQC)
            choiceD.setText(GREQD)
            choiceE.setText(GREQE)
            answerKey = (GREA)
      Each Frame:
        if (letterKey.keys == 'a' and enterKey.keys == 'return') and answerKey == 'a':
            choiceA.setColor('green')
        if (letterKey.keys == 'b' and enterKey.keys == 'return') and answerKey == 'b':
            choiceB.setColor('green')
        if (letterKey.keys == 'c' and enterKey.keys == 'return') and answerKey == 'c':
            choiceC.setColor('green')
        if (letterKey.keys == 'd' and enterKey.keys == 'return') and answerKey == 'd':
            choiceD.setColor('green')
        if (letterKey.keys == 'e' and enterKey.keys == 'return') and answerKey == 'e':
            choiceE.setColor('green')

        if (letterKey.keys == 'a' and enterKey.keys == 'return') and answerKey != 'a':
            choiceA.setColor('red')
        if (letterKey.keys == 'b' and enterKey.keys == 'return') and answerKey != 'b':
            choiceB.setColor('red')
        if (letterKey.keys == 'c' and enterKey.keys == 'return') and answerKey != 'c':
            choiceC.setColor('red')
        if (letterKey.keys == 'd' and enterKey.keys == 'return') and answerKey != 'd':
            choiceD.setColor('red')
        if (letterKey.keys == 'e' and enterKey.keys == 'return') and answerKey != 'e':
            choiceE.setColor('red')

        if (enterKey.keys == 'return' and letterKey.keys != 'a') and answerKey == 'a':
            choiceA.setColor('green')
        if (enterKey.keys == 'return' and letterKey.keys != 'b') and answerKey == 'b':
            choiceB.setColor('green')
        if (enterKey.keys == 'return' and letterKey.keys != 'c') and answerKey == 'c':
            choiceC.setColor('green')
        if (enterKey.keys == 'return' and letterKey.keys != 'd') and answerKey == 'd':
            choiceD.setColor('green')
        if (enterKey.keys == 'return' and letterKey.keys != 'e') and answerKey == 'e':
            choiceE.setColor('green')
      End Routine:
        if conBlank.status == FINISHED:
            choiceA.setAutoDraw(False)
            choiceB.setAutoDraw(False)
            choiceC.setAutoDraw(False)
            choiceD.setAutoDraw(False)
            choiceE.setAutoDraw(False)
            continueRoutine = False



        choiceA.setColor('white')
        choiceB.setColor('white')
        choiceC.setColor('white')
        choiceD.setColor('white')
        choiceE.setColor('white')

        #doTestPractice = 0;
    TextComponent conBlank
      letterHeight = 0.1
      startVal [condition] = enterKey.keys == 'return'
      stopVal [duration (s)] = 2.5
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  Routine Game
    TextComponent gameInstructions
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        You will be playing a version of Pacman. You will be playing as the yellow dot. Your goal is to gather as many points while avoiding the red dots.

        When you are ready, press SPACE!
    KeyboardComponent spaceKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ISI
    TextComponent isi
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = +
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  Routine pacman
    CodeComponent code_3
      Code Type = Py
      Begin Experiment:
        #Pacman variables and functions
        #from random import choice
        #from turtle import *
        #from freegames import floor, vector
        #
        #
        #state = {'score': 0}
        #path = Turtle(visible=False)
        #writer = Turtle(visible=False)
        #aim = vector(5, 0)
        #pacman = vector(-40, -80)
        #ghosts = [
        #    [vector(-180, 160), vector(5, 0)],
        #    [vector(-180, -160), vector(0, 5)],
        #    [vector(100, 160), vector(0, -5)],
        #    [vector(100, -160), vector(-5, 0)],
        #]
        #tiles = [
        #    0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0,
        #    0, 1, 1, 1, 1, 1, 1, 1, 0, 1, 1, 1, 1, 1, 1, 1, 0, 0, 0, 0,
        #    0, 1, 0, 0, 1, 0, 0, 1, 0, 1, 0, 0, 1, 0, 0, 1, 0, 0, 0, 0,
        #    0, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 0, 0, 0, 0,
        #    0, 1, 0, 0, 1, 0, 1, 0, 0, 0, 1, 0, 1, 0, 0, 1, 0, 0, 0, 0,
        #    0, 1, 1, 1, 1, 0, 1, 1, 0, 1, 1, 0, 1, 1, 1, 1, 0, 0, 0, 0,
        #    0, 1, 0, 0, 1, 0, 0, 1, 0, 1, 0, 0, 1, 0, 0, 0, 0, 0, 0, 0,
        #    0, 1, 0, 0, 1, 0, 1, 1, 1, 1, 1, 0, 1, 0, 0, 0, 0, 0, 0, 0,
        #    0, 1, 1, 1, 1, 1, 1, 0, 0, 0, 1, 1, 1, 1, 1, 1, 0, 0, 0, 0,
        #    0, 0, 0, 0, 1, 0, 1, 1, 1, 1, 1, 0, 1, 0, 0, 1, 0, 0, 0, 0,
        #    0, 0, 0, 0, 1, 0, 1, 0, 0, 0, 1, 0, 1, 0, 0, 1, 0, 0, 0, 0,
        #    0, 1, 1, 1, 1, 1, 1, 1, 0, 1, 1, 1, 1, 1, 1, 1, 0, 0, 0, 0,
        #    0, 1, 0, 0, 1, 0, 0, 1, 0, 1, 0, 0, 0, 0, 0, 1, 0, 0, 0, 0,
        #    0, 1, 1, 0, 1, 1, 1, 1, 1, 1, 1, 1, 1, 0, 1, 1, 0, 0, 0, 0,
        #    0, 0, 1, 0, 1, 0, 1, 0, 0, 0, 1, 0, 1, 0, 1, 0, 0, 0, 0, 0,
        #    0, 1, 1, 1, 1, 0, 1, 1, 0, 1, 1, 0, 1, 1, 1, 1, 0, 0, 0, 0,
        #    0, 1, 0, 0, 0, 0, 0, 1, 0, 1, 0, 0, 0, 0, 0, 1, 0, 0, 0, 0,
        #    0, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 0, 0, 0, 0,
        #    0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0,
        #    0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0,
        #]
        #
        #def square(x, y):
        #    "Draw square using path at (x, y)."
        #    path.up()
        #    path.goto(x, y)
        #    path.down()
        #    path.begin_fill()
        #
        #    for count in range(4):
        #        path.forward(20)
        #        path.left(90)
        #
        #    path.end_fill()
        #
        #def offset(point):
        #    "Return offset of point in tiles."
        #    x = (floor(point.x, 20) + 200) / 20
        #    y = (180 - floor(point.y, 20)) / 20
        #    index = int(x + y * 20)
        #    return index
        #
        #def valid(point):
        #    "Return True if point is valid in tiles."
        #    index = offset(point)
        #
        #    if tiles[index] == 0:
        #        return False
        #
        #    index = offset(point + 19)
        #
        #    if tiles[index] == 0:
        #        return False
        #
        #    return point.x % 20 == 0 or point.y % 20 == 0
        #
        #def world():
        #    "Draw world using path."
        #    bgcolor('black')
        #    path.color('blue')
        #
        #    for index in range(len(tiles)):
        #        tile = tiles[index]
        #
        #        if tile > 0:
        #            x = (index % 20) * 20 - 200
        #            y = 180 - (index // 20) * 20
        #            square(x, y)
        #
        #            if tile == 1:
        #                path.up()
        #                path.goto(x + 10, y + 10)
        #                path.dot(2, 'white')
        #
        #def move():
        #    "Move pacman and all ghosts."
        #    writer.undo()
        #    writer.write(state['score'])
        #
        #    clear()
        #
        #    if valid(pacman + aim):
        #        pacman.move(aim)
        #
        #    index = offset(pacman)
        #
        #    if tiles[index] == 1:
        #        tiles[index] = 2
        #        state['score'] += 1
        #        x = (index % 20) * 20 - 200
        #        y = 180 - (index // 20) * 20
        #        square(x, y)
        #
        #    up()
        #    goto(pacman.x + 10, pacman.y + 10)
        #    dot(20, 'yellow')
        #
        #    for point, course in ghosts:
        #        if valid(point + course):
        #            point.move(course)
        #        else:
        #            options = [
        #                vector(5, 0),
        #                vector(-5, 0),
        #                vector(0, 5),
        #                vector(0, -5),
        #            ]
        #            plan = choice(options)
        #            course.x = plan.x
        #            course.y = plan.y
        #
        #        up()
        #        goto(point.x + 10, point.y + 10)
        #        dot(20, 'red')
        #
        #    update()
        #
        #    for point, course in ghosts:
        #        if abs(pacman - point) < 20:
        #            return
        #
        #    ontimer(move, 100)
        #
        #def change(x, y):
        #    "Change pacman aim if valid."
        #    if valid(pacman + vector(x, y)):
        #        aim.x = x
        #        aim.y = y
        ##End pacman vars & functs
        #
        #
      Begin Routine:
        #hideturtle()
        #tracer(False)
        #writer.goto(160, 160)
        #writer.color('white')
        #writer.write(state['score'])
        #listen()
        #onkey(lambda: change(5, 0), 'Right')
        #onkey(lambda: change(-5, 0), 'Left')
        #onkey(lambda: change(0, 5), 'Up')
        #onkey(lambda: change(0, -5), 'Down')
        #world()
        #move()
        #
      Each Frame:
        #setup(420, 420, 370, 0)
        #hideturtle()
        #tracer(False)
        #writer.goto(160, 160)
        #writer.color('white')
        #writer.write(state['score'])
        #listen()
        #onkey(lambda: change(5, 0), 'Right')
        #onkey(lambda: change(-5, 0), 'Left')
        #onkey(lambda: change(0, 5), 'Up')
        #onkey(lambda: change(0, -5), 'Down')
        #world()
        #move()
      End Routine:
        #done()
  Routine qInst
    TextComponent text
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      wrapWidth = 1.4
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      text:
        For the following questions, use the keys "a", "b", "c", "d", "e" to make your choice, then press ENTER to see the answer.

        Press SPACE to begin.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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
Flow
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine Instructions
    LoopInitiator AllTrials loopType="TrialHandler"
      conditionsFile = RowsExcel.xlsx
      loopType = sequential
      nReps = 1
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      Routine ISI
      Routine Cue
      Routine ISI
      Routine Choice
      LoopInitiator QuestionTrials loopType="TrialHandler"
        loopType = random
        nReps = doTestPractice
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        Routine testQuestionsChoice
        Routine qInst
        LoopInitiator Questions5 loopType="TrialHandler"
          Selected rows = $Rows
          conditionsFile = QuestionsText.xlsx
          loopType = sequential
          nReps = 1
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          conditions:
            [OrderedDict([('GMAT', '1)\xa0In order to combat Carville’s rampant homeless problem, Mayor Bloomfield recently proposed a ban on sleeping outdoors in the city’s many parks. He claims that such a measure will force the homeless to either leave Carville or to find means other than sleeping in public parks.\n\nWhich of the following, if true, suggests that Mayor Bloomfield’s plan will be successful?'), ('GMATQA', '(A) Until the ban, the city’s many homeless shelters were at less than fifty percent occupancy.'), ('GMATQB', '(B) Many\xa0homeless tend to congregate underneath Carville’s numerous overpasses.'), ('GMATQC', '(C) Adjacent\xa0cities have even tougher measures on the homeless sleeping outdoors.'), ('GMATQD', '(D) The percent of Carville’s population that has been homeless has been slowly decreasing in the last five years.\n\n'), ('GMATQE', '(E) Mayor\xa0Jonesmith, Mayor Bloomfield’s predecessor, had been far more tolerant towards the city’s homeless population.'), ('GMATAs', 'a'), ('GRE', '1) The Dvorak keyboard requires less finger movement than the ubiquitous QWERTY keyboard. As a result, Dvorak keyboard users are not only able to type more words per minute, but are also less vulnerable to both repetitive stress disorder and carpal tunnel syndrome. Nonetheless, businesses, as well as consumers, have not adopted the Dvorak keyboard. Clearly, if the Dvorak keyboard is to become more widely used, its benefits must be more widely touted.\n\n \n\nWhich of the following, if true, most threatens the author’s conclusion?'), ('GREQA', '(A)The initial cost of manufacturing a Dvorak keyboard will be more expensive than that of a QWERTY keyboard.'), ('GREQB', '(B)Many who have attempted using a Dvorak keyboard claim that learning the configuration of keys takes weeks.'), ('GREQC', '(C)Those suffering from repetitive stress injuries often attribute the injuries to multiple factors.'), ('GREQD', '(D)Businesses that have educated employees on the benefits of the Dvorak keyboard, have found that employees continue to use the Qwerty keyboard.'), ('GREQE', '(E)Businesses have found that many employees who believe the Qwerty keyboard is responsible for stress-induced injuries are unaware of the Dvorak keyboard.'), ('GREA', 'd'), ('LSAT', '1)Executive: We recently ran a set of advertisements in the print version of a travel magazine and on that magazine’s website. We were unable to get any direct information about consumer response to the print ads. However, we found that consumer response to the ads on the website was much more limited than is typical for website ads. We concluded that consumer response to the print ads was probably below par as well.\n\nThe executive’s reasoning does which one of the following?'), ('LSATQA', '(A)bases a prediction of the intensity of a phenomenon on information about the intensity of that phenomenon’s cause'), ('LSATQB', '(B)uses information about the typical frequency of events of a general kind to draw a conclusion about the probability of a particular event of that kind\n'), ('LSATQC', '(C)infers a statistical generalization from claims about a large number of specific instances'), ('LSATQD', '(D)uses a case in which direct evidence is available to draw a conclusion about an analogous case in which direct evidence is unavailable'), ('LSATQE', '(E)bases a prediction about future events on facts about recent comparable events'), ('LSATAs', 'd')]),
            OrderedDict([('GMAT', '2) Megalimpet is a nationwide owner of office space.  They have major office buildings in the downtowns of several cities in the 48 lower states, and rent this space to individual companies.  Megalimpet office spaces vary from small office to large suites, and every space has custom-designed wall-to-wall carpeting.  The carpet in several Megalimpet facilities needed replacing.  The winning bid for the nationwide carpet replacement was submitted by Bathyderm Carpet Company (BCC).  The bid contract involves all delivery costs, all installation, and any ongoing maintenance and upkeep while the carpet is under the three-year warranty.  Both BCC executives and independent consultants they hired felt BCC would be able to perform all these services for far less than their bid price; these circumstances would allow BCC to reap a considerable profit.\n\nWhich of the following, if true, most calls in question the argument that BCC will make a large profit from this contract with Megalimpet?'), ('GMATQA', '(A) All the carpets will have to be transported by train from BCC factory in Louisville, KY, to Megalimpet’s locations from coast to coast.'), ('GMATQB', '(B) BCC has already supplied carpets to a number of restaurant chains, and some of those spaces are as large as Megalimpet’s largest office spaces.\n\n'), ('GMATQC', '(C) The carpet installation teams will have to cut different sizes of the carpets for the different size office suites in the Megalimpet buildings.'), ('GMATQD', '(D) The material in BCC carpets degrades rapidly when it comes into contact with standard toner, found in most laser printers and photocopiers; the degraded sections are unsightly and smell bad, so they often need to be replaced.'), ('GMATQE', '(E) The next competing bid after BCC’s was 50% higher than BCC’s bid\n\n'), ('GMATAs', 'd'), ('GRE', '2)The median house value in Butlerville has fallen significantly in the last few months. Nonetheless, the number of homes sold has been at its lowest level in seven years.\n\nWhich of the following best explains the discrepancy?'), ('GREQA', '(A) The value of homes is not the only determinant of whether a house will be sold.'), ('GREQB', '(B)The neighboring city of Jacksonburg has seen a recent surge in home sales.'), ('GREQC', '(C)The Butlerville economy is struggling and the unemployment rate has reached historic rates.'), ('GREQD', '(D)Analysts predict that the number of homes sold will increasing in the coming year.'), ('GREQE', '(E)Homes priced over a million dollars have seen the sharpest decline in sales.'), ('GREA', 'c'), ('LSAT', '2) Laird: Pure research provides us with new technologies that contribute to saving lives. Even more worthwhile than this, however, is its role in expanding our knowledge and providing new, unexplored ideas.\n\nKim: Your priorities are mistaken. Saving lives is what counts most of all. Without pure research, medicine would not be as advanced as it is.\n\nLaird and Kim disagree on whether pure research...'), ('LSATQA', '(A)derives its significance in part from its providing new technologies'), ('LSATQB', '(B)expands the boundaries of our knowledge of medicine'), ('LSATQC', '(C)should have the saving of human lives as an important goal'), ('LSATQD', '(D)has its most valuable achievements in medical applications'), ('LSATQE', '(E)has any value apart from its role in providing new technologies to save lives'), ('LSATAs', 'd')]),
            OrderedDict([('GMAT', '3)\xa0A minor league baseball franchise experienced a drop in attendance this week after they suffered three losses by margins of ten runs or more last week. \xa0Many spectators of those games wrote letters to the editors of the local sporting news, complaining of the poor play of the team in those three losses. \xa0Nevertheless, the front office of this baseball franchise maintains that the team’s poor play in those three losses has nothing to do with this week’s decline in attendance.'), ('GMATQA', '(A) The\xa0spectators who wrote letters to the local sporting news were long-standing fans of this minor league baseball team.'), ('GMATQB', '(B) Many\xa0minor league baseball franchises attribute a drop in attendance to the quality of play of the team only after a string of losses.'), ('GMATQC', '(C) Other\xa0minor league teams in that region of the state reported a similar drop in attendance this week.'), ('GMATQD', '(D) This was\xa0not the first time this team suffered multiple lopsided losses in a single week, prompting similar letters to the local sporting news.'), ('GMATQE', '(E) This\xa0minor league team is over four hours from the closest major league team, so many of the minor league team’s fans do not often attend major league games.'), ('GMATAs', 'c'), ('GRE', "3) Recently, an unusually high number of dolphins have been found dead of infectious diseases, and most of these had abnormally high tissue concentrations of certain compounds that, even in low concentrations, reduce dolphins' resistance to infection. The only source of these compounds in the dolphins' environment is boat paint.  Therefore, since dolphins rid their bodies of the compounds rapidly once exposure ceases, their mortality rate should decline rapidly if such boat paints are banned.\n\nWhich of the following, if true, most strengthens the argument? \n\n"), ('GREQA', '(A) The levels of the compounds typically used in boat paints today are lower than they were in boat paints manufactured a decade ago.'), ('GREQB', '(B) In high concentrations, the compounds are toxic to many types of marine animals.'), ('GREQC', '(C)The compounds break down into harmless substances after a few months of exposure to water or air. '), ('GREQD', '(D)High tissue levels of the compounds have recently been found in some marine animals, but there is no recocrd of any of those animals dying in unusually large numbers rececntly '), ('GREQE', "(E)The compounds do not leach out of the boat paint if the paint is applied exactly in accordance with the manufacturer's directions. "), ('GREA', 'c'), ('LSAT', '3)The supernova event of 1987 is interesting in that there is still no evidence of the neutron star that current theory says should have remained after a supernova of that size. This is in spite of the fact that many of the most sensitive instruments ever developed have searched for the tell-tale pulse of radiation that neutron stars emit. Thus, current theory is wrong in claiming that supernovas of a certain size always produce neutron stars.\n\nWhich one of the following, if true, most strengthens the argument?'), ('LSATQA', '(A)Most supernova remnants that astronomers have detected have a neutron star nearby.'), ('LSATQB', '(B)Sensitive astronomical instruments have detected neutron stars much farther away than the location of the 1987 supernova.'), ('LSATQC', '(C)The supernova of 1987 was the first that scientists were able to observe in progress.'), ('LSATQD', '(D)Several important features of the 1987 supernova are correctly predicted by the current theory.'), ('LSATQE', '(E)Some neutron stars are known to have come into existence by a cause other than a supernova explosion.'), ('LSATAs', 'b')]),
            OrderedDict([('GMAT', '4)\xa0In a few recent cases, some teenagers with advanced programming abilities used a new programming language, FANTOD, to hack into ETS and change their own SAT scores. \xa0All of the teenagers convicted of this crime were highly skilled in programming FANTOD. \xa0In light of these cases, some colleges have discounted the official SAT scores of applicants with a knowledge of FANTOD, and have required them to take special admission tests in supervised conditions on their own campuses.'), ('GMATQA', '(A) Most people who learn to program in FANTOD do so to commit some kind of hacking.'), ('GMATQB', '(B) Colleges should rely on their own admissions tests instead of the SATs'), ('GMATQC', '(C) Some students with knowledge of FANTOD are possibly placed at a disadvantage in the college admission process.'), ('GMATQD', '(D) Students who learn FANTOD tend to have much lower SAT scores than do their peers.'), ('GMATQE', '(E) Some colleges have not set any special requirements for applicants who have demonstrated knowledge of FANTOD'), ('GMATAs', 'c'), ('GRE', "4) Extensive housing is underway in Pataska Forest, the habitat of a large population of deer. Because deer feed at the edges of the forests, these deer will be attracted to the spaces alongside the new roads. Being cut through Pataska Forest to serve the new residential areas. Consequently, once the housing is occupied, the annual number of the forest's deer hit by cars will be much higher than before construction started. \n\nWhich of the following is an assumption on which the argument depends?"), ('GREQA', '(A)The number of deer hit by commercial vehicles will not increase significantly when the housing is occupied.'), ('GREQB', '(B)Deer will be as attracted to the forest edge around new houses as to the forest edge alongside roads.'), ('GREQC', '(C)In past years, the annual number of deer that have been hit by cars on existing roads through Pataska Forest has been very low.'), ('GREQD', '(D) The development will leave sufficient forest to sustain a signiificant population of deer.'), ('GREQE', '(E)No deer hunting will be allowed in Pataska Forest when the housing is occupied. '), ('GREA', 'd'), ('LSAT', '4)Political scientist: As a political system, democracy does not promote political freedom. There are historical examples of democracies that ultimately resulted in some of the most oppressive societies. Likewise, there have been enlightened despotisms and oligarchies that have provided a remarkable level of political freedom to their subjects.\n\nThe reasoning in the political scientist’s argument is flawed because it...'), ('LSATQA', '(A)confuses the conditions necessary for political freedom with the conditions sufficient to bring it about  '), ('LSATQB', '(B)fails to consider that a substantial increase in the level of political freedom might cause a society to become more democratic'), ('LSATQC', '(C)appeals to historical examples that are irrelevant to the causal claim being made'), ('LSATQD', '(D)overlooks the possibility that democracy promotes political freedom without being necessary or sufficient by itself to produce it'), ('LSATQE', '(E)bases its historical case on a personal point of view'), ('LSATAs', 'd')]),
            OrderedDict([('GMAT', '5)\xa0In the twentieth century, the visual arts have embarked on major experimentation, from cubism to expressionism. \xa0While tastes always vary, there are certainly some people who find beautiful objects of each of the art movements of the first half of the twentieth century. \xa0In the latter half of the twentieth century, though, most works are so abstract or shocking that neither the critic nor the general public uses the word “beautiful” to describe them: indeed, sometimes late twentieth-century artists have, as one of their expressed goals, the creation of a work that no one could find beautiful. \xa0Whatever these artists are creating may be intellectually engaging at some level, but it is no longer art.'), ('GMATQA', '(A) Art critics generally have a different appraisal of a work of art than does the general public.'), ('GMATQB', '(B) The meaning of any work of art is defined entirely by the ideas of the artist who created it.'), ('GMATQC', '(C) Beauty is a defining quality of art.'), ('GMATQD', '(D) All art movements of the latter half of the twentieth century are responses to the movements of the first half of the century.'), ('GMATQE', '(E) It is not possible for any work to be simultaneously beautiful and intellectually engaging.'), ('GMATAs', 'c'), ('GRE', '5)The Malbec grape, originally grown in France, has become the main varietal in Argentina. This is surprising because most Malbec grown in Argentina is grown at high altitudes, whereas the Malbec grape once was grown at low altitudes. Therefore, Argentinian winegrowers should grow the Malbec grape at low elevations.\n\nWhich of the following, if true, would most weaken the conclusion of the argument?'), ('GREQA', '(A)The Bordeaux grape is the most popular grape in France, but is rarely, if ever, grown in Argentina.'), ('GREQB', '(B)Some varietals are unable to grow at high altitudes. '), ('GREQC', '(C)The soil at high altitudes is filled with nutrients that help the Malbec grape grow. '), ('GREQD', '(D) The Malbec vine is susceptible to phylloxera, a plant louse that only growss at low altitudes. '), ('GREQE', '(E)Malbec has recently enjoyed a surge in popularity, and can be found in many different countries. '), ('GREA', None), ('LSAT', '5) Journalist: To reconcile the need for profits sufficient to support new drug research with the moral imperative to provide medicines to those who most need them but cannot afford them, some pharmaceutical companies feel justified in selling a drug in rich nations at one price and in poor nations at a much lower price. But this practice is unjustified. A nation with a low average income may still have a substantial middle class better able to pay for new drugs than are many of the poorer citizens of an overall wealthier nation.\n\nWhich one of the following principles, if valid, most helps to justify the journalist’s reasoning?'), ('LSATQA', '(A)People who are ill deserve more consideration than do healthy people, regardless of their relative socioeconomic positions.'), ('LSATQB', '(B)Wealthy institutions have an obligation to expend at least some of their resources to assist those incapable of assisting themselves.\n'), ('LSATQC', '(C)Whether one deserves special consideration depends on one’s needs rather than on characteristics of the society to which one belongs.'), ('LSATQD', '(D)The people in wealthy nations should not have better access to health care than do the people in poorer nations.'), ('LSATQE', '(E)Unequal access to health care is more unfair than an unequal distribution of wealth.'), ('LSATAs', 'c')]),
            OrderedDict([('GMAT', '1)\xa0The National Farm Administration (NFA) has been concerned over the last decade with the struggles of barley growers.\nPlan: In an effort to support these barley growers, two years ago, the NFA began a program of sending them, each autumn, a free special mix of fertilizer and enzymes designed to multiply barley yield, to be applied the following spring during first growth. \xa0This mix had been stunningly successful in multiplying the yield of barley in laboratory conditions.\nResults: Most barley growers reported little change in their economic status over this two year period.\n\nFurther information: All barley growers received the shipments, and all used them. \xa0Weather conditions have been fair to optimal for barley growth over the past two years.\n\nIn light of the further information, which of the following, if true, does most to explain the result that followed the implementation of the plan?'), ('GMATQA', '(A) During these two years, most of the barley growers reported using no other fertilizer besides the special mix sent by the government'), ('GMATQB', '(B) The trucks that drove the special mix from the depot in Wisconsin to the individual farms sometime took as much as 4 or 5 days.'), ('GMATQC', '(C) Some of the enzymes in the special mix multiply the growth of a bacteria that feeds on the young barley plants.'), ('GMATQD', '(D) This program was implemented at a time when more than half of barley growers nationwide were reported barely breaking even in their yearly expenses.'), ('GMATQE', '(E) This was the second such NFA program to aid barley growers; the first one, 14 years ago, was started with high hopes, but did little to change their situation.'), ('GMATAs', 'c'), ('GRE', '1) The Green Peas Grocery Store in the remote wealthy enclave of Luxville charges more than the Green Peas Grocery Store in Oak City charges for the same items. Clearly, on any given item, the Green Peas grocery franchise is taking advantage of its location in Luxville to reap higher profits on that item.\n\nIn evaluating the argument, it would be most useful to compare'), ('GREQA', '(A) the selection of specialty items in the Oak City location with the selection of specialty items in the Luxville location.'), ('GREQB', '(B)the cost of transporting merchandise to the Oak City location with the comparable cost to the Luxville location.'), ('GREQC', '(C) the average cost of the same or comparable items at other grocery stores in Oak City with the average cost at other stores in Luxville.'), ('GREQD', '(D)the percent of average household income spent on groceries in Oak City with the comparable percentage in Luxville.'), ('GREQE', '(E) the cost of these items in Oak City and in Luxville with the cost at other Green Peas stores throughout the state.'), ('GREA', 'b'), ('LSAT', '1)Several critics have claimed that any contemporary poet who writes formal poetry—poetry that is rhymed and metered—is performing a politically conservative act. This is plainly false. Consider Molly Peacock and Marilyn Hacker, two contemporary poets whose poetry is almost exclusively formal and yet who are themselves politically progressive feminists.\n\nThe conclusion drawn above follows logically if which one of the following is assumed?'), ('LSATQA', '(A) No one who is a feminist is also politically conservative.'), ('LSATQB', '(B)No poet who writes unrhymed or unmetered poetry is politically conservative.'), ('LSATQC', '(C)No one who is politically progressive is capable of performing a politically conservative act'), ('LSATQD', '(D)Anyone who sometimes writes poetry that is not politically conservative never writes poetry that is politically conservative.'), ('LSATQE', '(E)The content of a poet’s work, not the work’s form, is the most decisive factor in determining what political consequences, if any, the work will have.'), ('LSATAs', 'c')]),
            OrderedDict([('GMAT', "2) Linda: In the 1800s, it was found that one in every six women who gave birth in hospitals died of a fever they had contracted after delivering the child and that the mortality was not as high if they gave birth at home with the help of a mid wife. It was found that the doctors had a poorer sense of hygiene and that their dirty hands and instruments were leading to pathogens entering a woman's bloodstream. Thankfully, hygienic conditions today are much better and women are safer.\n\nFiona: But doctors today are so overworked that a number of doctors, while aware of the need for better hygiene, barely find the time to wash their hands. The likelihood of infections caused by doctors is probably not any better.\n\nWhich of the following can be used by Fiona to further establish that Linda need not be correct in her reasoning?"), ('GMATQA', '(A) A nationwide survey found that doctors, especially experienced ones, are more prone to the belief that they could not possibly be carrying pathogens.'), ('GMATQB', '(B) It is reported that around 50,000 people die every year in our country from hospital acquired infections.'), ('GMATQC', '(C ) Compulsory hand cleansing is strictly adhered to by all doctors and nurses before every major surgical procedure.'), ('GMATQD', '(D) During a study, doctors handling newborn babies self reported a hand cleansing rate of 90℅.'), ('GMATQE', '(E ) Nurses are not any better than doctors in adhering to strict cleansing schedules, especially when busy.'), ('GMATAs', 'a'), ('GRE', '2) In the years since the city of London imposed strict air-pollution regulations on local industry, the number of bird species seen in and around London has increased dramatically. Similar air-pollution rules should be imposed in other major cities.\n\nEach of the following is an assumption made in the argument above EXCEPT:'), ('GREQA', '(A) In most major cities, air-pollution problems are caused almost entirely by local industry.'), ('GREQB', '(B) Air-pollution regulations on industry have a significant impact on the quality of the air. '), ('GREQC', '(C)The air-pollution problems of other major cities are basically similar to those once suffered by London. '), ('GREQD', '(D)An increase in the number of bird species in and around a city is desirable.'), ('GREQE', '(E)The increased sightings of bird species in and around London reflect an actual increase in the number of species in the area. '), ('GREA', 'a'), ('LSAT', '2) About two million years ago, lava dammed up a river in western Asia and caused a small lake to form. The lake existed for about half a million years. Bones of an early human ancestor were recently found in the ancient lake-bottom sediments that lie on top of the layer of lava. Therefore, ancestors of modern humans lived in western Asia between two million and one-and-a-half million years ago.\n\nWhich one of the following is an assumption required by the argument?'), ('LSATQA', '(A)There were no other lakes in the immediate area before the lava dammed up the river.'), ('LSATQB', '(B)The lake contained fish that the human ancestors could have used for food.'), ('LSATQC', '(C)The lava that lay under the lake-bottom sediments did not contain any human fossil remains.'), ('LSATQD', '(D)The lake was deep enough that a person could drown in it.'), ('LSATQE', '(E)The bones were already in the sediments by the time the lake dried up.'), ('LSATAs', 'e')]),
            OrderedDict([('GMAT', '3) The Americans with disabilities act (ADA) was designed to ensure that there is no discrimination against and unfair termination of differently-abled workers in the workplace. However, after the act was introduced, there has been a marked increase in unemployment among the differently-abled.\n\nWhich of the following best explains this seeming discrepancy?'), ('GMATQA', '(A) A number of differently-abled people chose not to work'), ('GMATQB', '(B)Not willing to deal with the issues of workplace discrimination of the differently-abled, several companies recruited fewer of them in the first place'), ('GMATQC', '(C)Knowing that the act was about to be enforced, companies terminated some of the differently-abled while they had a chance'), ('GMATQD', '(D)There was no act introduced that would guarantee a job for the differently-abled'), ('GMATQE', '(E)The unemployment among the able-bodied has remained consistently high'), ('GMATAs', 'b'), ('GRE', '3) The ancient city of Cephesa was not buried by an eruption of Mt. Amnos is A.D. 310, as some believe. The eruption in the year 310 damaged the city, but it did not destroy it. Cephesa survived for another century before it finally met its destruction in another eruption around A.D. 415. \n\nWhich of the following, if true, would most strengthen the author’s claim that the city of Cephesa was not buried by the eruption of Mt. Amnos in A.D. 310?'), ('GREQA', '(A)The city of Cephesa is mentioned in a historical work known to have been written in A.D. 400.'), ('GREQB', '(B)Coins bearing the image of an emperor who lived around A.D. 410 have been discovered in the ruins of Cephesa, which were preserved by the cinders and ashes that buried the city. '), ('GREQC', '(C)Geological evidence shows the erruption of Mt. Amnos in A.D. 415 deposited a 10-foot layer of lava on the city of Cephesa  '), ('GREQD', '(D) Artworks from the city of Cephesa have been found in the ruins of another city known to have been desrtoyed in A.D. 420. '), ('GREQE', '(E)A hostorical work written in A.D. 430 refers to the eruption of Mt. Amnos in A.D. 415'), ('GREA', 'b'), ('LSAT', '3)In jurisdictions where use of headlights is optional when visibility is good, drivers who use headlights at all times are less likely to be involved in a collision than are drivers who use headlights only when visibility is poor. Yet Highway Safety Department records show that making use of headlights mandatory at all times does nothing to reduce the overall number of collisions.\n\nWhich one of the following, if true, most helps to resolve the apparent discrepancy in the information above?'), ('LSATQA', '(A)In jurisdictions where use of headlights is optional when visibility is good, one driver in four uses headlights for daytime driving in good weather.'), ('LSATQB', '(B)A law making use of headlights mandatory at all times is not especially difficult to enforce.'), ('LSATQC', '(C)Only very careful drivers use headlights when their use is not legally required.'), ('LSATQD', '(D)There are some jurisdictions in which it is illegal to use headlights when visibility is good.'), ('LSATQE', '(E)The jurisdictions where use of headlights is mandatory at all times are those where daytime visibility is frequently poor.'), ('LSATAs', 'c')]),
            OrderedDict([('GMAT', '4) In an effort to curb drug abuse, the government has imposed strict laws to prosecute the dealers. However, such an initiative is unlikely to be effective. Prosecuting dealers will lead to a shortage of drugs. At the same time, because no efforts are being taken to curb demand, drugs will be sold at a premium, attracting more people to the very remunerative job of drug dealing. Therefore, to effectively reduce drug abuse, the government will have to prosecute the drug users and not dealers.\n\nWhich of the following is the most relevant information in evaluating the credibility of the argument?'), ('GMATQA', '(A)Whether efforts have been successfully taken in any other country to regulate drug users.'), ('GMATQB', '(B)Whether the payoff from selling drugs outweighs the severity of the punishment'), ('GMATQC', '(C)Whether drugs will continue to be sold at a premium when there are dealers in the market again'), ('GMATQD', '(D)Whether the majority of the users will be willing to pay a premium to continue to use the drugs'), ('GMATQE', '(E)Whether the government will be able to keep track of new dealers as and when they enter the market'), ('GMATAs', 'd'), ('GRE', '4) The burden of maintaining the U.S. highway system falls disproportionately on the trucking industry. Trucks represent only about 10 percent of the vehicles on U.S. roads. Yet road use taxes assessed on trucks amount to almost half the taxes paid for highway upkeep and repair.\n\nWhich of the following, if true, would most weaken the argument above?'), ('GREQA', '(A)The trucking industry has enjoyed record after-tax profits in three of the past four years. '), ('GREQB', '(B) Because of their weight, trucks cause over 50 percent of the damage sustained by highway surfaces each year. '), ('GREQC', '(C) Without an economically viable trucking industry, the cost of goods in the United States would rise significantly.'), ('GREQD', '(D) Road use taxes paid by trucking companies have decreased by 3 percent over the past five years.'), ('GREQE', '(E)Due to years of neglect, U.S. highways today are badly in need of major repairs and rebuilding. '), ('GREA', 'b'), ('LSAT', '4)The Venetian Renaissance painter Vittore Carpaccio used sumptuous reds in most of his paintings. Since the recently discovered Venetian Renaissance painting Erato Declaiming contains notable sumptuous reds, it is probably by Carpaccio.\n\nWhich one of the following contains a pattern of flawed reasoning most similar to that in the argument above?'), ('LSATQA', "(A)Most Renaissance painters worked in a single medium, either tempera or oil. Since the Renaissance painting Calypso's Bower is in oil, its painter probably always used oil."), ('LSATQB', '(B)In Italian Renaissance painting, the single most common subject was the Virgin and Child, so the single most common subject in Western art probably is also the Virgin and Child.'), ('LSATQC', '(C)Works of art in the Renaissance were mostly commissioned by patrons, so the Renaissance work The Dances of Terpsichore was probably commissioned by a patron.'), ('LSATQD', '(D)The anonymous painting St. Sebastian is probably an early Florentine painting since it is in tempera, and most early Florentine paintings were in tempera.'), ('LSATQE', '(E)Since late-Renaissance paintings were mostly in oil, the Venetian late-Renaissance painter Arnoldi, whose works are now lost, probably painted in oil.'), ('LSATAs', 'd')]),
            OrderedDict([('GMAT', "5) Alan: In the last 15 years, most of the criminals who were convicted of theft or murder were from the lower income classes and had not completed high school. Therefore, the government has to spend more money on reducing poverty and increase funding to education. Because terrorism is the most severe of all crimes, such measures would bring down overall crime rate and reduce threat from terrorism.\n\nDylan: A study that was conducted in a country known to produce a number of terrorists showed that on average the terrorists were better educated than the overall population and that they did not necessarily come from lower income classes. This is probably because crimes such as theft are committed for personal gain while terrorism is for political or religious gain.\n\nWhich of the following best describes Dylan's response to Alan?"), ('GMATQA', '(A)Dylan changes the direction of the argument entirely by discussing the scenario in a different country'), ('GMATQB', "(B)Dylan partially agrees with Alan's reasoning but refutes his recommendation to the government"), ('GMATQC', '(C)Dylan converts a causal argument made by Alan into a generalization applicable universally'), ('GMATQD', "(D)Dylan challenges Alan's reasoning by explaining why two situations that Alan perceives as similar are not"), ('GMATQE', '(E)While Alan arrives at a conclusion by drawing an analogy, Dylan arrives at the same conclusion by refuting the analogy'), ('GMATAs', 'd'), ('GRE', '5)No nation can long survive unless its people are united by a common tongue. For proof, we need only consider Canada, which is being torn asunder by conflicts between French-speaking Quebec and the other provinces, which are dominated by English speakers.\n\nWhich of the following, if true, most effectively challenges the author’s conclusion?'), ('GREQA', '(A)Conflicts over language have led to violent clashes between the Basque-speaking minority in Spain and the Spanish-speaking majority. '), ('GREQB', '(B)Proposals to declare English the official language of the United States have met with resistance from members of Hispanic and other minority groups. '), ('GREQC', '(C)Economic and political differences, along with linguistic ones, have contributed to the provincial conflicts in Canada.'), ('GREQD', '(D)The public of India, in existence since 1948, has a population that speaks hundreds of different, though related, languages. '), ('GREQE', '(E)Switzerland has survived for nearly a thousand years as a home for speakers of three different languages. '), ('GREA', 'e'), ('LSAT', '5)The postal service of Fairfield is badly mismanaged. Thirty years ago, a first-class letter delivery cost only three cents. The price has increased sevenfold since then while the reliability and speed of the delivery have declined.'), ('LSATQA', '(A)The volume of mail handled by the postal service has increased dramatically over the last thirty years.'), ('LSATQB', '(B)Unprecedented increases in the cost of fuel for trucks and planes have put severe upward pressures on postal delivery costs.'), ('LSATQC', '(C) Private delivery services usually charge more than the postal service does for comparable delivery services.'), ('LSATQD', '(D) The average delivery time for a first-class letter three decades ago was slightly longer than it is today.'), ('LSATQE', '(E)The average level of consumer prices overall has increased fourfold over the last thirty years.'), ('LSATAs', 'a')]),
            OrderedDict([('GMAT', '1)During the last 50 years in England, the national football team has had at least 60℅ of its players born during the months January to March. Similarly, in Germany, at least 50℅ of the team has been born during the first three months of the year. In fact, this statistic holds true for most European countries. This shows that in most European countries, parents with kids born early in the year are more likely to encourage a football career.\n\nWhich of the following best explains why the conclusion need not be the best explanation for the statistic?'), ('GMATQA', '(A)Of the remaining members, 60℅ or more tend to be born between the months of April and June.'), ('GMATQB', '(B)Parents of kids born in the second half of the year have displayed a measurable intent to promote scholarly careers'), ('GMATQC', '(C)The age cut-off for kids to try out for a team in most European countries is calculated as on December 31 of any year and older the kid during trials, greater the chances of getting the right opportunities.'), ('GMATQD', '(D)The school year usually begins in April in most European countries and many parents are known to encourage students to work on their academics and not sports during the school year.'), ('GMATQE', '(E)During the last 50 years, on average 30℅ of the kids have been born during the first three months of the year.\n'), ('GMATAs', 'c'), ('GRE', '1)As an experienced labor organizer and the former head of one of the nation’s most powerful labor unions, Grayson is an excellent choice to chair the new council on business-labor relations.\n\nWhich of the following, if true, would most strengthen the conclusion above?'), ('GREQA', "(A) The new council must have the support of the nation's labor leaders if it is to succeed. "), ('GREQB', '(B)During his years as a labor leader, Grayson established a record of good relations with business leaders. '), ('GREQC', "(C)The chair of the new council must be a person who can communicate directly with the leaders of the nation's largest labor unions. "), ('GREQD', '(D)Most of the other members of the new council will be representatives of business management interests.'), ('GREQE', '(E) An understanding of the needs and problems of labor is the only quallification necessary for the job of chairing the new council. '), ('GREA', 'e'), ('LSAT', '1)Biologists attached a radio transmitter to one of a number of wolves that had been released earlier in the White River Wilderness Area as part of a relocation project. The biologists hoped to use this wolf to track the movements of the whole pack. Wolves usually range over a wide area in search of prey, and frequently follow the migrations of their prey animals. The biologists were surprised to find that this particular wolf never moved more than five miles away from the location in which it was first tagged.\n\n\nWhich one of the following, if true, would by itself most help to explain the behavior of the wolf tagged by the biologists?'), ('LSATQA', '(A)The area in which the wolves were released was rocky and mountainous, in contrast to the flat, heavily-wooded area from which they were taken. '), ('LSATQB', '(B)The wolf had been tagged and released by the biologists only three miles away from a sheep ranch that provided a large, stable population of prey animals.'), ('LSATQC', '(C)The White River Wilderness Area had supported a population of wolves in past years, but they had been hunted to extinction.'), ('LSATQD', '(D) Although the wolves in the White River Wilderness Area were under government protection, their numbers had been sharply reduced, within a few years of their release, by illegal hunting.'), ('LSATQE', '(E)The wolf captured and tagged by the biologists had split off from the main pack whose movements the biologists had hoped to study, and its movements did not represent those of the main pack.'), ('LSATAs', 'b')]),
            OrderedDict([('GMAT', '2) Studies have established that children who watched 2 more hours of TV on an average daily basis during the first 15 years of their life were 50℅ more likely to be arrested for property crimes in the country. Researchers believe that these studies clearly establish that violence in movies and TV contribute to aggressive behavior in real life. On the other hand, there is no clear evidence that the programs that the kids watched on TV were violent in the first place. Even if we were to accept that TV watching contributed to the increased crime rate, it need not have been because of the nature of the programs. Perhaps, children who watched programs such as Adams and Samson, a funny sit-com about two blundering cops began perceiving all cops as incompetent.\n\nWhat is the role of the underlined sentences?'), ('GMATQA', "(A)The first establishes a theory that the author later clearly refutes while the second presents the author's conclusion"), ('GMATQB', '(B)The first is an interpretation made by researchers that the author contends against and the second provides an alternative explanation for statistical data'), ('GMATQC', "(C)The first is an opinion expressed by someone other than the author and which the author is completely in disagreement with while the second provides the reason for the author's doubt"), ('GMATQD', "(D)The first is a fact supporting the researcher's conclusion while the second is the author's conclusion."), ('GMATQE', '(E)The first is a clearly proven opinion even if the author disagrees with it while the second is an ambiguous opinion that has no supporting data'), ('GMATAs', 'b'), ('GRE', "2) Ronald: According to my analysis of the national economy, housing prices should not increase during the next six months unless interest rates drop significantly.\n\nMark: I disagree. One year ago, when interest rates last fell significantly, housing prices did not increase at all.\n\nIt can be inferred from the conversation above that Mark has interpreted Ronald's statement to mean that "), ('GREQA', '(A)Housing prices will rise only if interest rates fall.'), ('GREQB', '(B)If interest rates fall, housing prices must rise. '), ('GREQC', '(C)Interest rates and housing prices tend to rise and fall together.'), ('GREQD', '(D) Interest rates are the only significant economic factor affecting housing prices. '), ('GREQE', '(E) Interest rates are likely to fall significantly in the next six months. '), ('GREA', 'b'), ('LSAT', '2)As any economist knows, healthy people pose less of an economic burden to society than unhealthy people. Not surprisingly, then, every dollar our state government spends on prenatal care for undocumented immigrants will save taxpayers of this state three dollars.\n\n\nWhich of the following, if true, would best explain why the statistics cited above are not surprising?'), ('LSATQA', '(A)The state’s taxpayers pay for prenatal care of all immigrants.'), ('LSATQB', '(B)Babies born in this state to undocumented immigrant parents are entitled to infant care benefits from the state.'), ('LSATQC', '(C)State benefits for prenatal care serve to promote undocumented immigration.'), ('LSATQD', '(D)Babies whose mothers did not receive prenatal care.are just as healthy as other babies.'), ('LSATQE', '(E)Pregnant women who do not receive prenatal care are more likely to experience health problems than other pregnant women.'), ('LSATAs', 'e')]),
            OrderedDict([('GMAT', "3) During medieval times, the administrative system was organized such that jobs were traditionally held within the same family. The eldest son of the village's blacksmith will take up his father’s business and become the next blacksmith. The other sons would join the army or serve the king in some fashion while the daughters did what their mother did. Although the world has undergone innumerable changes, the dynastic system has not undergone any change whatsoever. Children who have fathers who played major league baseball are 800 times more likely than other kids to become major league players themselves.\n\nWhich of the following best refutes the author's reasoning?"), ('GMATQA', '(A)In countries with a royal family, the eldest son of the king is destined to be the next king.'), ('GMATQB', "(B)The blacksmith's eldest son in a mediaeval village could not choose any other profession even if he wanted to."), ('GMATQC', '(C)A major baseball player will have better knowledge and skills and will be able to guide his son better.'), ('GMATQD', "(D)60℅ of the country's doctors have at least one parent who is a doctor."), ('GMATQE', '(E)It is a proven fact that success in any career is determined more by skill and practice rather than by genetic makeup.'), ('GMATAs', 'b'), ('GRE', '3) It’s time we stopped searching for new statistics to suggest that we are not spending enough on education. In fact, education spending increased 30 percent overall during the last decade.\n\nWhich of the following, if true, would most weaken the argument above. '), ('GREQA', '(A) Despite increased spending on education, enrollment in our elementary and secondary schools declined about 4 percent during the last ten years. '), ('GREQB', '(B) Our spending on gasoline increased more than 100 percent during the last decade. '), ('GREQC', '(C) When adjusted for inflation, our per-pupil expenditure on edcuation this year is less than it was ten years ago. '), ('GREQD', '(D) Eleven other economically developed nations spend more on education than we do.  '), ('GREQE', '(E) The achievement levels of our students have been declining steadily since 1960, and the last decade produced no reversal in this trend. '), ('GREA', 'c'), ('LSAT', '3)Beautiful beaches attract people, no doubt about it. Just look at this city’s beautiful beaches, which are among the most overcrowded beaches in Florida.\n\n\nWhich of the following exhibits a pattern of reasoning most similar to the one exhibited in the argument above?'), ('LSATQA', '(A)Moose and bear usually appear at the same drinking hole at the same time of day. Therefore, moose and bear must grow thirsty at about the same time.'), ('LSATQB', '(B)Children who are scolded severely tend to misbehave.more often than other children. Hence if a child is not scolded severely that child is less likely to misbehave.'), ('LSATQC', '(C)This software program helps increase the work efficiency of its users. As a result, these users have more free time for other activities.'), ('LSATQD', '(D)During warm weather, my dog suffers from fleas more so than during cooler weather. Therefore, fleas must thrive in a warm environment.'), ('LSATQE', '(E)Pesticides are known to cause anemia in some people. However, most anemic people live in regions where pesticides are not commonly used.'), ('LSATAs', 'd')]),
            OrderedDict([('GMAT', '4) A survey conducted recently in the city indicated that most college welfare-aid applicants understate the number of luxury items - such as cars and TVs – that their family owned, in an effort to maximize the amount of aid they can claim from the city. Paradoxically, the same study also found that many applicants claimed that they had running water and a gas connection even when they did not.\n\nWhich of the following best explains the apparent paradox?'), ('GMATQA', '(A)The city does not pay welfare unless the applicants have at least some things working for them'), ('GMATQB', '(B)Claiming that they do not have a car or a TV ensures that the city looks at the applicant more favorably'), ('GMATQC', "(C)While the applicants may be willing to accept that they don't have certain things, they felt embarrassed having to accept that they don't have most things."), ('GMATQD', '(D)Historically, at least 30℅ of the claims have had people understating what they have while only 22℅ overstated what they had.'), ('GMATQE', '(E)The people who understated what they had were not the same people who overstated what they had'), ('GMATAs', 'c'), ('GRE', '4) The U.S. census is not perfect: thousands of Americans probably go uncounted. However, the basic statistical portrait of the nation painted by the census is accurate. Certainly some of the poor go uncounted, particularly the homeless; but some of the rich go uncounted as well, because they are often abroad or traveling between one residence and another.\n\nWhich of the following is an assumption on which the argument above depends?'), ('GREQA', '(A) Both the rich and the poor have personal and economic reasons to avoid being counted by the census. '), ('GREQB', '(B)All Americans may reasonably be classified as either rich or poor. '), ('GREQC', '(C) The percentage of poor Americans uncounted by the census is close to the percentage of rich Americans uncounted. '), ('GREQD', '(D) The number of homeless Americans is approximately equal to the number of rich Americans. '), ('GREQE', '(E)The primary purpose of the census is to analyze the economic status of the American population. '), ('GREA', 'c'), ('LSAT', '4)Two things are true of all good deeds. First, they are accompanied by feelings of satisfaction. Second, if they are publicly known, they elicit general approval.\n\nIf all of the above statements are true, then which of the following cannot also be true?\n\n'), ('LSATQA', '(A)Some publicly known deeds that elicit general approval are not accompanied by feelings of satisfaction.'), ('LSATQB', '(B)Even if they frequently elicit general approval when known publicly, some deeds that are accompanied by feelings of satisfaction are not good deeds.'), ('LSATQC', '(C)Good deeds are good solely because they are accompanied by feelings of satisfaction.'), ('LSATQD', '(D)Every publicly known act that is accompanied by feelings of satisfaction is a good deed.'), ('LSATQE', '(E)Good deeds are good solely because they are accompanied by feelings of satisfaction.'), ('LSATAs', 'a')]),
            OrderedDict([('GMAT', '5) Terrorist attacks invariably lead to tremendous losses in life, property, and morale of a country. The effects of a terrorist attack are not just immediate and can have long-lasting, trickle-down effects as well. The fear, for example, takes a long time to die down. However, some of these repercussions can be beneficial to the country. Take for instance, the recent terrorist attack on our capital city. In the weeks following the attack, the crime rate in the city came down significantly from what it was just before the attack. This must primarily be due to the increased presence of police resources that were moved to the area and is thus an indirect effect of the attack.\n\nWhich of the following options gives one more option as to why the crime rate decreased because of the terrorist attacks?'), ('GMATQA', '(A)The capital city is under increased monitoring leading to quick detection of crimes - many times while the crime is still underway.'), ('GMATQB', '(B)A number of people are frightened because of the terrorist attacks and have fled the capital city.'), ('GMATQC', '(C)There was a recorded decrease in crime rate right after the terrorist attack in almost all cities of the country.'), ('GMATQD', '(D)Intel reports show that the terrorists who pulled off the attack had been committing various other smaller crimes regularly to distract law enforcement from their true purposes.'), ('GMATQE', '(E)The government had initiated schemes to decrease poverty and provide better livelihood for the people just before the terrorist attack.'), ('GMATAs', 'd'), ('GRE', '5) Some commentators complain that a “litigation explosion” in the past decade has led to unreasonably high costs for U.S. businesses by encouraging more product liability suits against manufacturers. However, these complaints are based mainly on myth. Statistics show that the number of successful product liability suits has remained almost the same, and the average sum awarded in damages has grown no faster than the inflation rate.\n\nWhich of the following, if true, would most weaken the argument above?'), ('GREQA', '(A)The number of unsuccessful suits has skyrocketed, imposing huge new legal expenses on businesses. '), ('GREQB', '(B)Several of the largest awards ever made in product liability cases occurred within the last two years. '), ('GREQC', '(C)The rise of the consumer movement has encouraged citizens to seek legal redress for product flaws. '), ('GREQD', '(D) Lawyers often undertake product liability cases on a contingency basis, so their payment is based on the size of the damages awarded.'), ('GREQE', '(E)) Juries often award damages in product liability suits out of emotional sympathy for an injured consumer. '), ('GREA', 'a'), ('LSAT', "5)Many home renters buy their first homes believing that it is clearly more profitable to make mortgage payments than to pay rent. Other costs, such as maintenance, property taxes, and insurance must be factored in, however. All housing expenses together total at least 40% of most homeowners' income.  It is not financially reasonable to spend any more than 30% of income on housing expenses."), ('LSATQA', '(A)A minority of homeowners have reasonable housing expenses'), ('LSATQB', '(B)A majority of renters pay an unreasonable amount for housing expenses'), ('LSATQC', '(C)A majority of homeowners have unreasonable housing expenses'), ('LSATQD', '(D)A minority of homeowners have unreasonable housing expenses'), ('LSATQE', '(E)The combination of property taxes, insurance, and home maintenance costs is greater than mortgage payments for a minority of homeowners'), ('LSATAs', 'd')]),
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            OrderedDict([('GMAT', '2)It seems that medical care is constantly improving and is far better today than it was a few years ago. New medicines are being developed, and at a lower cost. Technological advancements are being made and new treatments are devised. However, hospital care has not improved as much as expected. Most hospitals do not have a large enough ER that can handle a sudden influx of patients and the number of people who die in a hospital due to reasons other than what they got admitted for is staggeringly high.\n\nAll of the following underscore the author’s argument EXCEPT'), ('GMATQA', '(A) Most hospitals require doctors to do so much paperwork that they spend insufficient time on direct patient care.'), ('GMATQB', '(B)Most hospitals recirculate air and therefore, it is very easy for diseases such as anthrax to spread through the hospital.'), ('GMATQC', '(C)In smaller cities, the ambulance service is on a voluntary basis and the response time for calls is much lower than the national average, leading to a higher loss of life.'), ('GMATQD', '(D)A number of doctors in private hospitals are not held accountable by the administration for the loss of patients.'), ('GMATQE', '(E)Doctors in most private hospitals have performance appraisals based on how much money they have brought in for the hospital rather than based on how effectively they treated patients.'), ('GMATAs', 'c'), ('GRE', '2) June is taller than Kristin.\n\nLetty is taller than Maria.\n\nMaria is shorter than Nancy.\n\nKristin and Nancy are exactly the same height.\n\nIf the information above is true, which of the following must also be true? '), ('GREQA', '(A) Letty is taller than Nancy '), ('GREQB', '(B) Letty is taller than June'), ('GREQC', '(C)Kristin is shorter than Letty '), ('GREQD', '(D) June is taller than Maria. '), ('GREQE', '(E)Kristin is shorter than Maria. '), ('GREA', 'd'), ('LSAT', '2)Given\nFewer people go without email with each passing year. Not only are younger and younger children signing up for their own accounts, but the generation that was largely too old and out of touch to have ever had an account is slowly dying. It is entirely likely that no one over the age of 10 will be without an email account within the next ten years.\n\nWhich of the following statements cannot be true based on the above statement?'), ('LSATQA', '(A)Email is a pervasive form of communication that is used by many different people.'), ('LSATQB', '(B)Email is used differently by specific age groups, leading to a diverse pattern of email usage.'), ('LSATQC', '(C)Many younger people use many more communication methods than strictly email.'), ('LSATQD', '(D)Older generations are much more likely than younger ones to adopt new forms of communication.'), ('LSATQE', '(E)Older generations find email to be an awkward form of communication compared to letters and the telephone.'), ('LSATAs', 'd')]),
            OrderedDict([('GMAT', "3) Industrial and automobile pollution have long been thought to contribute to global warming. However, researchers have identified that the carbon dioxide and carbon monoxide released into the atmosphere are not as potent as the methane emitted by cud-chewing animals such as cows when they fart or belch. Therefore, if you drive a hybrid electric car to the grocery, any favor that you would do to the environment would be offset if you end up buying beef.\n\nWhich of the following best describes the author's reasoning?"), ('GMATQA', '(A)The author establishes a point by drawing an analogy'), ('GMATQB', '(B)The author disproves a popular notion by providing evidence that is contrary to it'), ('GMATQC', '(C)The author presents a new theory in response to an existing well-established theory'), ('GMATQD', '(D)The author uses an illustration to support a new school of thought that is contrary to a popular school of thought'), ('GMATQE', '(E)The author makes a comparison between two theories by providing an example\n'), ('GMATAs', 'd'), ('GRE', '3) The upcoming presidential election in the West African republic of Ganelon is of grave concern to the U.S. State Department. Ganelon presently has strong political and military ties to the United States. However, the Socialist party is widely expected to win the election, leading to fears that Ganelon will soon break away from the pro-American bloc and adopt a nonaligned or openly anti-American stance.\n\nWhich of the following is an assumption made in the passage above?'), ('GREQA', '(A) A Socialist party government in Ganelon is more likely to oppose the United States than is a non-Socialist party government. '), ('GREQB', "(B) The people of the United States recognize their nation's interest in the political stability of West Africa."), ('GREQC', '(C) A weakening of U.S. political ties with Ganelon could have serious consequences for U.S. relations with other African nations. '), ('GREQD', "(D) The Sociallist party leaders in Ganelon believe that their nation's interests would best be served by an alliance with anti-American forces. "), ('GREQE', '(E)The Socialist party will win the upcoming election in Ganelon. '), ('GREA', 'a'), ('LSAT', '3)While tablet computer sales have increased steadily over the last 2 years, we can expect a reversal of this trend in the near future. Since they became popular in the marketplace 5 years ago, 60 percent of tablet computers sold have been purchased by people from 18 to 25 years of age, and the number of people in this age group is expected to decline steadily over the next 15 years.\n\nWhich of the following, if true, would most seriously weaken the argument?'), ('LSATQA', '(A)The number of different types of tablet computers available is likely to increase in the near future.'), ('LSATQB', '(B) New technology will make new computing options available over the next 15 years.'), ('LSATQC', '(C)Sales of tablet computers to small businesses has declined over the past 2 years.\n\n'), ('LSATQD', '(D)Most purchasers of tablet computers over the past 2 years have been over the age of 25.\n\n'), ('LSATQE', '(E)Most people under the age of 18 have never purchased a tablet computer.\n\n'), ('LSATAs', 'd')]),
            OrderedDict([('GMAT', '4) There are several scientific studies and research findings that are constantly discussed and publicized in the news media. Some of these are contrary to other research studies that are published. This conflict in information makes people believe that either science is inaccurate or that they can ‘choose’ which scientific result they want to believe in. However, neither of these beliefs is accurate. Science is not inaccurate or subjective. Most of the time, scientific studies show inconsistent results either because of inaccuracies in methodology adopted or because of misrepresentation of actual results by the news media. For example, a recent study done on just 15 women showed that eating chocolate was not necessarily harmful during pregnancy and the media reported that chocolate was actually beneficial to the foetus.\n\nWhich of the following best further corroborate the author’s argument?'), ('GMATQA', '(A) A study result that shows that the effect of automobile pollution on global warming is marginal.'), ('GMATQB', '(B) An unverified study gaining popularity because it seemingly showed that red wine reduces the risk of cancer on a very small control group.'), ('GMATQC', '(C)A new study that further collaborates an earlier finding that the consumption of some types of berries lower the risk of heart failure.'), ('GMATQD', '(D)The news media highlighting the fact that a study had clearly proven that effects of certain drugs on rats need not be the same as on humans.'), ('GMATQE', '(E)People not knowing what to believe because one study shows that a certain disease is caused by genetic factors, while another shows that it also caused by lifestyle factors.'), ('GMATAs', 'b'), ('GRE', "4) Last year, Mayor Stephens established a special law-enforcement task force with the avowed mission of eradicating corruption in city government. The mayor's handpicked task force has now begun prosecuting a dozen city officials. Since all of these officials were appointed  by Mayor Bixby, Mayor Stephens' predecessor and longtime political foe, it is clear that those being targeted because of their political affiliations. \n\nWhich of the following, if true, most weakens the editorial's argument?"), ('GREQA', '(A) Complaints of official corruption in city government have decreased since the anticorruption task force began operating.'), ('GREQB', "(B) Former mayor Bixby did not publicly oppose Mayor Stephens' establishment of the anticorruption task force. "), ('GREQC', '(C)Almost all of the officials who have served in city government for any length of time are appointees of Mayor Bixby. '), ('GREQD', '(D) All of the members of the anticorruption task force had other jobs in city government before the task force was formed. '), ('GREQE', "(E) During the last mayoral election campaign, then-Mayor Bixby hotly disputed the current mayor's claim that there was widespread corruptioniii in city government. "), ('GREA', 'c'), ('LSAT', '4)Those who go to college are wasting their money. The vast majority of college graduates are employed in fields that do not require their specializations, while others are unemployed. Further, contrary to common belief, the average college graduate is not paid substantially more than the average worker who is not a college graduate.\n\nWhich of the following, if true, most weakens the argument?'), ('LSATQA', '(A)There are more college graduates now than at any other time in history\n\n'), ('LSATQB', '(B)College graduates are more likely to be employed than those who are not college graduates\n\n'), ('LSATQC', '(C)Certain professions highly prefer or require a college degree as a condition of employment, while no employers prefer an employee not be a college graduate\n\n'), ('LSATQD', '(D)Very few college graduates say they regret attending college'), ('LSATQE', '(E)The average college graduate has more debt than the average non graduate\n\n'), ('LSATAs', 'b')]),
            OrderedDict([('GMAT', '5)John: A study has identified that many soldiers received less-than-honorable discharges from the army due to charges of misconduct that can actually be attributed to conditions such as PTSD and traumatic brain injury. This is a military practice that is unfair and must be avoided. The army must take responsibility for the same and stop discharging their soldiers dishonorably.\n\nChristy: While it is true that it is unfair to the soldiers to be discharged so from the army, it has also been found that there are no sufficient measures or systems that have been created to identify whether the misconduct was due to trauma or due to other reasons. Moreover, to enforce discipline in the ranks, it is important for the army to follow a uniform rule for all the soldiers.\n\nWhich of the following statements can Christy further add to her argument?'), ('GMATQA', '(A)If there is no proper system, then the army should have developed a proper system by now.'), ('GMATQB', '(B)Complete elimination of dishonorable discharges would make it more difficult for the army to monitor and evaluate the soldiers.'), ('GMATQC', '(C)It is not the army’s fault that there has been no system developed to help those with PTSD'), ('GMATQD', '(D)Studies have also found that showing consideration for some soldiers has led to others taking advantage, indirectly promoting misconduct.'), ('GMATQE', '(E)There have been instances when the army has been able to identify the reasons for the misconduct and acted accordingly.'), ('GMATAs', 'd'), ('GRE', '5) Coursemetrics, a privately owned on-line education platform, recently offered courses targeted to college students. In order to ensure the validity and effectiveness of the video lessons, Coursemetrics selected notable professors from across the country to evaluate the content of the videos. Since Coursemetrics only made part of its curriculum those videos in which more than 80% of the professors rated as “good”, the courses will be popular amongst college students in general.\n\nWhich of the following is an assumption on which the argument depends?'), ('GREQA', '(A) A few college students tested the product before it was released to the public and almost all of them rated the product lower than did the college professors.'), ('GREQB', '(B) Coursemetrics initially launched a successful product for high school students learning algebra.'), ('GREQC', '(C) Every professor who tested Coursemetrics gave at least one video a rating of “Good”'), ('GREQD', '(D) Coursemetrics selected professors from a variety of subjects.'), ('GREQE', '(E) The courses offered by Coursemetrics are ones in which college students struggle and seek outside help.'), ('GREA', 'c'), ('LSAT', '5)Foreign trade with other countries will improve quickly if we amend the Constitution so that the President can execute trade agreements with other countries without the current rule requiring a 2/3 approval of the Senate. This is because obtaining a 2/3 vote in the Senate allows extensive debate regarding the merits of a prospective trade agreement, but the process to obtain this 2/3 vote is extremely slow and cumbersome. \n\nWhich one of the following, if true, most seriously weakens the argument?'), ('LSATQA', '(A)Companies make decisions based on proposed free-trade agreements.\n\n'), ('LSATQB', '(B)The process to obtain a 2/3 vote in the Senate, which consists of thorough research and deliberation, prevents the implementation of trade agreements that would have negative effects on trade. \n\n'), ('LSATQC', '(C)Some improvements in trade are due to other factors besides trade agreements.  \n\n'), ('LSATQD', '(D)Most senators would refuse to support an amendment to the Constitution that would limit their power.\n\n'), ('LSATQE', '(E)Some senators are willing to support a proposed trade agreement if a President from the same political party negotiates it.\n\n'), ('LSATAs', 'b')]),
            OrderedDict([('GMAT', '1) Jess: To be a woman in this century is far better than to be a woman in centuries past. Life expectancy for women has - for the first time - surpassed that for men and while only around 20℅ of college students in the late 1800s were women, today, almost 60℅ of college students are women.\n\nSam: However, women educated in the top-ranked colleges in the country earn only about 70℅ of what their male counterparts earn. Also, studies show that even today, in a number of industries, women are refused top management positions simply because they are women.\n\nWhich of the following is Jess most likely to say in response to Sam?'), ('GMATQA', '(A)Women today are healthier and live longer than women in the 1800s, who primarily died because of child birth.'), ('GMATQB', '(B)There are more women at the entry-level jobs of most industries than there are men.'), ('GMATQC', '(C)Women today are better able to juggle professional and personal lives and a number of them are proving to be successful single mothers.'), ('GMATQD', '(D)The proportion of women in the judicial and legislative branches of the country is at its highest and the country elected its first woman president recently.'), ('GMATQE', '(E)Women are allowed more freedom today and are not likely to be sacrificed at the altar of marriage or in a witch hunt.'), ('GMATAs', 'd'), ('GRE', '1) Unlike the lungs and the kidneys, the liver is an organ well suited for living-donor transplants to children because the portion of the liver must be removed from a healthy adult to replace the diseased liver of a child will be regenerated in the healthy adult within a few months.\n\nWhich of the following, if true, provides the most additional support for the conclusion drawn above?'), ('GREQA', '(A)  The success rate of liver transplants is slightly lower in children than in adults.'), ('GREQB', '(B) In removing the portion of liver for transplant there is danger of causing damage to the spleen of the donor, and that could necessitate the removal of the spleen.'), ('GREQC', '(C) There is less danger that a transplanted organ will be rejected when the organ donor is a close relative of the recipient.'), ('GREQD', '(D) There are so few suitable donors that about one-half of the babies with liver disease born in the United States each year die before they can receive a liver transplant.'), ('GREQE', '(E)Each lobe of the liver functions separately, and it is possible to extract a portion of one lobe without disrupting critical liver functions.'), ('GREA', 'e'), ('LSAT', "1)Modern workers are less competent than workers of the past.  This fact likely comes as a surprise to some because standards are higher than ever.  Employers demand higher degrees than before and more workers have bachelor's and master's degrees than at any other time.  Higher degrees do not mean more competent workers, however.  Recent evidence indicates that modern workers have poor writing ability, lack focus, and are inept at personal communication.\n\nWhich of the following, if true, most undermines the argument?"), ('LSATQA', '(A)Modern workers generally work more hours than workers in the past\n\n'), ('LSATQB', "(B)Workers of the past often obtained bachelor's and master's degrees\n\n"), ('LSATQC', '(C)Workers of the past had poor writing ability, lacked focus, and were inept at personal communication\n\n'), ('LSATQD', "(D)In the past, it was often more difficult to obtain a bachelor's or master's degree\n\n"), ('LSATQE', '(E)Modern workers are dismissed from their jobs less frequently than at any other time\n\n'), ('LSATAs', 'c')]),
            OrderedDict([('GMAT', "2) Artistic success as an actor is directly dependent on how well an actor has developed his craft. This has been demonstrated by the discovery of a positive relationship between the number of classes taken by an actor and the number of professional productions in which the actor has appeared in the past two years.\n\nEach of the following, if true, cast doubt on the author's argument about artistic success for actors EXCEPT:"), ('GMATQA', '(A)The figures for the number of classes taken were based solely on information provided by actors.'), ('GMATQB', '(B)Success as an actor cannot necessarily be judged exclusively by recent credits.'), ('GMATQC', "(C)For most successful actors, it's not the quantity but the quality of their classes that has helped to develop their craft"), ('GMATQD', '(D)There is no relationship between the number of professional productions in which an actor has appeared and true artistic success.'), ('GMATQE', '(E)Most successful actors have taken only a small number of intensive classes.'), ('GMATAs', 'a'), ('GRE', '2) Popcorn kernels explode, or "pop," when the moisture inside the kernel is heated and steam builds up pressure inside the kernel. Uniform moisture content in a batch of popcorn kernels ensures uniform popping time, which in turn ensures fewer unpopped kernels. In practice, the percentage of unpopped kernels in a batch can be reduced by sorting popcorn kernels by size.\n\nWhich of the following, if true, best helps explain why the percentage of unpopped kernels is lower when popcorn kernels are of uniform size?'), ('GREQA', '(A) The percentage of unpopped kernels can be reduced by increasing cooking time.'), ('GREQB', '(B) All popcorn kernels, no matter what their size, will pop under proper conditions.\n'), ('GREQC', '(C) Yellow popcorn kernels have more moisture content than do white or blue popcorn kernels.'), ('GREQD', "(D) A popcorn kernel's moisture content is fully determined by its size."), ('GREQE', '(E) Damaged kernels, another cause of unpopped kernels, have a lower moisture content than intact kernels.'), ('GREA', 'd'), ('LSAT', '2)Under the modern model for music distribution, musicians sell the right to broadcast their music to companies who give listeners affordable access to large quantities of music.  Some musicians who have been selling their music for many years are displeased with the new model and have seen decreased revenue.  Yet, musicians as a whole are making more money under the new model than they were previously.\n\nWhich of the following, if true, would most help to reconcile the apparent conflict?'), ('LSATQA', '(A)Some musicians want to make more money than they made under the old model\n\n'), ('LSATQB', '(B)Music producers charge higher fees now, leaving less revenue for musicians\n\n'), ('LSATQC', '(C)A greater number of musicians sell music now than under the old model\n\n'), ('LSATQD', '(D)The new model is not generating as much revenue as it could be generating\n\n'), ('LSATQE', '(E)The old model could be used now and would generate more revenue than the new model\n\n'), ('LSATAs', 'c')]),
            OrderedDict([('GMAT', '3) Music Industry executives have claimed that online file-sharing networks are significantly hurting their business because potential consumers are getting music for free that they would otherwise purchase. However, after file-sharing networks started to become popular, CD sales actually increased.\n\nWhich of the following, if true, best explains the apparent contradictions described above?'), ('GMATQA', '(A)File-sharing networks carry a more complete variety of music than most traditional music stories.'), ('GMATQB', '(B) The few people using file-sharing networks already purchased more music than most people.'), ('GMATQC', '(C)Many people prefer to store their music as computer files rather than maintain large CD collections.'), ('GMATQD', '(D)Many consumers have purchased music by artists they discovered through file-sharing networks.'), ('GMATQE', '(E)Music available on file-sharing networks is on the same audio quality as music on commercially produced CDs.'), ('GMATAs', 'd'), ('GRE', '3)Two percent of the ocean is coastal ocean-shallow coastal waters in which most fish live. The rest is deep ocean, where less fish live. Much of the garbage burned or dumped on land eventually is deposited in the coastal ocean. To keep coastal ocean free of garbage, therefore, garbage should be dumped in the deep ocean.\n\nWhich of the following. if true, constitutes the strongest basis for criticizing the argument above?'), ('GREQA', "(A) Currents far below the ocean's surface bring deep-ocean waters to the coastal ocean."), ('GREQB', '(B) Deep-ocean dumping would require a substantial change in the processing and packaging of waste.'), ('GREQC', '(C) Hazardous industrial waste has increasingly been dumped illegally into coastal-ocean waters.'), ('GREQD', '(D) There are at present no international agreements regulating dumping in the deep ocean.'), ('GREQE', '(E) The few species of fish that inhabit the deep ocean are of no commercial value.'), ('GREA', 'a'), ('LSAT', '3)Environmental activists who primarily focus on reducing carbon emissions are misguided. There are many environmental issues that should be of great concern, including some that present more serious challenges than carbon emissions.  Water pollution, for example, has devastating results on the environment.  Activists who primarily focus on carbon emissions apparently do not recognize that water pollution and other issues cause damage to the environment.\n\nWhich of the following, if true, most seriously weakens the argument?'), ('LSATQA', '(A)Some environmental activists focus attention on both water pollution and carbon emissions\n\n'), ('LSATQB', '(B)Some environmental concerns pose greater dangers than both water pollution and carbon emissions\n\n'), ('LSATQC', '(C)Some environmental activists primarily focus on reducing carbon emissions because there is greater opportunity for progress in that area than in others'), ('LSATQD', '(D)For many years, carbon emissions did pose a more serious threat to the environment than did water pollution\n\n'), ('LSATQE', '(E)Most environmental activists primarily focus on water pollution\n\n'), ('LSATAs', 'c')]),
            OrderedDict([('GMAT', "4)A factory was trying out a new process for producing one of its products, with the goal of reducing production costs. A trial production run using the new process showed a fifteen percent reduction in costs compared with past performance using the standard process. The production managers therefore concluded that the new process did produce a cost savings.\n\nWhich of the following, if true, casts most doubt on the production managers' conclusion?\n\n"), ('GMATQA', '(A)In the cost reduction project that eventually led to the trial of the new process, production managers had initially been seeking cost reductions of fifty percent.'), ('GMATQB', '(B)Analysis of the trial of the new process showed that the cost reduction during the trial was entirely attributable to a reduction in the number of finished products rejected by quality control.'), ('GMATQC', '(C)While the trial was being conducted, production costs at the factory for a similar product, produced without benefit of the new process, also showed a fifteen percent reduction.'), ('GMATQD', "(D)Although some of the factory's managers have been arguing that the product is outdated and ought to be redesigned, the use of the new production process does not involve any changes in the finished product."), ('GMATQE', '(E)Since the new process differs from the standard process only in the way in which the stages of production are organized and ordered, the cost of the materials used in the product is the same in both processes'), ('GMATAs', 'c'), ('GRE', '4)The early universe contained only the lightest elements, hydrogen and helium. Heavier elements, such as carbon, form only in nuclear reactions in stars and are dispersed when the stars explode. A recently discovered gas cloud contained carbon several billion years ago, when the universe was no more than two billion years old.\n\nIf the statements above are true, which of the following must, on the basis of them, also be true？'), ('GREQA', '(A)The earliest stars contained only hydrogen.'), ('GREQB', '(B)Some stars were formed before the universe was two billion years old.'), ('GREQC', '(C)The carbon in the gas cloud later formed part of some stars.'), ('GREQD', '(D)No stars identified to date are as old as the gas cloud.'), ('GREQE', '(E)The gas cloud also contained hydrogen and helium.'), ('GREA', 'b'), ('LSAT', "4)TV networks believe that football broadcasts provide greater opportunity for profit than any other sport. This belief persists despite the fact that professional baseball leagues have increased their revenue by fifty percent over the last ten years while professional football leagues have increased revenue by only fifteen percent over that time.  \n\nWhich of the following statements, if true, would most help to reconcile the TV networks' beliefs with the statistics cited?"), ('LSATQA', "(A)Baseball has been popular for many years while football's increase in popularity has come primarily in the last thirty years\n\n"), ('LSATQB', '(B)In the last ten years, football has gained more TV revenue than baseball despite baseball leagues gaining more revenue for their respective league.\n\n'), ('LSATQC', '(C)Baseball leagues have significantly longer seasons than football leagues\n\n'), ('LSATQD', '(D)Many TV networks purchase broadcasting rights to only one sport\n\n'), ('LSATQE', '(E)Football and baseball leagues attract different types of advertisers\n\n'), ('LSATAs', 'b')]),
            OrderedDict([('GMAT', "5)Passengers must exit airplanes swiftly after accidents, since gases released following accidents are toxic to humans and often explode soon after being released. In order to prevent passenger deaths from gas inhalation, safety officials recommend that passengers be provided with smoke hoods that prevent inhalation of the gases.\n\nWhich of the following, if true, constitutes the strongest reason not to require implementation of the safety officials' recommendation?"), ('GMATQA', '(A) Test evacuations showed that putting on the smoke hoods added considerably to the overall time it took passengers to leave the cabin.'), ('GMATQB', '(B)Some airlines are unwilling to buy the smoke hoods because they consider them to be prohibitively expensive. '), ('GMATQC', '(C)Although the smoke hoods protect passengers from the toxic gases, they can do nothing to prevent the gases from igniting. '), ('GMATQD', '(D)Some experienced flyers fail to pay attention to the safety instructions given on every commercial flight before takeoff. '), ('GMATQE', '(E)In many airplane accidents, passengers who were able to reach emergency exits were overcome by toxic gases before they could exit the airplane.'), ('GMATAs', 'a'), ('GRE', '5)Because the number of surgeons is growing faster than the number of operations and because noninvasive medical therapies are increasingly replacing surgery, the average annual number of operations per surgeon has fallen by one-fourth in recent years. It can be concluded that, if these trends continue, a dangerous decline in the level of surgical skill will occur.\n\nThe argument above is based on which of the following assumptions?'), ('GREQA', "(A) A surgeon's skill cannot be properly maintained unless the surgeon performs operations with a certain minimum frequency."), ('GREQB', '(B) Surgeons now spend a large percentage of their time performing noninvasive medical procedures.'), ('GREQC', '(C) All doctors, but especially surgeons, are receiving poorer training in medical school than they were a few years ago.'), ('GREQD', '(D) The level of skill of each individual surgeon has declined in recent years.'), ('GREQE', '(E) Some experienced surgeons are now performing a greater number of operations than they used to perform.'), ('GREA', 'a'), ('LSAT', '5)Cities benefit from hosting major sporting events, such as bowl games and major basketball tournaments, but hosting these events also presents challenges. Visitors provide business for hotels, restaurants, and stores, supporting those businesses and increasing tax revenue. On the other hand, with the influx of tourists, police forces and hospitals are often understaffed. Historically, these cities have been able to obtain enough outside workers to sufficiently meet their temporary staffing needs. For that reason, the benefits outweigh the challenges for the cities scheduled to host the next major sporting events.\n\nWhich of the following, if true, most undermines the argument?'), ('LSATQA', '(A)Increased tourism is not a critical need for the cities hosting the next major sporting events\n\n'), ('LSATQB', '(B)There are expected to be more tourists at future major sporting events than there have been at past events\n\n'), ('LSATQC', '(C)The cities that will be hosting the next major sporting events are remote and will not be able to obtain any outside workers\n\n'), ('LSATQD', '(D)The businesses in the next cities hosting major sporting events do not require new customers\n\n'), ('LSATQE', '(E)The next cities to host major sporting events have larger police forces and hospital staffs than cities that have hosted the events in the past\n\n'), ('LSATAs', 'c')])]
          Routine testQs
        LoopTerminator Questions5
      LoopTerminator QuestionTrials
      LoopInitiator GameTrials loopType="TrialHandler"
        loopType = random
        nReps = doGame
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        Routine Game
        LoopInitiator trials loopType="TrialHandler"
          loopType = random
          nReps = 5
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          Routine pacman
        LoopTerminator trials
      LoopTerminator GameTrials
    LoopTerminator AllTrials
  LoopTerminator trials_2
