PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = pacmanTrial
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Routines
  Routine trial
    CodeComponent code
      Code Type = Py
      Begin Routine:
        from random import choice
        from turtle import *
        from psychopy import sound, gui, visual, core, data, event, logging, clock
        import collections
        from psychopy.hardware import keyboard

        win = visual.Window(
            size=(1024, 768), fullscr=False, screen=0,
            winType='pyglet', allowGUI=False, allowStencil=False,
            monitor='testMonitor', color=[0,0,0], colorSpace='rgb',
            blendMode='avg', useFBO=True,
            units='height')
        class vector(collections.Sequence):
            PRECISION = 6

            __slots__ = ('_x', '_y', '_hash')

            def __init__(self, x, y):
                self._hash = None
                self._x = round(x, self.PRECISION)
                self._y = round(y, self.PRECISION)

            @property
            def x(self):
                return self._x

            @x.setter
            def x(self, value):
                if self._hash is not None:
                    raise ValueError('cannot set x after hashing')
                self._x = round(value, self.PRECISION)

            @property
            def y(self):
                return self._y

            @y.setter
            def y(self, value):
                if self._hash is not None:
                    raise ValueError('cannot set y after hashing')
                self._y = round(value, self.PRECISION)

            def __hash__(self):
                if self._hash is None:
                    pair = (self.x, self.y)
                    self._hash = hash(pair)
                return self._hash

            def __len__(self):

                return 2

            def __getitem__(self, index):
                if index == 0:
                    return self.x
                if index == 1:
                    return self.y
                raise IndexError

            def copy(self):
                type_self = type(self)
                return type_self(self.x, self.y)

            def __eq__(self, other):
                if isinstance(other, vector):
                    return self.x == other.x and self.y == other.y
                return NotImplemented

            def __ne__(self, other):
                if isinstance(other, vector):
                    return self.x != other.x or self.y != other.y
                return NotImplemented

            def __iadd__(self, other):
                if self._hash is not None:
                    raise ValueError('cannot add vector after hashing')
                elif isinstance(other, vector):
                    self.x += other.x
                    self.y += other.y
                else:
                    self.x += other
                    self.y += other
                return self

            def __add__(self, other):
                copy = self.copy()
                return copy.__iadd__(other)

            __radd__ = __add__

            def move(self, other):
                self.__iadd__(other)

            def __isub__(self, other):
                if self._hash is not None:
                    raise ValueError('cannot subtract vector after hashing')
                elif isinstance(other, vector):
                    self.x -= other.x
                    self.y -= other.y
                else:
                    self.x -= other
                    self.y -= other
                return self

            def __sub__(self, other):
                copy = self.copy()
                return copy.__isub__(other)

            def __imul__(self, other):
                if self._hash is not None:
                    raise ValueError('cannot multiply vector after hashing')
                elif isinstance(other, vector):
                    self.x *= other.x
                    self.y *= other.y
                else:
                    self.x *= other
                    self.y *= other
                return self

            def __mul__(self, other):
                copy = self.copy()
                return copy.__imul__(other)

            __rmul__ = __mul__

            def scale(self, other):
                self.__imul__(other)

            def __itruediv__(self, other):
                if self._hash is not None:
                    raise ValueError('cannot divide vector after hashing')
                elif isinstance(other, vector):
                    self.x /= other.x
                    self.y /= other.y
                else:
                    self.x /= other
                    self.y /= other
                return self

            def __truediv__(self, other):
                copy = self.copy()
                return copy.__itruediv__(other)

            def __neg__(self):
                copy = self.copy()
                copy.x = -copy.x
                copy.y = -copy.y
                return copy

            def __abs__(self):
                return (self.x ** 2 + self.y ** 2) ** 0.5

            def rotate(self, angle):
                if self._hash is not None:
                    raise ValueError('cannot rotate vector after hashing')
                radians = angle * math.pi / 180.0
                cosine = math.cos(radians)
                sine = math.sin(radians)
                x = self.x
                y = self.y
                self.x = x * cosine - y * sine
                self.y = y * cosine + x * sine

            def __repr__(self):
                type_self = type(self)
                name = type_self.__name__
                return '{}({!r}, {!r})'.format(name, self.x, self.y)

        def floor(value, size, offset=200):
            return float(((value + offset) // size) * size - offset)


        state = {'score': 0}
        path = Turtle(visible=False)
        writer = Turtle(visible=False)
        aim = vector(5, 0)
        pacman = vector(-40, -80)
        ghosts = [
            [vector(-180, 160), vector(5, 0)],
            [vector(-180, -160), vector(0, 5)],
            [vector(100, 160), vector(0, -5)],
            [vector(100, -160), vector(-5, 0)],
        ]
        tiles = [
            0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0,
            0, 1, 1, 1, 1, 1, 1, 1, 0, 1, 1, 1, 1, 1, 1, 1, 0, 0, 0, 0,
            0, 1, 0, 0, 1, 0, 0, 1, 0, 1, 0, 0, 1, 0, 0, 1, 0, 0, 0, 0,
            0, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 0, 0, 0, 0,
            0, 1, 0, 0, 1, 0, 1, 0, 0, 0, 1, 0, 1, 0, 0, 1, 0, 0, 0, 0,
            0, 1, 1, 1, 1, 0, 1, 1, 0, 1, 1, 0, 1, 1, 1, 1, 0, 0, 0, 0,
            0, 1, 0, 0, 1, 0, 0, 1, 0, 1, 0, 0, 1, 0, 0, 0, 0, 0, 0, 0,
            0, 1, 0, 0, 1, 0, 1, 1, 1, 1, 1, 0, 1, 0, 0, 0, 0, 0, 0, 0,
            0, 1, 1, 1, 1, 1, 1, 0, 0, 0, 1, 1, 1, 1, 1, 1, 0, 0, 0, 0,
            0, 0, 0, 0, 1, 0, 1, 1, 1, 1, 1, 0, 1, 0, 0, 1, 0, 0, 0, 0,
            0, 0, 0, 0, 1, 0, 1, 0, 0, 0, 1, 0, 1, 0, 0, 1, 0, 0, 0, 0,
            0, 1, 1, 1, 1, 1, 1, 1, 0, 1, 1, 1, 1, 1, 1, 1, 0, 0, 0, 0,
            0, 1, 0, 0, 1, 0, 0, 1, 0, 1, 0, 0, 0, 0, 0, 1, 0, 0, 0, 0,
            0, 1, 1, 0, 1, 1, 1, 1, 1, 1, 1, 1, 1, 0, 1, 1, 0, 0, 0, 0,
            0, 0, 1, 0, 1, 0, 1, 0, 0, 0, 1, 0, 1, 0, 1, 0, 0, 0, 0, 0,
            0, 1, 1, 1, 1, 0, 1, 1, 0, 1, 1, 0, 1, 1, 1, 1, 0, 0, 0, 0,
            0, 1, 0, 0, 0, 0, 0, 1, 0, 1, 0, 0, 0, 0, 0, 1, 0, 0, 0, 0,
            0, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 0, 0, 0, 0,
            0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0,
            0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0,
        ]
        defaultKeyboard = keyboard.Keyboard()
        spaceKey = keyboard.Keyboard()
        def displayEnd(textVar):
            display = visual.TextStim(win=win, text = textVar, font='Arial', pos=(-0.41, 0.15), color='white', height=0.06)
            display.setAutoDraw(True)
            if spaceKey.keys == 'space':
                continueRoutine = False


        def square(x, y):
            "Draw square using path at (x, y)."
            path.up()
            path.goto(x, y)
            path.down()
            path.begin_fill()

            for count in range(4):
                path.forward(20)
                path.left(90)

            path.end_fill()

        def offset(point):
            "Return offset of point in tiles."
            x = (floor(point.x, 20) + 200) / 20
            y = (180 - floor(point.y, 20)) / 20
            index = int(x + y * 20)
            return index

        def valid(point):
            "Return True if point is valid in tiles."
            index = offset(point)

            if tiles[index] == 0:
                return False

            index = offset(point + 19)

            if tiles[index] == 0:
                return False

            return point.x % 20 == 0 or point.y % 20 == 0

        def world():
            "Draw world using path."
            bgcolor('black')
            path.color('blue')

            for index in range(len(tiles)):
                tile = tiles[index]

                if tile > 0:
                    x = (index % 20) * 20 - 200
                    y = 180 - (index // 20) * 20
                    square(x, y)

                    if tile == 1:
                        path.up()
                        path.goto(x + 10, y + 10)
                        path.dot(2, 'white')

        def move():
            "Move pacman and all ghosts."
            writer.undo()
            writer.write(state['score'])

            clear()

            if valid(pacman + aim):
                pacman.move(aim)

            index = offset(pacman)

            if tiles[index] == 1:
                tiles[index] = 2
                state['score'] += 1
                x = (index % 20) * 20 - 200
                y = 180 - (index // 20) * 20
                square(x, y)

            up()
            goto(pacman.x + 10, pacman.y + 10)
            dot(20, 'yellow')

            for point, course in ghosts:
                if valid(point + course):
                    point.move(course)
                else:
                    options = [
                        vector(5, 0),
                        vector(-5, 0),
                        vector(0, 5),
                        vector(0, -5),
                    ]
                    plan = choice(options)
                    course.x = plan.x
                    course.y = plan.y

                up()
                goto(point.x + 10, point.y + 10)
                dot(20, 'red')

            update()

            for point, course in ghosts:
                if abs(pacman - point) < 20:
                    print("You Died :(")
                    bye()
        #            endGame = 1
        #            return False
        #            bye()
        #            continueRoutine = False
                    displayEnd("Oh no! The game will restart soon")
                    return

            ontimer(move, 100)

        def change(x, y):
            "Change pacman aim if valid."
            if valid(pacman + vector(x, y)):
                aim.x = x
                aim.y = y
      Each Frame:
        pacmanClock = core.Clock()
        finishTime = pacmanClock.getTime()
        import time
        def pacmanGame():
        #    finishTime = time.time() + 60*1
        #    while True:

        #        pacmanGame()
        #        time.sleep(5)
        #        exitonclick()
                while True:
                    setup(420, 420, 370, 0)
                    hideturtle()
                    tracer(False)
                    writer.goto(160, 160)
                    writer.color('white')
                    writer.write(state['score'])
                    listen()
                    onkey(lambda: change(5, 0), 'Right')
                    onkey(lambda: change(-5, 0), 'Left')
                    onkey(lambda: change(0, 5), 'Up')
                    onkey(lambda: change(0, -5), 'Down')
                    world()
                    move()
                    done()
        #            hide()
        #
        #    if finishTime >= 60:
        #        bye()
        #import time
        #import turtle as t
        #finishTime = time.time() + 60*1
        #while True:
        ##    finishTime = time.time() + 60*1
        #    pacmanGame()
        #
        #    exitonclick()
        #    if time.time() > finishTime:
        #        import turtle as t
        #        t.bye()
        pacmanGame()
      End Routine:
        #if endGame == 1:
        #    continueRoutine = False
        #continueRoutine = False
        #turtle.bye()
        #tscreen = Screen()
        #tscreen.exitonclick()
        #
  Routine displayText
    TextComponent display
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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      text [set every repeat]:
        The game ended!

        Press SPACE to continue
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine inst
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Press SPACE to begin!
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine inst
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine trial
    Routine displayText
  LoopTerminator trials
