PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = (1024, 768)
  expName = Experiment1
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Routines
  Routine Reward_Trial
    PolygonComponent polygon
      fillColor = $[0,0,0]
      lineWidth = 5
      shape = rectangle
      size = (0.5, 1.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = ?
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    KeyboardComponent response2
      allowedKeys = '1','2'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    CodeComponent code
      Code Type = Py
      End Routine:
        outcome = []
        if response2.keys == '1':
            outcome = np.random.randint(1,4);
        elif response2.keys == '2':
            outcome = np.random.randint(6,9);
        else:
            outcome = "No Response";

        money = []
        color = []
        if response2.keys == '1':
            money = '+$0.50';
            color = [-1.0,1.0,-1.0];
        elif response2.keys == '2':
            money = '+$0.50';
            color = [-1.0,1.0,-1.0];
        else:
            money = '#';
            color = [1.0,1.0,1.0];
    TextComponent ISI
      letterHeight = 0.1
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 2.0
      text = +
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  Routine PunishmentOutcome
    PolygonComponent rectangle2_2
      fillColor = $[0,0,0]
      lineWidth = 5
      shape = rectangle
      size = (0.5, 1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
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    TextComponent feedback2_2
      color = $[1.000,1.000,1.000]
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $outcome
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    TextComponent arrow2_2
      color [set every repeat] = $color
      letterHeight = 0.1
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $money
      units = norm
      wrapWidth = 0.2
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    TextComponent ITI2_2
      letterHeight = 0.1
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2.0
      text = +
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  Routine firstITI
    TextComponent firstTrialITI
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = +
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  Routine code_2
    CodeComponent code_3
      Code Type = Py
      Begin Experiment:
        nRepsblock1=0
        nRepsblock2=0
      Begin Routine:
        if selectBlock==1:
         nRepsblock1=1
         nRepsblock2=0
        elif selectBlock==2:
         nRepsblock1=0
         nRepsblock2=1
  Routine EndText
    TextComponent Finished
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Thanks for playing!

        You earned \$6.00!

        Please let the experimenter know you have finished the first part of the task
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine RewardOutcome
    PolygonComponent polygon2_2
      fillColor = $[0,0,0]
      lineWidth = 5
      shape = rectangle
      size = (0.5, 1.0)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
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    TextComponent feedback1_2
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text [set every frame] = $outcome
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    TextComponent arrow1_2
      color [set every repeat] = $color
      letterHeight = 0.1
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $money
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    TextComponent ITI_2
      letterHeight = 0.1
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 2.0
      text = +
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  Routine Punishment_trial
    PolygonComponent rectangle
      fillColor = $[0,0,0]
      lineWidth = 5
      shape = rectangle
      size = (0.5, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent text1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = ?
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    KeyboardComponent response3
      allowedKeys = '1','2'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    CodeComponent code_5
      Code Type = Py
      End Routine:
        outcome = []
        if response3.keys == '1':
            outcome = np.random.randint(6,9);
        elif response3.keys == '2':
            outcome = np.random.randint(1,4);
        else:
            outcome = "No Response";

        money = []
        color = []
        if response3.keys == '1':
            money = '-$0.25';
            color = [1.0,-1.0,-1.0];
        elif response3.keys == '2':
            money = '-$0.25';
            color = [1.0,-1.0,-1.0];
        else:
            money = '#';
            color = [1.0,1.0,1.0];
    TextComponent ISI2
      letterHeight = 0.1
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 2
      text = +
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  Routine Instructions
    TextComponent Welcome
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Welcome to the experiment!

        In this first part of the task, you will be playing a simple game
        in which you will have the chance to earn some money.

        Press the spacebar to continue.
    KeyboardComponent response1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Inst2
    TextComponent text_2
      letterHeight = 0.09
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Your job is to guess if a number shown on screen will have a value less than 5 (1 - 4), or greater than 5 (6 - 9). When you see a rectangle with a question mark inside of it, make your guess!

        You can press `1` if you think it will be less than 5, or `2` if you think it will be greater than 5.Each correct guess will earn you \$0.50, and each incorrect guess will deduct \$0.25.
        You will only have two seconds to respond upon seeing the question mark, so please be ready to guess! Your total earnings will be shown at the end of the task.

        Press SPACE to continue.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions
  Routine Inst2
  Routine firstITI
  LoopInitiator alltrials loopType="TrialHandler"
    conditionsFile = spreadsheet5.xlsx
    loopType = fullRandom
    nReps = 1
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    conditions:
      [{'selectBlock': 1},
      {'selectBlock': 2},
      {'selectBlock': 1},
      {'selectBlock': 2},
      {'selectBlock': 1},
      {'selectBlock': 1},
      {'selectBlock': 1},
      {'selectBlock': 1},
      {'selectBlock': 2},
      {'selectBlock': 2},
      {'selectBlock': 2},
      {'selectBlock': 2},
      {'selectBlock': 1},
      {'selectBlock': 1},
      {'selectBlock': 2},
      {'selectBlock': 2},
      {'selectBlock': 1},
      {'selectBlock': 2},
      {'selectBlock': 2},
      {'selectBlock': 1},
      {'selectBlock': 1},
      {'selectBlock': 2},
      {'selectBlock': 1},
      {'selectBlock': 1},
      {'selectBlock': 1}]
    Routine code_2
    LoopInitiator Reward loopType="TrialHandler"
      loopType = sequential
      nReps = nRepsblock1
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      Routine Reward_Trial
      Routine RewardOutcome
    LoopTerminator Reward
    LoopInitiator Loss loopType="TrialHandler"
      loopType = random
      nReps = nRepsblock2
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      Routine Punishment_trial
      Routine PunishmentOutcome
    LoopTerminator Loss
  LoopTerminator alltrials
  Routine EndText
