PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = DelayDiscountPavlovia
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Routines
  Routine Instr
    TextComponent Instructions
      color [set every repeat] = white
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.055
      pos [set every repeat] = (0, 0)
      startVal [time (s)] = 0.0
      wrapWidth = 1.4
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      text [set every repeat]:
        In this task you will be choosing between two different monetary rewards.

        You will be given a regulation strategy prior to a block of trials. Please employ the strategy given while making decisions.

        Press SPACE to continue.
    KeyboardComponent space
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Inst2
    TextComponent instruct2
      letterHeight = 0.055
      startVal [time (s)] = 0.0
      wrapWidth = 1.4
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      text:
        You will be presented with two monetary offers, differing in the time at which you would receive the money.

        If you would prefer the offer on the left, press "1"

        If you would prefer the offer on the right, press "2"

        You will have four seconds to make your choice once the offers are presented.

        First you will be playing some practice rounds. When you are ready, press ENTER to begin!
    KeyboardComponent enter
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Practice
    PolygonComponent Line
      fillColor [set every repeat] = $[-1.000,-1.000,-1.000]
      lineColor [set every repeat] = $[-1.000,-1.000,-1.000]
      lineWidth [set every repeat] = 7
      ori = 90
      shape = line
      size [set every repeat] = (3, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    KeyboardComponent choice
      allowedKeys [set every repeat] = '1','2'
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
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    TextComponent ImmedMoneyAmt
      color [set every repeat] = white
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.12
      pos [set every repeat] = (-0.41, 0.15)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
      text [set every repeat] = $ImMoney
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    TextComponent DelayMoneyAmt
      color [set every repeat] = white
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.12
      pos [set every repeat] = (0.41, 0.15)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
      text [set every repeat] = $DelayMoney
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    TextComponent Immedtoday
      color [set every repeat] = white
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.12
      pos [set every repeat] = (-0.41, -0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
      text [set every repeat] = today
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    TextComponent DelayTime
      color [set every repeat] = white
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.12
      pos [set every repeat] = (0.41, -0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
      text [set every repeat] = $DelayDays
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    CodeComponent code
      Code Type = Both
      Begin Experiment:
        import numpy
        from numpy import random

        subID = int(expInfo['participant'])
      Begin JS Experiment:
        subID = parseInt(expInfo['participant'])
      Begin JS Routine:
        if (subID%2 ==1 ) {
            leftVarText =('today');
            leftVarMoney =(ImMoney);
            rightVarText = (DelayDays);
            rightVarMoney = (DelayMoney);
            }
        if (subID%2 == 0) {
            leftVarText = (DelayDays);
            leftVarMoney = (DelayMoney);
            rightVarText = ('today');
            rightVarMoney = (ImMoney);
            }

        ImmedMoneyAmt.setText(leftVarMoney);
        DelayMoneyAmt.setText(rightVarMoney);
        Immedtoday.setText(leftVarText);
        DelayTime.setText(rightVarText);
      Begin Routine:
        if subID%2 == 1 :
            leftVarText = ('today')
            leftVarMoney = (ImMoney)
            rightVarText = (DelayDays)
            rightVarMoney = (DelayMoney)
        if subID%2 == 0:
            rightVarText= ('today')
            rightVarMoney= (ImMoney)
            leftVarText= (DelayDays)
            leftVarMoney= (DelayMoney)

        ImmedMoneyAmt.setText(leftVarMoney)
        DelayMoneyAmt.setText(rightVarMoney)
        Immedtoday.setText(leftVarText)
        DelayTime.setText(rightVarText)
      Each Frame:
        if choice.keys == '1':
            ImmedMoneyAmt.setColor('green')
            Immedtoday.setColor('green')
        if choice.keys == '2':
            DelayTime.setColor('green')
            DelayMoneyAmt.setColor('green')

        if (choice.keys == '1' or choice.keys == '2') and blank.status == NOT_STARTED:
            blank.tStart = t
            blank.frameNStart = frameN
            blank.setAutoDraw(True)
      Each JS Frame:
        if (choice.keys == '1') {
            ImmedMoneyAmt.setColor('green');
            Immedtoday.setColor('green');
            }
        if (choice.keys == '2'){
            DelayTime.setColor('green');
            DelayMoneyAmt.setColor('green');
            }
        if (choice.keys == '1' or choice.keys == '2') and blank.status == NOT_STARTED {
            blank.tStart = t;
            blank.frameNStart = frameN;
            blank.setAutoDraw(True);
            }
      End JS Routine:
        ImmedMoneyAmt.setColor('white');
        Immedtoday.setColor('white');
        DelayTime.setColor('white');
        DelayMoneyAmt.setColor('white');

        if (blank.status==FINISHED){
            ImmedMoneyAmt.setAutoDraw(False);
            Immedtoday.setAutoDraw(False);
            DelayTime.setAutoDraw(False);
            DelayMoneyAmt.setAutoDraw(False);
            Line.setAutoDraw(False);
            }
      End Routine:
        ImmedMoneyAmt.setColor('white')
        Immedtoday.setColor('white')
        DelayTime.setColor('white')
        DelayMoneyAmt.setColor('white')

        if (blank.status==FINISHED):
            ImmedMoneyAmt.setAutoDraw(False)
            Immedtoday.setAutoDraw(False)
            DelayTime.setAutoDraw(False)
            DelayMoneyAmt.setAutoDraw(False)
            Line.setAutoDraw(False)
    TextComponent blank
      letterHeight = 0.1
      stopVal [duration (s)] = 1.5
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  Routine BeginInst
    TextComponent text_2
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      wrapWidth = 1.4
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      text:
        You will now be completing the full task.

        Press SPACE to begin!
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Main
    KeyboardComponent choice2
      allowedKeys [set every repeat] = '1','2'
      forceEndRoutine = False
      stopVal [duration (s)] = 3
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    TextComponent sureAmt
      letterHeight = 0.11
      pos = (0.41, -0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      text [set every repeat] = $sure
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    TextComponent gambleAmt
      letterHeight = 0.11
      pos = (-0.41, -0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      text [set every repeat] = $gamble
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    TextComponent GambleProbability
      letterHeight = 0.13
      pos = (-0.41, 0.3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      text [set every repeat] = $gambleProb
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    TextComponent sureProb
      letterHeight = 0.13
      pos = (0.41, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = 100%
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    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        if choice2.keys == '1':
            gambleAmt.setColor('green')
        if choice2.keys == '2':
            sureAmt.setColor('green')

        if (choice2.keys == '1' or choice.keys == '2') and blank.status == NOT_STARTED:
            blank.tStart = t
            blank.frameNStart = frameN
            blank.setAutoDraw(True)
      Each Frame:
        if choice2.keys == '1':
            gambleAmt.setColor('green')
        if choice2.keys == '2':
            sureAmt.setColor('green')

        if (choice2.keys == '1' or choice.keys == '2') and blank.status == NOT_STARTED:
            blank.tStart = t
            blank.frameNStart = frameN
            blank.setAutoDraw(True)
      End Routine:
        gambleAmt.setColor('white')
        sureAmt.setColor('white')

        if (blank.status==FINISHED):
            gambleAmt.setAutoDraw(False)
            sureAmt.setAutoDraw(False)
            sureProb.setAutoDraw(False)
            GambleProbability.setAutoDraw(False)
    TextComponent blank2
      letterHeight = 0.1
      stopVal [duration (s)] = 2
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    PolygonComponent line
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      lineWidth [set every repeat] = 4
      ori = 90
      shape = line
      size [set every repeat] = (3, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine isi
    TextComponent isi2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = +
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  Routine Cue
    TextComponent cue
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        if subID%2 == 0 :
            cue.setText(CueType1)
        if subID%2 == 1 :
            cue.setText(CueType2)
  Routine PracticeCue
    TextComponent text
      letterHeight = 0.13
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = REGULATE
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  Routine Ending
    TextComponent ThankYou
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Thank you for participating!


        You have completed this part of the study
Flow
  Routine Instr
  Routine Inst2
  Routine isi
  Routine PracticeCue
  LoopInitiator PracticeLoop loopType="TrialHandler"
    Selected rows = 0:3
    conditionsFile = DelayDiscountingAmt.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('ImMoney', '$48 '), ('DelayMoney', '$49 '), ('DelayDays', 'in 15 days')]),
      OrderedDict([('ImMoney', '$55 '), ('DelayMoney', '$62 '), ('DelayDays', 'in 97 days')]),
      OrderedDict([('ImMoney', '$20 '), ('DelayMoney', '$37 '), ('DelayDays', 'in 32 days')]),
      OrderedDict([('ImMoney', '$54 '), ('DelayMoney', '$55 '), ('DelayDays', 'in 117 days')]),
      OrderedDict([('ImMoney', '$50 '), ('DelayMoney', '$65 '), ('DelayDays', 'in 61 days')]),
      OrderedDict([('ImMoney', '$19 '), ('DelayMoney', '$25 '), ('DelayDays', 'in 53 days')]),
      OrderedDict([('ImMoney', '$30 '), ('DelayMoney', '$45 '), ('DelayDays', 'in 7 days')]),
      OrderedDict([('ImMoney', '$14 '), ('DelayMoney', '$25 '), ('DelayDays', 'in 19 days')]),
      OrderedDict([('ImMoney', '$47 '), ('DelayMoney', '$50 '), ('DelayDays', 'in 160 days')]),
      OrderedDict([('ImMoney', '$15 '), ('DelayMoney', '$35 '), ('DelayDays', 'in 13 days')]),
      OrderedDict([('ImMoney', '$25 '), ('DelayMoney', '$60 '), ('DelayDays', 'in 14 days')]),
      OrderedDict([('ImMoney', '$35 '), ('DelayMoney', '$63 '), ('DelayDays', 'in 162 days')]),
      OrderedDict([('ImMoney', '$40 '), ('DelayMoney', '$55 '), ('DelayDays', 'in 62 days')]),
      OrderedDict([('ImMoney', '$11 '), ('DelayMoney', '$30 '), ('DelayDays', 'in 7 days')]),
      OrderedDict([('ImMoney', '$52 '), ('DelayMoney', '$65 '), ('DelayDays', 'in 119 days')]),
      OrderedDict([('ImMoney', '$34 '), ('DelayMoney', '$35 '), ('DelayDays', 'in 18 days')]),
      OrderedDict([('ImMoney', '$27 '), ('DelayMoney', '$50 '), ('DelayDays', 'in 21 days')])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
    Routine isi
    Routine Practice
  LoopTerminator PracticeLoop
  Routine BeginInst
  LoopInitiator mainLoop loopType="TrialHandler"
    conditionsFile = DelayDiscountingCues.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('CueType1', 'REGULATE'), ('rows', '003:0013'), ('CueType2', 'REACT')]),
      OrderedDict([('CueType1', 'REACT'), ('rows', '0013:0023'), ('CueType2', 'REGULATE')]),
      OrderedDict([('CueType1', 'REACT'), ('rows', '0023:0033'), ('CueType2', 'REGULATE')]),
      OrderedDict([('CueType1', 'REGULATE'), ('rows', '0033:0043'), ('CueType2', 'REACT')]),
      OrderedDict([('CueType1', 'REACT'), ('rows', '0043:0053'), ('CueType2', 'REGULATE')]),
      OrderedDict([('CueType1', 'REGULATE'), ('rows', '0053:0063'), ('CueType2', 'REACT')])]
    Routine isi
    Routine Cue
    LoopInitiator trials loopType="TrialHandler"
      Selected rows = $rows
      conditionsFile = DelayDiscountingAmt.csv
      loopType = random
      nReps = 1
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      conditions:
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      Routine isi
      Routine Practice
    LoopTerminator trials
  LoopTerminator mainLoop
  Routine Ending
