PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = TrustGame
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Routines
  Routine Giver1
    CodeComponent code_2
      Code Type = Py
      Begin Experiment:
        import random
      Begin Routine:
        backTransfer = 0

        receiveMoney = giveMoney * 3
        receiveMoneyStr = '$' + str(receiveMoney)

        array1 = [0,1]
        array2 = [0,1,2]
        array3 = [1,2,3,4]
        array4 = [2,3,4,5]
        array5 = [3,4,5,6,7]
        if giveMoney == 0:
            backTransfer = 0
        if giveMoney == 1:
            backTransfer = random.choice(array1)
        if giveMoney == 2:
            backTransfer = random.choice(array2)
        if giveMoney == 3:
            backTransfer = random.choice(array3)
        if giveMoney == 4:
            backTransfer = random.choice(array4)
        if giveMoney == 5:
            backTransfer = random.choice(array5)

        backTransferStr = "$" + str(backTransfer)

        textString = ("You gave Player 1 " + giveMoneyStr + "\n\nPlayer 1 received  "+ receiveMoneyStr + "\n\nPlayer 1 chose to give you "+ backTransferStr)
    TextComponent Feedback
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $textString
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  Routine Giver2
    CodeComponent code_5
      Code Type = Py
      Begin Experiment:
        import random
      Begin Routine:
        backTransfer = 0

        receiveMoney = giveMoney * 3
        receiveMoneyStr = '$' + str(receiveMoney)

        array1 = [1,2]
        array2 = [3,4,5]
        array3 = [4,5,6,7]
        array4 = [6,7,8,9,10]
        array5 = [8,9,10,11,12]
        if giveMoney == 0:
            backTransfer = 0
        if giveMoney == 1:
            backTransfer = random.choice(array1)
        if giveMoney == 2:
            backTransfer = random.choice(array2)
        if giveMoney == 3:
            backTransfer = random.choice(array3)
        if giveMoney == 4:
            backTransfer = random.choice(array4)
        if giveMoney == 5:
            backTransfer = random.choice(array5)

        backTransferStr = "$" + str(backTransfer)

        text2 = ("You gave Player 2 " + giveMoneyStr + "\n\nPlayer 2 received  "+ receiveMoneyStr + "\n\nPlayer 2 chose to give you "+ backTransferStr)
    TextComponent Feedback2
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $text2
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  Routine Intro
    TextComponent Instructions
      letterHeight = 0.045
      startVal [time (s)] = 0.0
      wrapWidth = 1.45
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      text:
        In this task, you will be playing a game with two other people. They will be represented by unique profile pictures.

        Each trial you will be playing with one of the other people.
        You will be given \$5 to use every trial. You have the option to give any dollar amount, from \$0-\$5, to the other player.

        Whatever money you choose to give will be tripled. Then the other player will be told to make the same choice-giving some amount of the now-tripled money back to you.
        The trials are independent, meaning that money will not be compounded and you will start with \$5 each trial. At the end of the task, one of the trials will be selected at random for payment.

        When you are ready to begin, press SPACE!
    KeyboardComponent begin
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine sendMoney1
    TextComponent sendInstructions
      letterHeight = 0.04
      pos = (0, -0.11)
      startVal [time (s)] = 0.0
      wrapWidth = 1.4
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      text [set every repeat]:
        You have been given \$5 to use. You have the opportunity to send money to Player 1. You may give them all or none of the money, or any amount in between, using increments of \$1. Therefore you can choose to give them \$0, \$1, \$2, \$3, \$4, or \$5.
        The amount of money you send to them will be tripled, and Player 1 will then have the opportunity to give some money amount back to you.


        Please indicate how many dollars you will give to Player 1:
    TextComponent Player1Name
      letterHeight = 0.06
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = Player 1
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    ImageComponent Player1Pic
      image [set every repeat] = 1patterns.png
      pos [set every repeat] = (0, 0.36)
      size [set every repeat] = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent enter
      allowedKeys [set every repeat] = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text
      letterHeight = 0.07
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Both
      Begin Experiment:
        ID = expInfo['participant']
        subID = int(ID)
      Begin JS Routine:
        modify = false;
        text.text = '';
      Begin Routine:
        modify = False
        text.text = ''
        event.clearEvents('keyboard')
        giveMoney = 0
        if subID%2==0:
            Player1Pic.setImage('3pattern.png')
        if subID%2==1:
            Player1Pic.setImage('1patterns.png')
      Each Frame:
        keys = event.getKeys(keyList=['0','1','2','3','4','5','return', 'backspace'])
        if len(keys):
            if 'backspace' in keys:
                text.text = text.text[:-1]
            elif 'return' in keys:
                continueRoutine = False
            else:
                if modify:
                    text.text = text.text + keys[0].upper()
                    modify = False
                else:
                    text.text = text.text + keys[0]
        if '5' in keys:
            giveMoney = 5
        if '4' in keys:
            giveMoney = 4
        if '3' in keys:
            giveMoney = 3
        if '2' in keys:
            giveMoney =2
        if '1' in keys:
            giveMoney = 1
        if '0' in keys:
            giveMoney = 0
        if '' in keys:
            giveMoney = 0
      Each JS Frame:
        let theseKeys = psychoJS.eventManager.getKeys();
        if (theseKeys.length > 0) {  // at least one key was pressed
          textAdd = theseKeys[theseKeys.length-1];
          }


        if (textAdd === 'return') {
            textAdd = '';  // Add nothing
            continueRoutine = false;  // End routine (if that is what you want)
        } else if (textAdd === 'space') {
            textAdd = ' ';  // Add a space
        } else if (textAdd === 'backspace') {
            text.text = text.text.slice(0, -1);
            textAdd = undefined;
        } else if (['lshift', 'rshift'].includes(textAdd)) {
            modify = true;
        } else if (textAdd !== undefined) {
            if (modify) {
                text.text = text.text + textAdd.toUpperCase();
                modify = false;
            } else {
                text.text = text.text + textAdd
            }
            textAdd = undefined;
        }
      End JS Routine:
        psychoJS.experiment.addData("typedWord", text.text)
        text.setText('')  // empty the onscreen text ready for next input
      End Routine:
        thisExp.addData("typedWord", text.text)


        print(giveMoney)

        giveMoneyStr = "$" + str(giveMoney)
    TextComponent dollarSign
      letterHeight = 0.07
      pos = (-0.05, -0.35)
      startVal [time (s)] = 0.0
      text [set every repeat] = \$
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  Routine Cue
    TextComponent cueText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        if subID%2==0:
            cueText.setText(CueType1)
        if subID%2==1:
            cueText.setText(CueType2)
  Routine sendMoney2
    TextComponent sendInst2
      letterHeight = 0.04
      pos = (0, -0.11)
      startVal [time (s)] = 0.0
      wrapWidth = 1.4
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      text [set every repeat]:
        You have been given \$5 to use. You have the opportunity to send money to Player 2. You may give them all or none of the money, or any amount in between, using increments of \$1. Therefore you can choose to give them \$0, \$1, \$2, \$3, \$4, or \$5.
        The amount of money you send to them will be tripled, and Player 2 will then have the opportunity to give some money amount back to you.

        Please type how much money you would like to give Player 2 :
    TextComponent Player2Name
      letterHeight = 0.06
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = Player 2
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    ImageComponent Player2Pic
      image [set every repeat] = 3pattern.png
      pos [set every repeat] = (0, 0.36)
      size [set every repeat] = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent text_2
      letterHeight = 0.07
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
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    KeyboardComponent enter2
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Py
      Begin Routine:
        if subID%2==0:
            Player2Pic.setImage('1patterns.png')
        if subID%2==1:
            Player2Pic.setImage('3pattern.png')


        modify = False
        text_2.text = ''
        event.clearEvents('keyboard')
        giveMoney = 0
      Each Frame:
        keys = event.getKeys(keyList=['0','1','2','3','4','5','return', 'backspace'])
        if len(keys):
            if 'backspace' in keys:
                text_2.text = text_2.text[:-1]
            elif 'return' in keys:
                continueRoutine = False
            else:
                if modify:
                    text_2.text = text_2.text + keys[0].upper()
                    modify = False
                else:
                    text_2.text = text_2.text + keys[0]
        if '5' in keys:
            giveMoney = 5
        if '4' in keys:
            giveMoney = 4
        if '3' in keys:
            giveMoney = 3
        if '2' in keys:
            giveMoney =2
        if '1' in keys:
            giveMoney = 1
        if '0' in keys:
            giveMoney = 0
        if '' in keys:
            giveMoney = 0
      End Routine:
        thisExp.addData("typedWord", text_2.text)


        print(giveMoney)

        giveMoneyStr = "$" + str(giveMoney)
    TextComponent dollar2
      letterHeight = 0.07
      pos = (-0.05, -0.35)
      startVal [time (s)] = 0.0
      text [set every repeat] = \$
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  Routine isi
    TextComponent isiText
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = +
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  Routine code_6
    CodeComponent code_7
      Code Type = Py
      Begin Experiment:
        nRepsblock1=0
        nRepsblock2=0
      Begin Routine:
        if selectBlock=='1':
         nRepsblock1=1
         nRepsblock2=0
        elif selectBlock=='2':
         nRepsblock1=0
         nRepsblock2=1
  Routine ThankYou
    TextComponent tyText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Thank you for playing!
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Flow
  Routine Intro
  LoopInitiator CueLoop loopType="TrialHandler"
    conditionsFile = DictatorGame.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Rows', '000:010'), ('CueType1', 'REGULATE'), ('CueType2', 'REACT')]),
      OrderedDict([('Rows', '011:020'), ('CueType1', 'REACT'), ('CueType2', 'REGULATE')]),
      OrderedDict([('Rows', '021:030'), ('CueType1', 'REACT'), ('CueType2', 'REGULATE')]),
      OrderedDict([('Rows', '031:040'), ('CueType1', 'REGULATE'), ('CueType2', 'REACT')]),
      OrderedDict([('Rows', '041:050'), ('CueType1', 'REGULATE'), ('CueType2', 'REACT')]),
      OrderedDict([('Rows', '051:060'), ('CueType1', 'REACT'), ('CueType2', 'REGULATE')])]
    Routine isi
    Routine Cue
    Routine isi
    LoopInitiator randomPresent loopType="TrialHandler"
      Selected rows = $Rows
      conditionsFile = spreadsheet5.xlsx
      loopType = random
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      conditions:
        [OrderedDict([('nReps1', 0), ('nReps2', 1)]),
        OrderedDict([('nReps1', 0), ('nReps2', 1)]),
        OrderedDict([('nReps1', 1), ('nReps2', 0)]),
        OrderedDict([('nReps1', 0), ('nReps2', 1)]),
        OrderedDict([('nReps1', 0), ('nReps2', 1)]),
        OrderedDict([('nReps1', 0), ('nReps2', 1)]),
        OrderedDict([('nReps1', 1), ('nReps2', 0)]),
        OrderedDict([('nReps1', 1), ('nReps2', 0)]),
        OrderedDict([('nReps1', 1), ('nReps2', 0)]),
        OrderedDict([('nReps1', 1), ('nReps2', 0)]),
        OrderedDict([('nReps1', 0), ('nReps2', 0)]),
        OrderedDict([('nReps1', 1), ('nReps2', 1)]),
        OrderedDict([('nReps1', 0), ('nReps2', 0)]),
        OrderedDict([('nReps1', 1), ('nReps2', 1)]),
        OrderedDict([('nReps1', 0), ('nReps2', 0)]),
        OrderedDict([('nReps1', 1), ('nReps2', 1)]),
        OrderedDict([('nReps1', 0), ('nReps2', 0)]),
        OrderedDict([('nReps1', 1), ('nReps2', 1)]),
        OrderedDict([('nReps1', 0), ('nReps2', 0)]),
        OrderedDict([('nReps1', 1), ('nReps2', 1)]),
        OrderedDict([('nReps1', 0), ('nReps2', 0)]),
        OrderedDict([('nReps1', 1), ('nReps2', 1)]),
        OrderedDict([('nReps1', 1), ('nReps2', 1)]),
        OrderedDict([('nReps1', 1), ('nReps2', 1)]),
        OrderedDict([('nReps1', 1), ('nReps2', 1)]),
        OrderedDict([('nReps1', 1), ('nReps2', 1)]),
        OrderedDict([('nReps1', 0), ('nReps2', 0)]),
        OrderedDict([('nReps1', 0), ('nReps2', 0)]),
        OrderedDict([('nReps1', 0), ('nReps2', 0)]),
        OrderedDict([('nReps1', 0), ('nReps2', 0)]),
        OrderedDict([('nReps1', 0), ('nReps2', 0)]),
        OrderedDict([('nReps1', 1), ('nReps2', 1)]),
        OrderedDict([('nReps1', 1), ('nReps2', 1)]),
        OrderedDict([('nReps1', 0), ('nReps2', 0)])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
      LoopInitiator SelfishGiver loopType="TrialHandler"
        loopType = sequential
        nReps = $nReps1
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        Routine sendMoney1
        Routine Giver1
      LoopTerminator SelfishGiver
      Routine isi
      LoopInitiator GenerousGiver loopType="TrialHandler"
        loopType = sequential
        nReps = $nReps2
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        Routine sendMoney2
        Routine Giver2
      LoopTerminator GenerousGiver
    LoopTerminator randomPresent
  LoopTerminator CueLoop
  Routine ThankYou
