PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = EmotRegPavlovia
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Routines
  Routine intro
    TextComponent Instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        In this part of the study you will be given a regulation strategy to use while viewing various pictures.

        Then you will use a rating scale to indicate how you feel in the present moment. Use the mouse to select a rating, then press ENTER to move on. You will have 5 seconds to make a response once you see the rating scale.

        You will first be completing a few practice rounds.

        When you are ready, press SPACE to start!
    KeyboardComponent space
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Cue
    TextComponent cue
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextComponent ISI
      letterHeight = 0.1
      startVal [time (s)] = 5
      stopVal [duration (s)] = 2
      text [set every repeat] = +
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        subID = int(expInfo['participant'])

        if subID%2==0:
            cue.setText(CueType1)
        if subID%2==1:
            cue.setText(CueType2)
  Routine BeginInstr
    TextComponent text
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        You will now begin the full task.

        Press SPACE to start!
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine isi
    TextComponent Iti
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = +
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  Routine ratings
    TextComponent ratingQ
      letterHeight = 0.06
      pos = (0, 0.19)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 5
      text [set every repeat] = How would you characterize your feelings at the present moment?
      wrapWidth = 1.3
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    TextComponent text_2
      letterHeight = 0.035
      pos = (-0.02, -0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = Very Negative                                                 Very Positive
      wrapWidth = 1.6
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    RatingScaleComponent rating
      categoryChoices = 1,2,3,4,5,6,7
      forceEndRoutine = True
      high = 7
      low = 1
      pos = 0, -0.33
      size = 1.4
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine Pic
    ImageComponent Image
      image [set every repeat] = $Picture
      size [set every repeat] = (1.5, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
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  Routine TY
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Thank you for participating!

        You have completed this part of the study
Flow
  Routine intro
  Routine isi
  LoopInitiator practiceLoop loopType="TrialHandler"
    Selected rows = 0
    conditionsFile = EmotionRegCues.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('CueType1', 'REGULATE'), ('rows', '003:0021'), ('CueType2', 'REACT')]),
      OrderedDict([('CueType1', 'REACT'), ('rows', '0021:0039'), ('CueType2', 'REGULATE')]),
      OrderedDict([('CueType1', 'REACT'), ('rows', '0039:0057'), ('CueType2', 'REGULATE')]),
      OrderedDict([('CueType1', 'REGULATE'), ('rows', '0057:75'), ('CueType2', 'REACT')]),
      OrderedDict([('CueType1', 'REGULATE'), ('rows', '0075:93'), ('CueType2', 'REACT')]),
      OrderedDict([('CueType1', 'REACT'), ('rows', '0093:00108'), ('CueType2', 'REGULATE')])]
    Routine Cue
    LoopInitiator trials loopType="TrialHandler"
      Selected rows = 0:3
      conditionsFile = EmotionReg.csv
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('CueType', 'REGULATE'), ('Picture', 'OasisPics\\Negative\\angry1.jpg')]),
        OrderedDict([('CueType', 'REAPPRAISE'), ('Picture', 'OasisPics\\Negative\\angry2.jpg')]),
        OrderedDict([('CueType', 'REAPPRAISE'), ('Picture', 'OasisPics\\Negative\\bored.jpg')]),
        OrderedDict([('CueType', 'REAPPRAISE'), ('Picture', 'OasisPics\\Negative\\depressed.jpg')]),
        OrderedDict([('CueType', 'REAPPRAISE'), ('Picture', 'OasisPics\\Negative\\depressed2.jpg')]),
        OrderedDict([('CueType', 'REAPPRAISE'), ('Picture', 'OasisPics\\Negative\\depressed3.jpg')]),
        OrderedDict([('CueType', 'REAPPRAISE'), ('Picture', 'OasisPics\\Negative\\doctor.jpg')]),
        OrderedDict([('CueType', 'REAPPRAISE'), ('Picture', 'OasisPics\\Negative\\doctor2.jpg')]),
        OrderedDict([('CueType', 'REAPPRAISE'), ('Picture', 'OasisPics\\Negative\\frustratedpose.jpg')]),
        OrderedDict([('CueType', 'REAPPRAISE'), ('Picture', 'OasisPics\\Negative\\frustratedpose7.jpg')]),
        OrderedDict([('CueType', 'REAPPRAISE'), ('Picture', 'OasisPics\\Negative\\gun.jpg')]),
        OrderedDict([('CueType', 'REAPPRAISE'), ('Picture', 'OasisPics\\Negative\\hangover.jpg')]),
        OrderedDict([('CueType', 'REAPPRAISE'), ('Picture', 'OasisPics\\Negative\\miserable.jpg')]),
        OrderedDict([('CueType', 'REAPPRAISE'), ('Picture', 'OasisPics\\Negative\neonazi1.jpg')]),
        OrderedDict([('CueType', 'REAPPRAISE'), ('Picture', 'OasisPics\\Negative\\police.jpg')]),
        OrderedDict([('CueType', 'REAPPRAISE'), ('Picture', 'OasisPics\\Negative\\police2.jpg')])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
      Routine Pic
      Routine ratings
      Routine isi
    LoopTerminator trials
  LoopTerminator practiceLoop
  Routine BeginInstr
  Routine isi
  LoopInitiator trials_2 loopType="TrialHandler"
    Selected rows = 0:5
    conditionsFile = EmotionRegCues.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('CueType1', 'REGULATE'), ('rows', '003:0021'), ('CueType2', 'REACT')]),
      OrderedDict([('CueType1', 'REACT'), ('rows', '0021:0039'), ('CueType2', 'REGULATE')]),
      OrderedDict([('CueType1', 'REACT'), ('rows', '0039:0057'), ('CueType2', 'REGULATE')]),
      OrderedDict([('CueType1', 'REGULATE'), ('rows', '0057:75'), ('CueType2', 'REACT')]),
      OrderedDict([('CueType1', 'REGULATE'), ('rows', '0075:93'), ('CueType2', 'REACT')]),
      OrderedDict([('CueType1', 'REACT'), ('rows', '0093:00108'), ('CueType2', 'REGULATE')])]
    Routine Cue
    LoopInitiator mainTrials loopType="TrialHandler"
      Selected rows = $rows
      conditionsFile = EmotionReg.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('Picture', 'musician.jpg')]),
        OrderedDict([('Picture', 'picnic1.jpg')]),
        OrderedDict([('Picture', 'frustratedpose7.jpg')]),
        OrderedDict([('Picture', 'sleepy.jpg')]),
        OrderedDict([('Picture', 'angry2.jpg')]),
        OrderedDict([('Picture', 'rockclimb.jpg')]),
        OrderedDict([('Picture', 'massage.jpg')]),
        OrderedDict([('Picture', 'depressed2.jpg')]),
        OrderedDict([('Picture', 'gazing.jpg')]),
        OrderedDict([('Picture', 'camping.jpg')]),
        OrderedDict([('Picture', 'band2.jpg')]),
        OrderedDict([('Picture', 'sad5.jpg')]),
        OrderedDict([('Picture', 'mother4')]),
        OrderedDict([('Picture', 'excited2.jpg')]),
        OrderedDict([('Picture', 'police.jpg')]),
        OrderedDict([('Picture', 'happy2.jpg')]),
        OrderedDict([('Picture', 'soldier3.jpg')]),
        OrderedDict([('Picture', 'dessert.jpg')]),
        OrderedDict([('Picture', 'dancing2.jpg')]),
        OrderedDict([('Picture', 'scared1.jpg')]),
        OrderedDict([('Picture', 'baby1.jpg')]),
        OrderedDict([('Picture', 'skydiving.jpg')]),
        OrderedDict([('Picture', 'rugby.jpg')]),
        OrderedDict([('Picture', 'sad2.jpg')]),
        OrderedDict([('Picture', 'neutralface2.jpg')]),
        OrderedDict([('Picture', 'gazing2.jpg')]),
        OrderedDict([('Picture', 'depressed.jpg')]),
        OrderedDict([('Picture', 'cold.jpg')]),
        OrderedDict([('Picture', 'Shot3.jpg')]),
        OrderedDict([('Picture', 'astronaut.jpg')]),
        OrderedDict([('Picture', 'baby4.jpg')]),
        OrderedDict([('Picture', 'picnic2.jpg')]),
        OrderedDict([('Picture', 'toast.jpg')]),
        OrderedDict([('Picture', 'War1.jpg')]),
        OrderedDict([('Picture', 'exercise.jpg')]),
        OrderedDict([('Picture', 'happy.jpg')])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
      Routine Pic
      Routine ratings
      Routine isi
    LoopTerminator mainTrials
  LoopTerminator trials_2
  Routine TY
