PsychoPy2experiment version="3.2.0"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = MoralSR
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Routines
  Routine PracticeDilemmas_2
    TextComponent practiceQs
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      text [set every repeat] = $PracticeDilemmas
      wrapWidth = 1.6
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    KeyboardComponent space1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine PracticeAnswers
    TextComponent leftText
      letterHeight = 0.04
      pos = (-0.5, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $PracticeLeftText
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    TextComponent rightText
      letterHeight = 0.04
      pos = (0.5, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $PracticeRightText
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    RatingScaleComponent rating
      forceEndRoutine = True
      high = 7
      low = 1
      pos = 0, -0.35
      size = 1.5
      startVal [time (s)] = 0.0
      storeHistory = True
      tickHeight = 1
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    TextComponent ComUn
      letterHeight = 0.033
      pos = (0, -0.24)
      startVal [time (s)] = 0.0
      text [set every repeat] = Completely Unacceptable            2            3            4            5            6           Completely Acceptable
      wrapWidth = 2.5
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    TextComponent ComAc
      letterHeight = 0.03
      pos = (0.45, -0.35)
      startVal [time (s)] = 0.0
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  Routine code
    CodeComponent code_2
      Code Type = Py
  Routine code1
    CodeComponent code_3
      Code Type = Py
      Begin Experiment:
        this_loop_number = 0
      Begin Routine:
        this_loop_number +=1

        loopNum = int(this_loop_number)

        selectRows=((loopNum-1)*4+1):(loopNum*4)
  Routine code2
    CodeComponent code_4
      Code Type = Py
      Begin Experiment:
        this_loop_number = 0
      Begin Routine:
        this_loop_number +=1

        selectRows = ((this_loop_number-1)*4+1):(this_loop_number*4)
  Routine MainDilemmas
    TextComponent text
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      text [set every repeat] = $MainDilemmas
      wrapWidth = 1.6
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine MainAnswers
    TextComponent leftText1
      letterHeight = 0.04
      pos = (-0.5, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $MainLeftText
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    TextComponent rightText1
      letterHeight = 0.04
      pos = (0.5, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $MainRightText
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    RatingScaleComponent rating_2
      forceEndRoutine = True
      high = 7
      labels = Completely Unacceptable, Completely Acceptable
      low = 1
      pos = 0, -0.4
      showAccept = False
      singleClick = True
      size = 1.3
      startVal [time (s)] = 0.0
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  Routine ThankYou
    TextComponent TY
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Thank you for your participation!

        You have completed this part of the study.
  Routine Instructions
    TextComponent InstText
      color [set every repeat] = white
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.04
      pos [set every repeat] = (0, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Instructions
      wrapWidth = 1.6
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    KeyboardComponent space
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SetUpCode
    CodeComponent code_6
      Code Type = Py
      Begin Routine:
        '''
        from itertools import chain
        from itertools import zip_longest as zip
        from random import shuffle
        PracticeQ1 = data.importConditions('Users\Jojo\Downloads\HelionLab\ExperimentFiles\MoralSelf-Regulation\MoralSelfReg.csv', selection=u'0:04')
        PracticeQ2 = data.importConditions('Users\Jojo\Downloads\HelionLab\ExperimentFiles\MoralSelf-Regulation\MoralSelfReg.csv', selection=u'04:08')


        shuffle(PracticeQ1)
        shuffle(PracticeQ2)

        trialList=list(chain.from_iterable(zip(PracticeQ1, PracticeQ2)))
        '''
  Routine Cue
    TextComponent cue
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text [set every repeat] = $CueInstructions
      wrapWidth = 1.5
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  Routine isi2
    TextComponent isi_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = +
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  Routine ISI
    TextComponent isi
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = +
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Flow
  LoopInitiator IntroLoop loopType="TrialHandler"
    conditionsFile = MoralSelfRegInst.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Instructions', 'In this study you will be asked to evaluate a number of moral dilemmas under various conditions. \nYou will be presented with 10 different scenario contexts and will respond to 10 conditions for each one.\n\nFor each scenario, you will proceed through four screens. The first three screens will start to describe a situation that you are hypothetically faced with and an action that you could perform in response to that situation. ')]),
      OrderedDict([('Instructions', 'When you are done reading each screen, you can press SPACE to move on to the next one.\nHowever, please try your best to get the fullest understanding of the scenario as described thus far  before moving on to the next screen.\n\nThe scenario description will include all the information you need to make your decision EXCEPT that it will not explicitly state the values for two features of the dilemma: a) a number of people involved in part of the scenario and b) a likelihood that something will happen. You will be evaluating this scenario given a number of variati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,
      OrderedDict([('Instructions', 'After you have understood the scenario context and the question you will be answering, you can press SPACE to move on to the individual trials that will fill these gaps for you in the scenario.\n\nBefore you do so, please try your best to hold in mind what the action is that you will be evaluating across trials, as you will not be remminded of this after this screen.\n\nFirst, you will see a "+" in the middle of the screen. Any time that this is up, all you need to do is fixate on the "+" and prepare to respond to the next trial. Next, you will see text appear in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,
      OrderedDict([('Instructions', 'After you answer you will again see a "+" in the middle of the screen, followed by the next trial. This  will occur for 10 different variations of each scenario. It is important that you try your best to judge each trial in isolation, and avoid consideration of past responses for the current scenario or past scenarios.\n\nYou will only have 10 seconds to respond to each variation. If the "+" appears before you have responded, that means you are out of time. If this happens, do not attempt to respond. SImply look at the "+" and wait for the next trial. \n\nOnce yo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
    Routine Instructions
  LoopTerminator IntroLoop
  LoopInitiator PracticeLoop loopType="TrialHandler"
    conditionsFile = moralRows.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('rows', '00:004'), ('CueType', 'LOOK')]),
      OrderedDict([('rows', '004:008'), ('CueType', 'REAPPRAISE')])]
    Routine ISI
    LoopInitiator PracticeQs loopType="TrialHandler"
      Selected rows = $rows
      conditionsFile = MoralSelfReg.csv
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('Instructions', 'In this study you will be asked to evaluate a number of moral dilemmas under various conditions. \nYou will be presented with 10 different scenario contexts and will respond to 10 conditions for each one.\n\nFor each scenario, you will proceed through four screens. The first three screens will start to describe a situation that you are hypothetically faced with and an action that you could perform in response to that situation. '), ('PracticeDilemmas', "You are the head of a safety crew that has been alerted about a group of skydivers that is wearing defective p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,
        OrderedDict([('Instructions', 'When you are done reading each screen, you can press SPACE to move on to the next one.\nHowever, please try your best to get the fullest understanding of the scenario as described thus far  before moving on to the next screen.\n\nThe scenario description will include all the information you need to make your decision EXCEPT that it will not explicitly state the values for two features of the dilemma: a) a number of people involved in part of the scenario and b) a likelihood that something will happen. You will be evaluating this scenario given a number of variati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,
        OrderedDict([('Instructions', 'After you have understood the scenario context and the question you will be answering, you can press SPACE to move on to the individual trials that will fill these gaps for you in the scenario.\n\nBefore you do so, please try your best to hold in mind what the action is that you will be evaluating across trials, as you will not be remminded of this after this screen.\n\nFirst, you will see a "+" in the middle of the screen. Any time that this is up, all you need to do is fixate on the "+" and prepare to respond to the next trial. Next, you will see text appear in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,
        OrderedDict([('Instructions', 'After you answer you will again see a "+" in the middle of the screen, followed by the next trial. This  will occur for 10 different variations of each scenario. It is important that you try your best to judge each trial in isolation, and avoid consideration of past responses for the current scenario or past scenarios.\n\nYou will only have 10 seconds to respond to each variation. If the "+" appears before you have responded, that means you are out of time. If this happens, do not attempt to respond. SImply look at the "+" and wait for the next trial. \n\nOnce yo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
      Routine PracticeDilemmas_2
    LoopTerminator PracticeQs
    Routine ISI
    Routine Cue
    Routine ISI
    LoopInitiator practiceAs loopType="TrialHandler"
      Selected rows = $rows
      conditionsFile = MoralSelfReg.csv
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine PracticeAnswers
    LoopTerminator practiceAs
  LoopTerminator PracticeLoop
  Routine isi2
  LoopInitiator MainLoop loopType="TrialHandler"
    conditionsFile = moralRows2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('rows2', '00:004'), ('CueType', 'REAPPRAISE')]),
      OrderedDict([('rows2', '004:008'), ('CueType', 'LOOK')]),
      OrderedDict([('rows2', '008:0012'), ('CueType', 'REAPPRAISE')]),
      OrderedDict([('rows2', '0012:0016'), ('CueType', 'REAPPRAISE')]),
      OrderedDict([('rows2', '0016:0020'), ('CueType', 'LOOK')])]
    LoopInitiator MainQs loopType="TrialHandler"
      Selected rows = $rows2
      conditionsFile = MoralSelfReg.csv
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine MainDilemmas
    LoopTerminator MainQs
    Routine ISI
    Routine Cue
    Routine ISI
    LoopInitiator trials_2 loopType="TrialHandler"
      Selected rows = $rows2
      conditionsFile = MoralSelfReg.csv
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine MainAnswers
    LoopTerminator trials_2
    Routine ISI
  LoopTerminator MainLoop
  Routine ThankYou
