PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = MoralSRBinaryChoice
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Routines
  Routine PracticeDilemmas_2
    TextComponent practiceQs
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      text [set every repeat] = $PracticeDilemmas
      wrapWidth = 1.4
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    KeyboardComponent space1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine PracticeAnswers
    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'y','n'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    TextComponent conBlank
      letterHeight = 0.1
      startVal [condition] = len(key_resp.keys) > 0
      stopVal [duration (s)] = 2
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    TextComponent RemText
      letterHeight = 0.055
      pos = (0, 0.32)
      startVal [time (s)] = 0.0
      stopVal [condition] = conBlank.status == FINISHED
      text [set every repeat] = $Reminder
      wrapWidth = 1.5
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    TextComponent leftText
      letterHeight = 0.05
      pos = (-0.5, 0.0)
      startVal [time (s)] = 0.0
      stopVal [condition] = conBlank.status == FINISHED
      text [set every repeat] = $PracticeLeftText
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    TextComponent rightText
      letterHeight = 0.05
      pos = (0.5, 0.0)
      startVal [time (s)] = 0.0
      stopVal [condition] = conBlank.status == FINISHED
      text [set every repeat] = $PracticeRightText
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    TextComponent Yes
      letterHeight = 0.05
      pos = (0, -0.33)
      startVal [time (s)] = 0.0
      stopVal [condition] = conBlank.status == FINISHED
      text [set every repeat] = Implement the plan ('y')
      wrapWidth = 2.5
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    TextComponent No
      letterHeight = 0.05
      pos = (0.0, -0.41)
      startVal [time (s)] = 0.0
      stopVal [condition] = conBlank.status == FINISHED
      text [set every repeat] = Do nothing ('n')
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    CodeComponent code_5
      Code Type = Both
      Begin Experiment:
        import numpy
        from numpy import random

        earnings = 0
        earningsStr = "$" + str(earnings)
        subID = int(expInfo['participant'])

        FiftyGamble = [1,0]
        SixtyGamble = [1,1,1,1,1,1,1,1,1,1,1,1,1,0,0,0,0,0,0,0]
        ThirtyGamble = [1,1,1,1,1,1,1,0,0,0,0,0,0,0,0,0,0,0,0,0]

        earning=0
        choseCode = []
        chanceResult = []

        #probability =[]
        def gamProbability(GroupProb):
            probs = int(GroupProb)
            if probs == 65:
                probability = SixtyGamble
                print('65% chance')
            if probs == 35:
                probability = ThirtyGamble
                print('35% chance')
            if probs == 50:
                probability = FiftyGamble
                print('50% chance')
        def gambleFunc(GroupProb):
            probs = int(GroupProb)
            if probs == 65:
                probability = SixtyGamble
                print('65% chance')
            if probs == 35:
                probability = ThirtyGamble
                print('35% chance')
            if probs == 50:
                probability = FiftyGamble
                print('50% chance')
            result = random.choice(probability)
            print('Chance result:')
            print(result)
      Begin JS Experiment:
        var earnings;

        earnings = 0

        var earningsStr;

        earningsStr = "$" + str(earnings)

        var subID;

        subID = parseInt(expInfo['participant'])

        var FiftyGamble;
        var SixtyGamble;
        var ThirtyGamble;

        FiftyGamble = [1,0]
        SixtyGamble = [1,1,1,1,1,1,1,1,1,1,1,1,1,0,0,0,0,0,0,0]
        ThirtyGamble = [1,1,1,1,1,1,1,0,0,0,0,0,0,0,0,0,0,0,0,0]

        var earning;
        earning = 0

        var choseCode;
        choseCode = []

        var chanceResult;
        chanceResult = []

        #probability =[]
        def gamProbability(GroupProb){
            probs = int(GroupProb)
            if (probs == 65){
                probability = SixtyGamble
                print('65% chance')
                }
            if (probs == 35){
                probability = ThirtyGamble
                print('35% chance')
                }
            if (probs == 50){
                probability = FiftyGamble
                print('50% chance')
                }
         }
        def gambleFunc(GroupProb){
            probs = int(GroupProb)
            if (probs == 65){
                probability = SixtyGamble
                print('65% chance')
                }
            if (probs == 35){
                probability = ThirtyGamble
                print('35% chance')
                }
            if (probs == 50){
                probability = FiftyGamble
                print('50% chance')
                }
            result = random.choice(probability)
            print('Chance result:')
            print(result)
            }
      Each Frame:
        if key_resp.keys == 'y':
            Yes.setColor('red')
        if key_resp.keys == 'n':
            No.setColor('red')

        #if (key_resp.keys == 'y' or key_resp.keys == 'n') and conBlank.status == NOT_STARTED:
        #    conBlank.tStart = t
        #    conBlank.frameNStart = frameN
        #    conBlank.setAutoDraw(True)

        if key_resp.keys == 'y' or key_resp.keys == 'n':
            key_resp.status = FINISHED
      Each JS Frame:
        if (key_resp.keys == 'y'){
            Yes.setColor('red');
            }
        if (key_resp.keys == 'n'){
            No.setColor('red');
            }


        if (key_resp.keys == 'y' || key_resp.keys == 'n'){
            key_resp.status = FINISHED;
            }
      End JS Routine:
        if (key_resp.keys == 'y'){
            choseCode = 1;
            }
        if (key_resp.keys == 'n'){
            choseCode = 0;
            }

        if (choseCode == 0 ){
            print('Chose to do nothing, play out the probability ');
            probs = int(GroupProb);
            if (probs == 65){
                probability = SixtyGamble;
                print('65% gamble');
                }
            if (probs == 35){
                probability = ThirtyGamble;
                print('35% gamble');
                }
            if (probs == 50){
                probability = FiftyGamble;
                print('50% gamble');
                }
            result = random.choice(probability);
            print('Chance result:');
            print(result);
            if (result == 1){
                print('The group escaped!');
                print(earnings);
                chanceResult = (" was saved.");
                }
            if (result == 0){
                print('The group died! :(');
                chanceResult = (' died.');
                }
          }



        Yes.setColor('white')
        No.setColor('white')

        if (conBlank.status == FINISHED){
            leftText.setAutoDraw(False);
            rightText.setAutoDraw(False);
            Yes.setAutoDraw(False);
            No.setAutoDraw(False);
            RemText.setAutoDraw(False);
            Question.setAutoDraw(False);
            continueRoutine = False ;
            }
      End Routine:
        if key_resp.keys == 'y':
            choseCode = 1
        if key_resp.keys == 'n':
            choseCode = 0

        if choseCode == 0 :
            print('Chose to do nothing, play out the probability ')
            probs = int(GroupProb)
            if probs == 65:
                probability = SixtyGamble
                print('65% gamble')
            if probs == 35:
                probability = ThirtyGamble
                print('35% gamble')
            if probs == 50:
                probability = FiftyGamble
                print('50% gamble')
            result = random.choice(probability)
            print('Chance result:')
            print(result)
            if result == 1:   #win
                print('The group escaped!')
                print(earnings)
                chanceResult = (" was saved.")
            if result == 0: #lose
                print('The group died! :(')
                chanceResult = (' died.')



        Yes.setColor('white')
        No.setColor('white')

        if conBlank.status == FINISHED:
            leftText.setAutoDraw(False)
            rightText.setAutoDraw(False)
            Yes.setAutoDraw(False)
            No.setAutoDraw(False)
            RemText.setAutoDraw(False)
            Question.setAutoDraw(False)
            continueRoutine = False
    TextComponent Question
      letterHeight = 0.055
      pos = (0, -0.20)
      startVal [time (s)] = 0.0
      stopVal [condition] = conBlank.status == FINISHED
      text [set every repeat] = What do you do?
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  Routine code
    CodeComponent code_2
      Code Type = Py
  Routine code1
    CodeComponent code_3
      Code Type = Py
      Begin Experiment:
        this_loop_number = 0
      Begin Routine:
        this_loop_number +=1

        loopNum = int(this_loop_number)

        selectRows=((loopNum-1)*4+1):(loopNum*4)
  Routine code2
    CodeComponent code_4
      Code Type = Py
      Begin Experiment:
        this_loop_number = 0
      Begin Routine:
        this_loop_number +=1

        selectRows = ((this_loop_number-1)*4+1):(this_loop_number*4)
  Routine MainDilemmas
    TextComponent text
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      text [set every repeat] = $MainDilemmas
      wrapWidth = 1.4
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine MainAnswers
    TextComponent leftText1
      letterHeight = 0.04
      pos = (-0.5, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $MainLeftText
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    TextComponent rightText1
      letterHeight = 0.04
      pos = (0.5, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $MainRightText
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    RatingScaleComponent rating_2
      forceEndRoutine = True
      high = 7
      labels = Completely Unacceptable, Completely Acceptable
      low = 1
      pos = 0, -0.4
      showAccept = False
      singleClick = True
      size = 1.3
      startVal [time (s)] = 0.0
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  Routine ThankYou
    TextComponent TY
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Thank you for your participation!

        You have completed this part of the study.
  Routine Instructions
    TextComponent InstText
      color [set every repeat] = white
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.04
      pos [set every repeat] = (0, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Instructions
      wrapWidth = 1.4
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    KeyboardComponent space
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SetUpCode
    CodeComponent code_6
      Code Type = Py
      Begin Routine:
        '''
        from itertools import chain
        from itertools import zip_longest as zip
        from random import shuffle
        PracticeQ1 = data.importConditions('Users\Jojo\Downloads\HelionLab\ExperimentFiles\MoralSelf-Regulation\MoralSelfReg.csv', selection=u'0:04')
        PracticeQ2 = data.importConditions('Users\Jojo\Downloads\HelionLab\ExperimentFiles\MoralSelf-Regulation\MoralSelfReg.csv', selection=u'04:08')


        shuffle(PracticeQ1)
        shuffle(PracticeQ2)

        trialList=list(chain.from_iterable(zip(PracticeQ1, PracticeQ2)))
        '''
  Routine Cue
    TextComponent cue
      letterHeight = 0.13
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      text [set every repeat] = $CueInstructions1
      wrapWidth = 1.5
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    CodeComponent code_7
      Code Type = Py
      Begin Routine:
        subID = int(expInfo['participant'])

        if subID%2==0:
            cue.setText(CueInstructions1)
        if subID%2==1:
            cue.setText(CueInstructions2)
  Routine isi2
    TextComponent isi_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = +
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  Routine ISI
    TextComponent isi
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = +
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  Routine Feedback
    TextComponent FeedbackVar
      color [set every repeat] = white
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.07
      pos [set every repeat] = (0, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = default
      wrapWidth = 1.4
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    CodeComponent code_8
      Code Type = Both
      Begin JS Routine:
        var groupNum;
        var numPeople;
        var groupResult;
        var nounStr;
        var resultGroup;

        groupNum = parseInt(GroupNumber);
        numPeople = str(groupNum);
        groupResult = str(chanceResult);
        nounStr = str(Noun);
        resultGroup = ("of " + numPeople + nounStr + groupResult);

        if (choseCode == 1){
            FeedbackVar.setText(ChosePlan);
            }

        if (choseCode == 0){
            FeedbackVar.setText(ChoseNothing + resultGroup);
            }
      Begin Routine:
        groupNum = int(GroupNumber)
        numPeople = str(groupNum)
        groupResult = str(chanceResult)
        nounStr = str(Noun)
        resultGroup = ("of " + numPeople + nounStr + groupResult)

        if choseCode == 1:
            FeedbackVar.setText(ChosePlan)

        if choseCode == 0:
            FeedbackVar.setText(ChoseNothing + resultGroup)
  Routine MainAnswers_2
    KeyboardComponent key_resp_3
      allowedKeys = 'y','n'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    TextComponent conBlank2
      letterHeight = 0.1
      startVal [condition] = len(key_resp_3.keys) > 0
      stopVal [duration (s)] = 2
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    TextComponent RemText2
      letterHeight = 0.055
      pos = (0, 0.32)
      startVal [time (s)] = 0.0
      stopVal [condition] = conBlank2.status == FINISHED
      text [set every repeat] = $Reminder
      wrapWidth = 1.5
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    TextComponent leftText2
      letterHeight = 0.05
      pos = (-0.5, 0.0)
      startVal [time (s)] = 0.0
      stopVal [condition] = conBlank2.status == FINISHED
      text [set every repeat] = $MainLeftText
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    TextComponent rightText2
      letterHeight = 0.05
      pos = (0.5, 0.0)
      startVal [time (s)] = 0.0
      stopVal [condition] = conBlank2.status == FINISHED
      text [set every repeat] = $MainRightText
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    TextComponent yes2
      letterHeight = 0.05
      pos = (0, -0.33)
      startVal [time (s)] = 0.0
      stopVal [condition] = conBlank2.status == FINISHED
      text [set every repeat] = Implement the plan ('y')
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    TextComponent no2
      letterHeight = 0.05
      pos = (0.0, -0.41)
      startVal [time (s)] = 0.0
      stopVal [condition] = conBlank2.status == FINISHED
      text [set every repeat] = Do nothing ('n')
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    CodeComponent code_9
      Code Type = Both
      Begin Experiment:
        import numpy
        from numpy import random

        earnings = 0
        earningsStr = "$" + str(earnings)
        subID = int(expInfo['participant'])

        FiftyGamble = [1,0]
        SixtyGamble = [1,1,1,1,1,1,1,1,1,1,1,1,1,0,0,0,0,0,0,0]
        ThirtyGamble = [1,1,1,1,1,1,1,0,0,0,0,0,0,0,0,0,0,0,0,0]

        earning=0
        choseCode = []
        chanceResult = []

        #probability =[]
        def gamProbability(GroupProb):
            probs = int(GroupProb)
            if probs == 65:
                probability = SixtyGamble
                print('65% chance')
            if probs == 35:
                probability = ThirtyGamble
                print('35% chance')
            if probs == 50:
                probability = FiftyGamble
                print('50% chance')
        def gambleFunc(GroupProb):
            probs = int(GroupProb)
            if probs == 65:
                probability = SixtyGamble
                print('65% chance')
            if probs == 35:
                probability = ThirtyGamble
                print('35% chance')
            if probs == 50:
                probability = FiftyGamble
                print('50% chance')
            result = random.choice(probability)
            print('Chance result:')
            print(result)
      Begin JS Experiment:
        var earnings;

        earnings = 0

        var earningsStr;

        earningsStr = "$" + str(earnings)

        var subID;

        subID = parseInt(expInfo['participant'])

        var FiftyGamble;
        var SixtyGamble;
        var ThirtyGamble;

        FiftyGamble = [1,0]
        SixtyGamble = [1,1,1,1,1,1,1,1,1,1,1,1,1,0,0,0,0,0,0,0]
        ThirtyGamble = [1,1,1,1,1,1,1,0,0,0,0,0,0,0,0,0,0,0,0,0]

        var earning;
        earning = 0

        var choseCode;
        choseCode = []

        var chanceResult;
        chanceResult = []

        #probability =[]
        def gamProbability(GroupProb){
            probs = int(GroupProb)
            if (probs == 65){
                probability = SixtyGamble
                print('65% chance')
                }
            if (probs == 35){
                probability = ThirtyGamble
                print('35% chance')
                }
            if (probs == 50){
                probability = FiftyGamble
                print('50% chance')
                }
         }
        def gambleFunc(GroupProb){
            probs = int(GroupProb)
            if (probs == 65){
                probability = SixtyGamble
                print('65% chance')
                }
            if (probs == 35){
                probability = ThirtyGamble
                print('35% chance')
                }
            if (probs == 50){
                probability = FiftyGamble
                print('50% chance')
                }
            result = random.choice(probability)
            print('Chance result:')
            print(result)
            }
      Each Frame:
        if key_resp_3.keys == 'y':
            yes2.setColor('red')
        if key_resp_3.keys == 'n':
            no2.setColor('red')

        #if (key_resp.keys == 'y' or key_resp.keys == 'n') and conBlank.status == NOT_STARTED:
        #    conBlank.tStart = t
        #    conBlank.frameNStart = frameN
        #    conBlank.setAutoDraw(True)

        if key_resp_3.keys == 'y' or key_resp_3.keys == 'n':
            key_resp_3.status = FINISHED
      Each JS Frame:
        if (key_resp_3.keys == 'y'){
            yes2.setColor('red');
            }
        if (key_resp_3.keys == 'n'){
            no2.setColor('red');
            }


        if (key_resp_3.keys == 'y' || key_resp.keys == 'n'){
            key_resp_3.status = FINISHED;
            }
      End JS Routine:
        if (key_resp_3.keys == 'y'){
            choseCode = 1;
            }
        if (key_resp_3.keys == 'n'){
            choseCode = 0;
            }

        if (choseCode == 0 ){
            print('Chose to do nothing, play out the probability ');
            probs = int(GroupProb);
            if (probs == 65){
                probability = SixtyGamble;
                print('65% gamble');
                }
            if (probs == 35){
                probability = ThirtyGamble;
                print('35% gamble');
                }
            if (probs == 50){
                probability = FiftyGamble;
                print('50% gamble');
                }
            result = random.choice(probability);
            print('Chance result:');
            print(result);
            if (result == 1){
                print('The group escaped!');
                print(earnings);
                chanceResult = (" was saved.");
                }
            if (result == 0){
                print('The group died! :(');
                chanceResult = (' died.');
                }
          }



        yes2.setColor('white')
        no2.setColor('white')

        if (conBlank2.status == FINISHED){
            leftText2.setAutoDraw(False);
            rightText2.setAutoDraw(False);
            yes2.setAutoDraw(False);
            no2.setAutoDraw(False);
            RemText2.setAutoDraw(False);
            Question2.setAutoDraw(False);
            continueRoutine = False ;
            }
      End Routine:
        if key_resp_3.keys == 'y':
            choseCode = 1
        if key_resp_3.keys == 'n':
            choseCode = 0

        if choseCode == 0 :
            print('Chose to do nothing, play out the probability ')
            probs = int(GroupProb)
            if probs == 65:
                probability = SixtyGamble
                print('65% gamble')
            if probs == 35:
                probability = ThirtyGamble
                print('35% gamble')
            if probs == 50:
                probability = FiftyGamble
                print('50% gamble')
            result = random.choice(probability)
            print('Chance result:')
            print(result)
            if result == 1:   #win
                print('The group escaped!')
                print(earnings)
                chanceResult = (" were saved.")
            if result == 0: #lose
                print('The group died! :(')
                chanceResult = (' died.')



        yes2.setColor('white')
        no2.setColor('white')

        if conBlank2.status == FINISHED:
            leftText2.setAutoDraw(False)
            rightText2.setAutoDraw(False)
            yes2.setAutoDraw(False)
            no2.setAutoDraw(False)
            RemText2.setAutoDraw(False)
            Question2.setAutoDraw(False)
            continueRoutine = False
    TextComponent Question2
      letterHeight = 0.055
      pos = (0, -0.20)
      startVal [time (s)] = 0.0
      stopVal [condition] = conBlank2.status == FINISHED
      text [set every repeat] = What do you do?
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  Routine BeginInstr
    TextComponent instructions2
      letterHeight = 0.08
      startVal [time (s)] = 0.0
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      text:
        You will now begin the main part of the task.

        Press SPACE to start!
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator IntroLoop loopType="TrialHandler"
    conditionsFile = MoralSelfRegInst.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Instructions', 'In this study you will be asked to evaluate a number of moral dilemmas under various conditions. \nYou will be presented with 10 different scenario contexts and will respond to 10 conditions for each one.\nFor each scenario, you will proceed through four screens. The first three screens will start to describe a situation that you are hypothetically faced with and an action that you could perform in response to that situation. \nWhen you are done reading each screen, you can press SPACE to move on to the next one.\nHowever, please try your best to get the fullest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,
      OrderedDict([('Instructions', 'The scenario description will include all the information you need to make your decision EXCEPT that it will not explicitly state the values for two features of the dilemma:\na) a number of people involved in part of the scenario, and \nb) a likelihood that something will happen.\nYou will be evaluating this scenario given a number of variations of these features.\nThe fourth and final screen will provide you with the prompt that you will be answering for each of these variations - namely, whether or not it is morally acceptable for you to perform the action in q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,
      OrderedDict([('Instructions', 'After you have understood the scenario context and the question you will be answering, you can press SPACE to move on to the individual trials that will fill these gaps for you in the scenario.\nBefore you do so, please try your best to hold in mind what the action is that you will be evaluating across trials, as you will not be reminded of this after this screen.\nFirst, you will see a "+" in the middle of the screen. Any time that this is up, all you need to do is fixate on the "+" and prepare to respond to the next trial. Next, you will see text appear indicat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,
      OrderedDict([('Instructions', 'After you answer you will again see a "+" in the middle of the screen, followed by the next trial. This  will occur for 10 different variations of each scenario. It is important that you try your best to judge each trial in isolation, and avoid consideration of past responses for the current scenario or past scenarios.\nYou will only have 10 seconds to respond to each variation. If the "+" appears before you have responded, that means you are out of time. If this happens, do not attempt to respond. Simply look at the "+" and wait for the next trial. \nOnce you ha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
    Routine Instructions
  LoopTerminator IntroLoop
  LoopInitiator PracticeLoop loopType="TrialHandler"
    conditionsFile = moralRows.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('rows', '00:004'), ('CueType1', 'LOOK'), ('CueInstructions', 'In the following conditions, we would like you to take a distanced approach. Treat your decisions as if you were an objective observer, that is, someone who is watching the scene but not directly involved in it. \n\nFor the next few seconds, distance yourself from the circumstance and the people in the situation.\n'), ('CueType2', 'REGULATE')]),
      OrderedDict([('rows', '004:008'), ('CueType1', 'REGULATE'), ('CueInstructions', 'In the following conditions, we would like you to take an involved approach. Treat your decisions as if you are part of the situation, that is, as someone who is in charge of and responsible for the results of the decision. \n\nFor the next few seconds, imagine that you are one of the people in this scene and think of how you would feel and react in this circumstance. '), ('CueType2', 'LOOK')])]
    Routine ISI
    LoopInitiator PracticeQs loopType="TrialHandler"
      Selected rows = $rows
      conditionsFile = PracticeMoralSelfReg.csv
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('PracticeDilemmas', "You are the head of a safety crew that has been alerted about a group of skydivers that is wearing defective parachutes and is currently in a freefall. \nYou've arrived in time to see that a group of divers is holding onto one another and will fall to their death a few feet to your right unless your crew's trampoline is moved beneath them."), ('PracticeLeftText', 'Divers on right: 1'), ('PracticeRightText', 'Probability of \nparachute opening: 35% '), ('Reminder', 'Direct your crew to the right, repositioning the trampoline and leaving the man to die ')]),
        OrderedDict([('PracticeDilemmas', "Your crew sees one diver apart from the rest who is much closer to reaching the ground, and instinctively moves a few feet to the left to catch him.\nYou know that there won't be enough time to reach the group if you wait to catch the one. If nothing is done, the safety crew will catch the diver to the left, avoiding his death, but the separate group of divers will land on the ground, causing their deaths.\nYou can re-direct your crew to the right, preventing the death of the group, but the one diver won't be caught."), ('PracticeLeftText', 'Divers on right: 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,
        OrderedDict([('PracticeDilemmas', 'You also know that there is a chance that one of the parachutes of the group will still open in time to prevent all of their deaths, but there is no chance that this will happen for the one given how close he is to the ground.'), ('PracticeLeftText', 'Divers on right: 2'), ('PracticeRightText', 'Probability of \nparachute opening: 25% '), ('Reminder', None)]),
        OrderedDict([('PracticeDilemmas', 'Consider each of the following scenarios and, for each one, determine how morally acceptable you think it would be to direct your crew to the right, re-positioning the trampoline underneath the group.'), ('PracticeLeftText', 'Divers on right: 6'), ('PracticeRightText', 'Probability of \nparachute opening: 75% '), ('Reminder', None)])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
      Routine PracticeDilemmas_2
    LoopTerminator PracticeQs
    Routine ISI
    Routine Cue
    LoopInitiator practiceAs loopType="TrialHandler"
      Selected rows = $rows
      conditionsFile = PracticeMoralSelfReg.csv
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('PracticeDilemmas', "• You are the head of a safety crew that has been alerted about a group of skydivers that is wearing defective parachutes and is currently in a freefall \n\n• You've arrived in time to see that a group of divers is holding onto one another and will fall to their death a few feet to your right unless your crew's trampoline is moved beneath them"), ('PracticeLeftText', 'Skydivers on right: 3'), ('PracticeRightText', 'Probability of \nparachute opening: 35% '), ('Reminder', 'Plan: Direct your crew to the right, repositioning the trampoline and leaving the one s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,
        OrderedDict([('PracticeDilemmas', "• Your crew sees one diver apart from the rest who is much closer to reaching the ground, and instinctively moves a few feet to the left to catch him\n\n• You know that there won't be enough time to reach the group if you wait to catch the one"), ('PracticeLeftText', 'Divers on right: 4'), ('PracticeRightText', 'Probability of \nparachute opening: 50% '), ('Reminder', 'Plan: Direct your crew to the right, repositioning the trampoline and leaving the one skydiver to die \nDo nothing: The one skydiver lives, the group has a chance of escape'), ('ChoseNothing', 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,
        OrderedDict([('PracticeDilemmas', "• If nothing is done, the safety crew will catch the diver to the left, avoiding his death, but the separate group of divers will land on the ground, causing their deaths\n\n• You can re-direct your crew to the right, preventing the death of the group, but the one diver won't be caught"), ('PracticeLeftText', 'Divers on right: 7'), ('PracticeRightText', 'Probability of \nparachute opening: 50% '), ('Reminder', 'Plan: Direct your crew to the right, repositioning the trampoline and leaving the one skydiver to die \nDo nothing: The one skydiver lives, the group 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,
        OrderedDict([('PracticeDilemmas', '• You also know that there is a chance that one of the parachutes of the group will still open in time to prevent all of their deaths\n\n• There is no chance that the parachute will open for the one diver, given how close he is to the ground'), ('PracticeLeftText', 'Divers on right: 5'), ('PracticeRightText', 'Probability of \nparachute opening: 65% '), ('Reminder', 'Plan: Direct your crew to the right, repositioning the trampoline and leaving the one skydiver to die \nDo nothing: The one skydiver lives, the group has a chance of escape'), ('ChoseNothing', 'T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
      Routine ISI
      Routine PracticeAnswers
      Routine ISI
      Routine Feedback
    LoopTerminator practiceAs
  LoopTerminator PracticeLoop
  Routine isi2
  Routine BeginInstr
  LoopInitiator MainLoop loopType="TrialHandler"
    conditionsFile = moralRows2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('rows2', '000:004'), ('CueInstructions1', 'In the following conditions, we would like you to take a distanced approach. Treat your decisions as if you were an objective observer, that is, someone who is watching the scene but not directly involved in it. \n\nFor the next few seconds, distance yourself from the circumstance and the people in the situation.\n'), ('CueInstructions2', 'In the following conditions, we would like you to take an involved approach. Treat your decisions as if you are part of the situation, that is, as someone who is in charge of and responsible for the r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,
      OrderedDict([('rows2', '004:008'), ('CueInstructions1', 'In the following conditions, we would like you to take an involved approach. Treat your decisions as if you are part of the situation, that is, as someone who is in charge of and responsible for the results of the decision. \n\nFor the next few seconds, imagine that you are one of the people in this scene and think of how you would feel and react in this circumstance. '), ('CueInstructions2', 'In the following conditions, we would like you to take a distanced approach. Treat your decisions as if you were an objective observer, that is, s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,
      OrderedDict([('rows2', '008:0012'), ('CueInstructions1', 'In the following conditions, we would like you to take a distanced approach. Treat your decisions as if you were an objective observer, that is, someone who is watching the scene but not directly involved in it. \n\nFor the next few seconds, distance yourself from the circumstance and the people in the situation.\n'), ('CueInstructions2', 'In the following conditions, we would like you to take an involved approach. Treat your decisions as if you are part of the situation, that is, as someone who is in charge of and responsible for the r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,
      OrderedDict([('rows2', '0012:0016'), ('CueInstructions1', 'In the following conditions, we would like you to take a distanced approach. Treat your decisions as if you were an objective observer, that is, someone who is watching the scene but not directly involved in it. \n\nFor the next few seconds, distance yourself from the circumstance and the people in the situation.\n'), ('CueInstructions2', 'In the following conditions, we would like you to take an involved approach. Treat your decisions as if you are part of the situation, that is, as someone who is in charge of and responsible for the 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
    Routine ISI
    LoopInitiator MainQs loopType="TrialHandler"
      Selected rows = $rows2
      conditionsFile = MoralSelfReg.csv
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('Instructions', 'In this study you will be asked to evaluate a number of moral dilemmas under various conditions. \nYou will be presented with 10 different scenario contexts and will respond to 10 conditions for each one.\n\nFor each scenario, you will proceed through four screens. The first three screens will start to describe a situation that you are hypothetically faced with and an action that you could perform in response to that situation. '), ('PracticeDilemmas', "You are the head of a safety crew that has been alerted about a group of skydivers that is wearing defective p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,
        OrderedDict([('Instructions', 'When you are done reading each screen, you can press SPACE to move on to the next one.\nHowever, please try your best to get the fullest understanding of the scenario as described thus far  before moving on to the next screen.\n\nThe scenario description will include all the information you need to make your decision EXCEPT that it will not explicitly state the values for two features of the dilemma: a) a number of people involved in part of the scenario and b) a likelihood that something will happen. You will be evaluating this scenario given a number of variati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,
        OrderedDict([('Instructions', 'After you have understood the scenario context and the question you will be answering, you can press SPACE to move on to the individual trials that will fill these gaps for you in the scenario.\n\nBefore you do so, please try your best to hold in mind what the action is that you will be evaluating across trials, as you will not be remminded of this after this screen.\n\nFirst, you will see a "+" in the middle of the screen. Any time that this is up, all you need to do is fixate on the "+" and prepare to respond to the next trial. Next, you will see text appear in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,
        OrderedDict([('Instructions', 'After you answer you will again see a "+" in the middle of the screen, followed by the next trial. This  will occur for 10 different variations of each scenario. It is important that you try your best to judge each trial in isolation, and avoid consideration of past responses for the current scenario or past scenarios.\n\nYou will only have 10 seconds to respond to each variation. If the "+" appears before you have responded, that means you are out of time. If this happens, do not attempt to respond. SImply look at the "+" and wait for the next trial. \n\nOnce yo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
      Routine MainDilemmas
    LoopTerminator MainQs
    Routine ISI
    Routine Cue
    LoopInitiator trials_2 loopType="TrialHandler"
      Selected rows = $rows2
      conditionsFile = MoralSelfReg.csv
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('MainLeftText', 'Workers in \nRoom A: 4'), ('MainRightText', 'Probability of \nescape: 35%'), ('MainDilemmas', "• There has been an accident in the basement of an office building\n\n• A pipe has broken and is releasing a lethal gas into the building's ventilation system\n\n• If nothing is done, the gas will travel upward to Room A and cause the death of all workers there"), ('Reminder', 'Plan: Hit the button to divert the gas to Room B, killing the one worker there\nDo nothing: The one worker lives, the group in Room A has a chance of escaping'), ('ChoseNothing', 'The one  worke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,
        OrderedDict([('MainLeftText', 'Workers in \nRoom A: 7'), ('MainRightText', 'Probability of \nescape: 65%'), ('MainDilemmas', '• You are the building manager\n\n• You know that the only way to avoid the deaths of the workers in Room A is to block the main vent immediately by hitting a button that will close one of the vent doors\n\n• You also know that if you close the vent door the gas will be diverted into a different room, Room B, and cause the death of the one worker there'), ('Reminder', 'Plan: Hit the button to divert the gas to Room B, killing the one worker there\nDo nothing: The one wo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,
        OrderedDict([('MainLeftText', 'Workers in \nRoom A: 6'), ('MainRightText', 'Probability of \nescape: 50%'), ('MainDilemmas', '• You are also aware that there is a chance that the workers in Room A will escape before the gas reaches them\n\n• This would be impossible for the one worker in Room B'), ('Reminder', 'Plan: Hit the button to divert the gas to Room B, killing the one worker there\nDo nothing: The one worker lives, the group in Room A has a chance of escaping'), ('ChoseNothing', 'The one  worker in Room B lived.\n\nThe 6 workers in Room A '), ('ChosePlan', 'The one worker in Room B die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,
        OrderedDict([('MainLeftText', 'Workers in \nRoom A: 11'), ('MainRightText', 'Probability of \nescape: 65%'), ('MainDilemmas', 'Consider each of the following scenarios and, for each one, determine how morally acceptable you think it would be to hit the button that closes the vent door and diverts the lethal gas to Room B.'), ('Reminder', 'Plan: Hit the button to divert the gas to Room B, killing the one worker there\nDo nothing: The one worker lives, the group in Room A has a chance of escaping'), ('ChoseNothing', 'The one  worker in Room B lived.\n\nThe 11 workers in Room A '), ('ChosePlan', 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
      Routine ISI
      Routine MainAnswers_2
      Routine ISI
      Routine Feedback
    LoopTerminator trials_2
  LoopTerminator MainLoop
  Routine ThankYou
