PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = MoralSRBinaryChoice
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Routines
  Routine PracticeDilemmas_2
    ImageComponent image
      image [set every repeat] = skydivers.jpg
      pos = (0, 0.29)
      size = (0.28, 0.23)
      startVal [time (s)] = 0.0
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    TextComponent practiceQs
      letterHeight = 0.045
      pos = (0, -0.07)
      startVal [time (s)] = 0.0
      text [set every repeat] = $PracticeDilemmas
      wrapWidth = 1.1
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    KeyboardComponent space1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine PracticeAnswers
    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'y','n'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    TextComponent conBlank
      letterHeight = 0.1
      startVal [condition] = len(key_resp.keys) > 0
      stopVal [duration (s)] = 2
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    TextComponent leftText
      letterHeight = 0.04
      pos = (0.41, 0.05)
      startVal [time (s)] = 0.0
      stopVal [condition] = conBlank.status == FINISHED
      text [set every repeat] = $PracticeLeftText
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    TextComponent rightText
      letterHeight = 0.04
      pos = (0.46, -0.1)
      startVal [time (s)] = 0.0
      stopVal [condition] = conBlank.status == FINISHED
      text [set every repeat] = $PracticeRightText
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    TextComponent Yes
      letterHeight = 0.04
      pos = (0, -0.28)
      startVal [time (s)] = 0.0
      stopVal [condition] = conBlank.status == FINISHED
      text [set every repeat] = Implement the plan ('y')
      wrapWidth = 2.5
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    TextComponent No
      letterHeight = 0.04
      pos = (0.0, -0.36)
      startVal [time (s)] = 0.0
      stopVal [condition] = conBlank.status == FINISHED
      text [set every repeat] = Do nothing ('n')
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    TextComponent RemText
      letterHeight = 0.04
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [condition] = conBlank.status == FINISHED
      text [set every repeat] = $Reminder
      wrapWidth = 1.3
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    CodeComponent code_5
      Code Type = Both
      Begin Experiment:
        import numpy
        from numpy import random

        earnings = 0
        earningsStr = "$" + str(earnings)
        subID = int(expInfo['participant'])

        FiftyGamble = [1,0]
        SixtyGamble = [1,1,1,1,1,1,1,1,1,1,1,1,1,0,0,0,0,0,0,0]
        ThirtyGamble = [1,1,1,1,1,1,1,0,0,0,0,0,0,0,0,0,0,0,0,0]

        earning=0
        choseCode = []
        chanceResult = []

        #probability =[]
        def gamProbability(GroupProb):
            probs = int(GroupProb)
            if probs == 65:
                probability = SixtyGamble
                print('65% chance')
            if probs == 35:
                probability = ThirtyGamble
                print('35% chance')
            if probs == 50:
                probability = FiftyGamble
                print('50% chance')
        def gambleFunc(GroupProb):
            probs = int(GroupProb)
            if probs == 65:
                probability = SixtyGamble
                print('65% chance')
            if probs == 35:
                probability = ThirtyGamble
                print('35% chance')
            if probs == 50:
                probability = FiftyGamble
                print('50% chance')
            result = random.choice(probability)
            print('Chance result:')
            print(result)
      Begin JS Experiment:
        var earnings;

        earnings = 0

        var earningsStr;

        earningsStr = "$" + str(earnings)

        var subID;

        subID = parseInt(expInfo['participant'])

        var FiftyGamble;
        var SixtyGamble;
        var ThirtyGamble;

        FiftyGamble = [1,0]
        SixtyGamble = [1,1,1,1,1,1,1,1,1,1,1,1,1,0,0,0,0,0,0,0]
        ThirtyGamble = [1,1,1,1,1,1,1,0,0,0,0,0,0,0,0,0,0,0,0,0]

        var earning;
        earning = 0

        var choseCode;
        choseCode = []

        var chanceResult;
        chanceResult = []

        #probability =[]
        def gamProbability(GroupProb){
            probs = int(GroupProb)
            if (probs == 65){
                probability = SixtyGamble
                print('65% chance')
                }
            if (probs == 35){
                probability = ThirtyGamble
                print('35% chance')
                }
            if (probs == 50){
                probability = FiftyGamble
                print('50% chance')
                }
         }
        def gambleFunc(GroupProb){
            probs = int(GroupProb)
            if (probs == 65){
                probability = SixtyGamble
                print('65% chance')
                }
            if (probs == 35){
                probability = ThirtyGamble
                print('35% chance')
                }
            if (probs == 50){
                probability = FiftyGamble
                print('50% chance')
                }
            result = random.choice(probability)
            print('Chance result:')
            print(result)
            }
      Each Frame:
        if key_resp.keys == 'y':
            Yes.setColor('red')
        if key_resp.keys == 'n':
            No.setColor('red')

        #if (key_resp.keys == 'y' or key_resp.keys == 'n') and conBlank.status == NOT_STARTED:
        #    conBlank.tStart = t
        #    conBlank.frameNStart = frameN
        #    conBlank.setAutoDraw(True)

        if key_resp.keys == 'y' or key_resp.keys == 'n':
            key_resp.status = FINISHED
      Each JS Frame:
        if (key_resp.keys == 'y'){
            Yes.setColor('red');
            }
        if (key_resp.keys == 'n'){
            No.setColor('red');
            }


        if (key_resp.keys == 'y' || key_resp.keys == 'n'){
            key_resp.status = FINISHED;
            }
      End JS Routine:
        if (key_resp.keys == 'y'){
            choseCode = 1;
            }
        if (key_resp.keys == 'n'){
            choseCode = 0;
            }

        if (choseCode == 0 ){
            print('Chose to do nothing, play out the probability ');
            probs = int(GroupProb);
            if (probs == 65){
                probability = SixtyGamble;
                print('65% gamble');
                }
            if (probs == 35){
                probability = ThirtyGamble;
                print('35% gamble');
                }
            if (probs == 50){
                probability = FiftyGamble;
                print('50% gamble');
                }
            result = random.choice(probability);
            print('Chance result:');
            print(result);
            if (result == 1){
                print('The group escaped!');
                print(earnings);
                chanceResult = (" was saved.");
                }
            if (result == 0){
                print('The group died! :(');
                chanceResult = (' died.');
                }
          }



        Yes.setColor('white')
        No.setColor('white')

        if (conBlank.status == FINISHED){
            leftText.setAutoDraw(False);
            rightText.setAutoDraw(False);
            Yes.setAutoDraw(False);
            No.setAutoDraw(False);
            RemText.setAutoDraw(False);
            Question.setAutoDraw(False);
            continueRoutine = False ;
            }
      End Routine:
        if key_resp.keys == 'y':
            choseCode = 1
        if key_resp.keys == 'n':
            choseCode = 0

        if choseCode == 0 :
            print('Chose to do nothing, play out the probability ')
            probs = int(GroupProb)
            if probs == 65:
                probability = SixtyGamble
                print('65% gamble')
            if probs == 35:
                probability = ThirtyGamble
                print('35% gamble')
            if probs == 50:
                probability = FiftyGamble
                print('50% gamble')
            result = random.choice(probability)
            print('Chance result:')
            print(result)
            if result == 1:   #win
                print('The group escaped!')
                print(earnings)
                chanceResult = (" were saved.")
            if result == 0: #lose
                print('The group died! :(')
                chanceResult = (' died.')



        Yes.setColor('white')
        No.setColor('white')

        if conBlank.status == FINISHED:
            leftText.setAutoDraw(False)
            rightText.setAutoDraw(False)
            Yes.setAutoDraw(False)
            No.setAutoDraw(False)
            sureGroup.setAutoDraw(False)
            RemText.setAutoDraw(False)
        #    Question.setAutoDraw(False)
            continueRoutine = False
    TextComponent sureGroup
      letterHeight = 0.04
      pos = (-0.43, 0.0)
      startVal [time (s)] = 0.0
      stopVal [condition] = conBlank.status == FINISHED
      text [set every repeat] = $sureGroupText
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  Routine code
    CodeComponent code_2
      Code Type = Py
  Routine code1
    CodeComponent code_3
      Code Type = Py
      Begin Experiment:
        this_loop_number = 0
      Begin Routine:
        this_loop_number +=1

        loopNum = int(this_loop_number)

        selectRows=((loopNum-1)*4+1):(loopNum*4)
  Routine code2
    CodeComponent code_4
      Code Type = Py
      Begin Experiment:
        this_loop_number = 0
      Begin Routine:
        this_loop_number +=1

        selectRows = ((this_loop_number-1)*4+1):(this_loop_number*4)
  Routine MainDilemmas
    TextComponent text
      letterHeight = 0.045
      pos = (0, -0.07)
      startVal [time (s)] = 0.0
      text [set every repeat] = $PracticeDilemmas
      wrapWidth = 1.1
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_2
      image [set every repeat] = $MainPicture
      pos = (0, 0.29)
      size = (0.28, 0.23)
      startVal [time (s)] = 0.0
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  Routine MainAnswers
    TextComponent leftText1
      letterHeight = 0.04
      pos = (-0.5, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $MainLeftText
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    TextComponent rightText1
      letterHeight = 0.04
      pos = (0.5, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $MainRightText
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    RatingScaleComponent rating_2
      forceEndRoutine = True
      high = 7
      labels = Completely Unacceptable, Completely Acceptable
      low = 1
      pos = 0, -0.4
      showAccept = False
      singleClick = True
      size = 1.3
      startVal [time (s)] = 0.0
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  Routine ThankYou
    TextComponent TY
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        Thank you for your participation!

        You have completed this part of the study.
  Routine Instructions
    TextComponent InstText
      color [set every repeat] = white
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.04
      pos [set every repeat] = (0, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Instructions
      wrapWidth = 1.4
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    KeyboardComponent space
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SetUpCode
    CodeComponent code_6
      Code Type = Py
      Begin Routine:
        '''
        from itertools import chain
        from itertools import zip_longest as zip
        from random import shuffle
        PracticeQ1 = data.importConditions('Users\Jojo\Downloads\HelionLab\ExperimentFiles\MoralSelf-Regulation\MoralSelfReg.csv', selection=u'0:04')
        PracticeQ2 = data.importConditions('Users\Jojo\Downloads\HelionLab\ExperimentFiles\MoralSelf-Regulation\MoralSelfReg.csv', selection=u'04:08')


        shuffle(PracticeQ1)
        shuffle(PracticeQ2)

        trialList=list(chain.from_iterable(zip(PracticeQ1, PracticeQ2)))
        '''
  Routine Cue
    TextComponent cue
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $CueInstructions1
      wrapWidth = 1.5
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    CodeComponent code_7
      Code Type = Py
      Begin Routine:
        subID = int(expInfo['participant'])

        if subID%2==0:
            cue.setText(CueInstructions1)
        if subID%2==1:
            cue.setText(CueInstructions2)
  Routine isi2
    TextComponent isi_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = +
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  Routine ISI
    TextComponent isi
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = +
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  Routine Feedback
    TextComponent FeedbackVar
      color [set every repeat] = white
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.055
      pos [set every repeat] = (0, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = default
      wrapWidth = 1.0
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    CodeComponent code_8
      Code Type = Both
      Begin JS Routine:
        var groupNum;
        var numPeople;
        var groupResult;
        var nounStr;
        var resultGroup;

        groupNum = parseInt(GroupNumber);
        numPeople = str(groupNum);
        groupResult = str(chanceResult);
        nounStr = str(Noun);
        resultGroup = ("of " + numPeople + nounStr + groupResult);

        if (choseCode == 1){
            FeedbackVar.setText(ChosePlan);
            }

        if (choseCode == 0){
            FeedbackVar.setText(ChoseNothing + resultGroup);
            }
      Begin Routine:
        groupNum = int(GroupNumber)
        numPeople = str(groupNum)
        groupResult = str(chanceResult)
        nounStr = str(Noun)
        resultGroup = (numPeople + nounStr + groupResult)

        if choseCode == 1:
            FeedbackVar.setText(ChosePlan)

        if choseCode == 0:
            FeedbackVar.setText(ChoseNothing + resultGroup)
  Routine MainAnswers_2
    KeyboardComponent key_resp_3
      allowedKeys = 'y','n'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    TextComponent conBlank2
      letterHeight = 0.1
      startVal [condition] = len(key_resp_3.keys) > 0
      stopVal [duration (s)] = 2
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    TextComponent RemText2
      letterHeight = 0.04
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [condition] = conBlank2.status == FINISHED
      text [set every repeat] = $Reminder
      wrapWidth = 1.3
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    TextComponent leftText2
      letterHeight = 0.04
      pos = (0.41, 0.05)
      startVal [time (s)] = 0.0
      stopVal [condition] = conBlank2.status == FINISHED
      text [set every repeat] = $PracticeLeftText
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    TextComponent rightText2
      letterHeight = 0.04
      pos = (0.46, -0.1)
      startVal [time (s)] = 0.0
      stopVal [condition] = conBlank2.status == FINISHED
      text [set every repeat] = $PracticeRightText
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    TextComponent yes2
      letterHeight = 0.04
      pos = (0, -0.28)
      startVal [time (s)] = 0.0
      stopVal [condition] = conBlank2.status == FINISHED
      text [set every repeat] = Implement the plan ('y')
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    TextComponent no2
      letterHeight = 0.04
      pos = (0.0, -0.36)
      startVal [time (s)] = 0.0
      stopVal [condition] = conBlank2.status == FINISHED
      text [set every repeat] = Do nothing ('n')
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    CodeComponent code_9
      Code Type = Both
      Begin Experiment:
        import numpy
        from numpy import random

        earnings = 0
        earningsStr = "$" + str(earnings)
        subID = int(expInfo['participant'])

        FiftyGamble = [1,0]
        SixtyGamble = [1,1,1,1,1,1,1,1,1,1,1,1,1,0,0,0,0,0,0,0]
        ThirtyGamble = [1,1,1,1,1,1,1,0,0,0,0,0,0,0,0,0,0,0,0,0]

        earning=0
        choseCode = []
        chanceResult = []

        #probability =[]
        def gamProbability(GroupProb):
            probs = int(GroupProb)
            if probs == 65:
                probability = SixtyGamble
                print('65% chance')
            if probs == 35:
                probability = ThirtyGamble
                print('35% chance')
            if probs == 50:
                probability = FiftyGamble
                print('50% chance')
        def gambleFunc(GroupProb):
            probs = int(GroupProb)
            if probs == 65:
                probability = SixtyGamble
                print('65% chance')
            if probs == 35:
                probability = ThirtyGamble
                print('35% chance')
            if probs == 50:
                probability = FiftyGamble
                print('50% chance')
            result = random.choice(probability)
            print('Chance result:')
            print(result)
      Begin JS Experiment:
        var earnings;

        earnings = 0

        var earningsStr;

        earningsStr = "$" + str(earnings)

        var subID;

        subID = parseInt(expInfo['participant'])

        var FiftyGamble;
        var SixtyGamble;
        var ThirtyGamble;

        FiftyGamble = [1,0]
        SixtyGamble = [1,1,1,1,1,1,1,1,1,1,1,1,1,0,0,0,0,0,0,0]
        ThirtyGamble = [1,1,1,1,1,1,1,0,0,0,0,0,0,0,0,0,0,0,0,0]

        var earning;
        earning = 0

        var choseCode;
        choseCode = []

        var chanceResult;
        chanceResult = []

        #probability =[]
        def gamProbability(GroupProb){
            probs = int(GroupProb)
            if (probs == 65){
                probability = SixtyGamble
                print('65% chance')
                }
            if (probs == 35){
                probability = ThirtyGamble
                print('35% chance')
                }
            if (probs == 50){
                probability = FiftyGamble
                print('50% chance')
                }
         }
        def gambleFunc(GroupProb){
            probs = int(GroupProb)
            if (probs == 65){
                probability = SixtyGamble
                print('65% chance')
                }
            if (probs == 35){
                probability = ThirtyGamble
                print('35% chance')
                }
            if (probs == 50){
                probability = FiftyGamble
                print('50% chance')
                }
            result = random.choice(probability)
            print('Chance result:')
            print(result)
            }
      Each Frame:
        if key_resp_3.keys == 'y':
            yes2.setColor('red')
        if key_resp_3.keys == 'n':
            no2.setColor('red')

        #if (key_resp.keys == 'y' or key_resp.keys == 'n') and conBlank.status == NOT_STARTED:
        #    conBlank.tStart = t
        #    conBlank.frameNStart = frameN
        #    conBlank.setAutoDraw(True)

        if key_resp_3.keys == 'y' or key_resp_3.keys == 'n':
            key_resp_3.status = FINISHED
      Each JS Frame:
        if (key_resp_3.keys == 'y'){
            yes2.setColor('red');
            }
        if (key_resp_3.keys == 'n'){
            no2.setColor('red');
            }


        if (key_resp_3.keys == 'y' || key_resp.keys == 'n'){
            key_resp_3.status = FINISHED;
            }
      End JS Routine:
        if (key_resp_3.keys == 'y'){
            choseCode = 1;
            }
        if (key_resp_3.keys == 'n'){
            choseCode = 0;
            }

        if (choseCode == 0 ){
            print('Chose to do nothing, play out the probability ');
            probs = int(GroupProb);
            if (probs == 65){
                probability = SixtyGamble;
                print('65% gamble');
                }
            if (probs == 35){
                probability = ThirtyGamble;
                print('35% gamble');
                }
            if (probs == 50){
                probability = FiftyGamble;
                print('50% gamble');
                }
            result = random.choice(probability);
            print('Chance result:');
            print(result);
            if (result == 1){
                print('The group escaped!');
                print(earnings);
                chanceResult = (" was saved.");
                }
            if (result == 0){
                print('The group died! :(');
                chanceResult = (' died.');
                }
          }



        yes2.setColor('white')
        no2.setColor('white')

        if (conBlank2.status == FINISHED){
            leftText2.setAutoDraw(False);
            rightText2.setAutoDraw(False);
            yes2.setAutoDraw(False);
            no2.setAutoDraw(False);
            RemText2.setAutoDraw(False);
            Question2.setAutoDraw(False);
            continueRoutine = False ;
            }
      End Routine:
        if key_resp_3.keys == 'y':
            choseCode = 1
        if key_resp_3.keys == 'n':
            choseCode = 0

        if choseCode == 0 :
            print('Chose to do nothing, play out the probability ')
            probs = int(GroupProb)
            if probs == 65:
                probability = SixtyGamble
                print('65% gamble')
            if probs == 35:
                probability = ThirtyGamble
                print('35% gamble')
            if probs == 50:
                probability = FiftyGamble
                print('50% gamble')
            result = random.choice(probability)
            print('Chance result:')
            print(result)
            if result == 1:   #win
                print('The group escaped!')
                print(earnings)
                chanceResult = (" were saved.")
            if result == 0: #lose
                print('The group died! :(')
                chanceResult = (' died.')



        yes2.setColor('white')
        no2.setColor('white')

        if conBlank2.status == FINISHED:
            leftText2.setAutoDraw(False)
            rightText2.setAutoDraw(False)
            yes2.setAutoDraw(False)
            no2.setAutoDraw(False)
            text_2.setAutoDraw(False)
            RemText2.setAutoDraw(False)
            #Question2.setAutoDraw(False)
            continueRoutine = False
    TextComponent text_2
      letterHeight = 0.04
      pos = (-0.43, 0.0)
      startVal [time (s)] = 0.0
      stopVal [condition] = conBlank2.status == FINISHED
      text [set every repeat] = $sureGroupText
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  Routine BeginInstr
    TextComponent instructions2
      letterHeight = 0.08
      startVal [time (s)] = 0.0
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      text:
        You will now begin the main part of the task.

        Press SPACE to start!
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator IntroLoop loopType="TrialHandler"
    conditionsFile = MoralSelfRegInst.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Instructions', 'In this study you will be asked to evaluate a number of moral dilemmas under various conditions. \n\nYou will be presented with 10 different scenario contexts and will respond to 5 conditions for each one.\n\nFor each scenario, you will proceed through five screens. These screens will describe a situation that you are hypothetically faced with and an action that you could perform in response to that situation. \n\nWhen you are done reading each screen, you can press SPACE to move on to the next one.\n\nHowever, please try your best to get the fullest understandi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,
      OrderedDict([('Instructions', 'The scenario description will include all the information you need to make your decision EXCEPT that it will not explicitly state the values for two features of the dilemma:\n\na) a number of people involved in part of the scenario, and \n\nb) a likelihood that something will happen\n\nYou will be evaluating this scenario given a number of variations of these features.\n\nThe fourth and final screen will provide you with the prompt that you will be answering for each of these variations - namely, whether or not it is morally acceptable for you to perform the acti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,
      OrderedDict([('Instructions', 'After you have understood the scenario context and the question you will be answering, you can press SPACE to move on to the individual trials that will fill these gaps for you in the scenario.\n\nBefore you do so, please try your best to hold in mind what the action is that you will be evaluating across trials, as you will not be reminded of this after this screen.\n\nFirst, you will see a "+" in the middle of the screen. Any time that this is up, all you need to do is fixate on the "+" and prepare to respond to the next trial. \n\nNext, you will see text appear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,
      OrderedDict([('Instructions', 'After you answer you will again see a "+" in the middle of the screen, followed by the next trial. This will occur for 5 different variations of each scenario. \n\nIt is important that you try your best to judge each trial in isolation, and avoid consideration of past responses for the current scenario or past scenarios.\n\nOnce you have pressed a button there is no way to go back to the previous screen. If you press the wrong button or if you press a button too soon, don\'t worry.')])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
    Routine Instructions
  LoopTerminator IntroLoop
  LoopInitiator PracticeLoop loopType="TrialHandler"
    conditions = [OrderedDict([('rows', '000:005'), ('CueInstructions1', 'EMPHASIZE'), ('CueInstructions2', 'DE-EMPHASIZE')])]
    conditionsFile = moralRows.csv
    loopType = sequential
    nReps = 1
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    Routine ISI
    LoopInitiator PracticeQs loopType="TrialHandler"
      Selected rows = 0:5
      conditionsFile = PracticeMoralSelfReg.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('PracticeDilemmas', " You are the head of a safety crew that has been alerted about a group of skydivers that is wearing defective parachutes and is currently in a freefall \n\n You've arrived in time to see that a group of divers is holding onto one another and will fall to their death a few feet to your right unless your crew's trampoline is moved beneath them"), ('PracticeLeftText', 'Skydivers on right: 6'), ('PracticeRightText', 'Probability of \nparachute opening: 35% '), ('Reminder', 'Plan: Direct your crew to the right, repositioning the trampoline and leaving the skydive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,
        OrderedDict([('PracticeDilemmas', " Your crew sees a smaller group of divers apart from the rest who are much closer to reaching the ground, and instinctively moves a few feet to the left to catch them\n\n You know that there won't be enough time to reach the group on the right if you wait to catch the group on the left"), ('PracticeLeftText', 'Skydivers on right: 9'), ('PracticeRightText', 'Probability of \nparachute opening: 50% '), ('Reminder', 'Plan: Direct your crew to the right, repositioning the trampoline and leaving the skydivers on the left to die \n\nDo nothing: The skydivers on the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,
        OrderedDict([('PracticeDilemmas', " If nothing is done, the safety crew will catch the divers to the left, avoiding their death, but the separate group of divers will land on the ground, causing their deaths\n\n You can re-direct your crew to the right, preventing the death of the group, but the divers on the left won't be caught"), ('PracticeLeftText', 'Skydivers on right: 5'), ('PracticeRightText', 'Probability of \nparachute opening: 50% '), ('Reminder', 'Plan: Direct your crew to the right, repositioning the trampoline and leaving the skydivers on the left to die \n\nDo nothing: The skydiv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,
        OrderedDict([('PracticeDilemmas', ' You also know that there is a chance that one of the parachutes of the group will still open in time to prevent all of their deaths\n\n There is no chance that the parachute will open for the one diver, given how close he is to the ground'), ('PracticeLeftText', 'Skydivers on right: 4'), ('PracticeRightText', 'Probability of \nparachute opening: 65% '), ('Reminder', 'Plan: Direct your crew to the right, repositioning the trampoline and leaving the skydivers on the left to die \n\nDo nothing: The skydivers on the left will live, the group on the right  has a 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
      Routine PracticeDilemmas_2
    LoopTerminator PracticeQs
    Routine ISI
    LoopInitiator practiceAs loopType="TrialHandler"
      Selected rows = 0:5
      conditionsFile = PracticeMoralSelfReg.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('PracticeDilemmas', "• You are the head of a safety crew that has been alerted about a group of skydivers that is wearing defective parachutes and is currently in a freefall \n\n• You've arrived in time to see that a group of divers is holding onto one another and will fall to their death a few feet to your right unless your crew's trampoline is moved beneath them"), ('PracticeLeftText', 'Skydivers on right: 6'), ('PracticeRightText', 'Probability of \nparachute opening: 35% '), ('Reminder', 'Plan: Direct your crew to the right, repositioning the trampoline and leaving the skydi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,
        OrderedDict([('PracticeDilemmas', "• Your crew sees a smaller group of divers apart from the rest who are much closer to reaching the ground, and instinctively moves a few feet to the left to catch them\n\n• You know that there won't be enough time to reach the group on the right if you wait to catch the group on the left"), ('PracticeLeftText', 'Skydivers on right: 9'), ('PracticeRightText', 'Probability of \nparachute opening: 50% '), ('Reminder', 'Plan: Direct your crew to the right, repositioning the trampoline and leaving the skydivers on the left to die \n\nDo nothing: The skydivers on t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,
        OrderedDict([('PracticeDilemmas', "• If nothing is done, the safety crew will catch the divers to the left, avoiding their death, but the separate group of divers will land on the ground, causing their deaths\n\n• You can re-direct your crew to the right, preventing the death of the group, but the divers on the left won't be caught"), ('PracticeLeftText', 'Skydivers on right: 5'), ('PracticeRightText', 'Probability of \nparachute opening: 50% '), ('Reminder', 'Plan: Direct your crew to the right, repositioning the trampoline and leaving the skydivers on the left to die \n\nDo nothing: The skyd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,
        OrderedDict([('PracticeDilemmas', '• You also know that there is a chance that one of the parachutes of the group will still open in time to prevent all of their deaths\n\n• There is no chance that the parachute will open for the one diver, given how close he is to the ground'), ('PracticeLeftText', 'Skydivers on right: 4'), ('PracticeRightText', 'Probability of \nparachute opening: 65% '), ('Reminder', 'Plan: Direct your crew to the right, repositioning the trampoline and leaving the skydivers on the left to die \n\nDo nothing: The skydivers on the left will live, the group on the right  has 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
      Routine PracticeAnswers
      Routine ISI
      Routine Feedback
      Routine ISI
    LoopTerminator practiceAs
  LoopTerminator PracticeLoop
  Routine isi2
  Routine BeginInstr
  LoopInitiator MainLoop loopType="TrialHandler"
    conditionsFile = moralRows2.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('rows2', '005:0010'), ('CueInstructions1', 'DE-EMPHASIZE'), ('CueInstructions2', 'EMPHASIZE')]),
      OrderedDict([('rows2', '0010:015'), ('CueInstructions1', 'EMPHASIZE'), ('CueInstructions2', 'DE-EMPHASIZE')]),
      OrderedDict([('rows2', '015:020'), ('CueInstructions1', 'DE-EMPHASIZE'), ('CueInstructions2', 'EMPHASIZE')]),
      OrderedDict([('rows2', '020:025'), ('CueInstructions1', 'DE-EMPHASIZE'), ('CueInstructions2', 'EMPHASIZE')]),
      OrderedDict([('rows2', '025:030'), ('CueInstructions1', 'EMPHASIZE'), ('CueInstructions2', 'DE-EMPHASIZE')]),
      OrderedDict([('rows2', '030:035'), ('CueInstructions1', 'EMPHASIZE'), ('CueInstructions2', 'DE-EMPHASIZE')]),
      OrderedDict([('rows2', '035:040'), ('CueInstructions1', 'DE-EMPHASIZE'), ('CueInstructions2', 'EMPHASIZE')]),
      OrderedDict([('rows2', '040:045'), ('CueInstructions1', 'EMPHASIZE'), ('CueInstructions2', 'DE-EMPHASIZE')]),
      OrderedDict([('rows2', '045:050'), ('CueInstructions1', 'DE-EMPHASIZE'), ('CueInstructions2', 'EMPHASIZE')]),
      OrderedDict([('rows2', '050:055'), ('CueInstructions1', 'DE-EMPHASIZE'), ('CueInstructions2', 'EMPHASIZE')]),
      OrderedDict([('rows2', '055:060'), ('CueInstructions1', 'EMPHASIZE'), ('CueInstructions2', 'DE-EMPHASIZE')]),
      OrderedDict([('rows2', '060:065'), ('CueInstructions1', 'DE-EMPHASIZE'), ('CueInstructions2', 'EMPHASIZE')])]
    Routine ISI
    LoopInitiator MainQs loopType="TrialHandler"
      Selected rows = $rows2
      conditionsFile = PracticeMoralSelfReg.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine MainDilemmas
    LoopTerminator MainQs
    Routine ISI
    LoopInitiator trials_2 loopType="TrialHandler"
      Selected rows = $rows2
      conditionsFile = PracticeMoralSelfReg.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine MainAnswers_2
      Routine ISI
      Routine Feedback
      Routine ISI
    LoopTerminator trials_2
  LoopTerminator MainLoop
  Routine ThankYou
