PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = SlotMachTest
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Routines
  Routine Instr
    TextComponent Instructions
      color [set every repeat] = white
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.045
      pos [set every repeat] = (0, 0)
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text [set every repeat]:
        In this part of the study, you will be making a series of monetary decisions.

        You will have the choice between taking a gamble or choosing a sure option. For each gamble, you will have a chance of either winning money, losing money, or gaining nothing, while the sure option guarantees a win or loss.

        You will be given regulation instructions prior to a block of trials. Please employ the strategy while making your decision.

        Press SPACE to continue.
    KeyboardComponent space
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent intro
      Code Type = Both
      Begin Experiment:
        import numpy
        from numpy import random

        earnings = 0
        earningsStr = "$" + '%.2f' % earnings

        subID = int(expInfo['participant'])

        FiftyGamble = [1,0]
        SixtyGamble = [1,1,1,1,1,1,1,1,1,1,1,1,1,0,0,0,0,0,0,0]
        ThirtyGamble = [1,1,1,1,1,1,1,0,0,0,0,0,0,0,0,0,0,0,0,0]

        earning=0
        chosenMoney = 0


        #probability =[]
        def gamProbability(gamProb):
            probs = int(gamProb)
            if probs == 65:
                probability = SixtyGamble
                print('65% gamble')
            if probs == 35:
                probability = ThirtyGamble
                print('35% gamble')
            if probs == 50:
                probability = FiftyGamble
                print('50% gamble')
        def gambleFunc(gamProb):
            probs = int(gamProb)
            if probs == 65:
                probability = SixtyGamble
                #print('65% gamble')
            if probs == 35:
                probability = ThirtyGamble
                print('35% gamble')
            if probs == 50:
                probability = FiftyGamble
                print('50% gamble')
            result = random.choice(probability)
            print('gamble result:')
            print(result)

        def loseFunc(chosenMoney, earning):
            earning -= chosenMoney
            print('Lost Money earnings:')
            print(earning)
        def winFunc(chosenMoney, earning):
            earning += chosenMoney
            print('Won money earnings:')
            print(earning)

        def earningsFunct(gamProb, chosenMoney, WinLossType, earning):
           if subID%2==0:   #gambles are on left side of screen
               if choice.keys == '1' and WinLossType== 1 :
                   print('gambled during win condition')
                   #gamProbability(gamProb)
                   probs = int(gamProb)
                   if probs == 65:
                       probability = SixtyGamble
                       print('65% gamble')
                   if probs == 35:
                       probability = ThirtyGamble
                       print('35% gamble')
                   if probs == 50:
                       probability = FiftyGamble
                       print('50% gamble')
                   result = random.choice(probability)
                   print('gamble result:')
                   print(result)
                   if result == 1:   #win
                       earning += chosenMoney
                       print('Won money earnings:')
                       print(earning)
               #    if result == 0: #lose
                #       earnings += 0

               if choice.keys == '1' and WinLossType==0:
                   print('gambled during lose condition')
                   #gamProbability(gamProb)
                   probs = int(gamProb)
                   if probs == 65:
                       probability = SixtyGamble
                #print('65% gamble')
                   if probs == 35:
                       probability = ThirtyGamble
                       print('35% gamble')
                   if probs == 50:
                       probability = FiftyGamble
                       print('50% gamble')
                   result = random.choice(probability)
                   print('gamble result:')
                   print(result)
                   if result == 1: #lose
                       earning -= chosenMoney
                       print('Lost Money earnings:')
                       print(earning)
             #      if result == 0: #win
             #          earnings += 0

               if choice.keys == '2'and WinLossType ==1:
                   print('did not gamble for win')
                   earning += chosenMoney
                   print('Won money earnings:')
                   print(earning)
               if choice.keys == '2' and WinLossType == 0:
                   print('did not gamble for loss')
                   earning -= chosenMoney
                   print('Lost Money earnings:')
                   print(earning)


           if subID%2==1:  #gambles are on right side of screen
               if choice.keys == '2' and WinLossType == 1:
                   print('gambled during win condition')
                   #gamProbability(gamProb)
                   probs = int(gamProb)
                   if probs == 65:
                       probability = SixtyGamble
                       print('65% gamble')
                   if probs == 35:
                       probability = ThirtyGamble
                       print('35% gamble')
                   if probs == 50:
                       probability = FiftyGamble
                       print('50% gamble')
                   result = random.choice(probability)
                   print('gamble result:')
                   print(result)
                   if result == 1: #win
                       winFunc(chosenMoney, earning)
            #       if result == 0: #lost
            #           earnings += 0


               if choice.keys == '2' and WinLossType == 0:
                   print('gambled during lose condition')
                   #gamProbability(gamProb)
                   probs = int(gamProb)
                   if probs == 65:
                       probability = SixtyGamble
                       print('65% gamble')
                   if probs == 35:
                       probability = ThirtyGamble
                       print('35% gamble')
                   if probs == 50:
                       probability = FiftyGamble
                       print('50% gamble')
                   result = random.choice(probability)
                   print('gamble result:')
                   print(result)
                   if result == 1: #lose
                       earning -= chosenMoney
                       print('Lost Money earnings:')
                       print(earning)
             #      if result == 0: #win
             #          earnings += 0

               if choice.keys == '1' and WinLossType == 1:
                   print('did not gamble for win')
                   earning += chosenMoney
                   print('Won money earnings:')
                   print(earning)
               if choice.keys == '1' and WinLossType == 0:
                   print('did not gamble for lose condition')
                   earning -= chosenMoney
                   print('Lost Money earnings:')
                   print(earning)
      Begin JS Experiment:
        earnings = 0
        earningsStr = "$" + str(earnings)
        subID = parseInt(expInfo['participant'])

        FiftyGamble = [1,0]
        SixtyGamble = [1,1,1,1,1,1,1,1,1,1,1,1,1,0,0,0,0,0,0,0]
        ThirtyGamble = [1,1,1,1,1,1,1,0,0,0,0,0,0,0,0,0,0,0,0,0]

        earning=0
        chosenMoney = 0
  Routine Inst2
    TextComponent instruct2
      letterHeight = 0.045
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        You will be instructed to either "DE-EMPHASIZE" or "EMPHASIZE." When you see the word "DE-EMPHASIZE," we would like you to reinterpret the upcoming decision as one of many opportunities, and that the outcome is not very important. Try to think that the decision is not a big deal; you will have other chances.

        When you see the word "EMPHASIZE" we would like you to stress the importance of the upcoming decision. Please reinterpret the upcoming decision as very important and one in which you need to make the right choice. Try to think that it matters a lot what you choose.

        Press SPACE to continue.
    KeyboardComponent enter
      allowedKeys = "space"
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Practice
    PolygonComponent Line
      fillColor [set every repeat] = $[-1.000,-1.000,-1.000]
      lineColor [set every repeat] = $[-1.000,-1.000,-1.000]
      lineWidth [set every repeat] = 7
      ori = 90
      shape = line
      size [set every repeat] = (3, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    KeyboardComponent choice
      allowedKeys [set every repeat] = '1','2'
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
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    TextComponent GambleAmt
      color [set every repeat] = white
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.11
      pos [set every repeat] = (-0.41, -0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
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    TextComponent SureAmt
      color [set every repeat] = white
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.11
      pos [set every repeat] = (0.41, -0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
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    TextComponent GambleProb
      color [set every repeat] = white
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.13
      pos [set every repeat] = (-0.41, 0.3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
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    TextComponent SureProb
      color [set every repeat] = white
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.13
      pos [set every repeat] = (0.41, 0.3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
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    CodeComponent code
      Code Type = Both
      Begin JS Routine:
        leftVarText=[]
        leftVarMoney = []
        rightVarText = []
        rightVarMoney = []
        result = []

        if (subID%2 == 1){
            leftVarText = (gambleWinLoss);
            leftVarMoney = (gamble);
            rightVarText = (sureWinLoss);
            rightVarMoney = (sure);
            }
        if (subID%2 == 0){
            rightVarText= (gambleWinLoss);
            rightVarMoney= (gamble);
            leftVarText= (sureWinLoss);
            leftVarMoney= (sure);
            }

        GambleAmt.setText(leftVarMoney)
        SureAmt.setText(rightVarMoney)
        GambleProb.setText(leftVarText)
        SureProb.setText(rightVarText)

        leftMoney = parseFloat(leftVarMoney[1:])

        rightMoney = parseFloat(rightVarMoney[1:])

        WinLossType = parseInt(WinLossCode)
      Begin Routine:
        feedbackVar = []
        leftVarText=[]
        leftVarMoney = []
        rightVarText = []
        rightVarMoney = []
        result = []

        if subID%2 == 1 :
            leftVarText = (gambleWinLoss)
            leftVarMoney = (gamble)
            rightVarText = (sureWinLoss)
            rightVarMoney = (sure)
        if subID%2 == 0:
            rightVarText= (gambleWinLoss)
            rightVarMoney= (gamble)
            leftVarText= (sureWinLoss)
            leftVarMoney= (sure)

        GambleAmtVar = "$" + '%.2f' % leftVarMoney
        GambleAmt.setText(GambleAmtVar)
        SureAmtVar = "$" + '%.2f' % rightVarMoney
        SureAmt.setText(SureAmtVar)
        GambleProb.setText(leftVarText)
        SureProb.setText(rightVarText)

        leftMoney = float(leftVarMoney)
        rightMoney = float(rightVarMoney)
        WinLossType = int(WinLossCode)
      Each Frame:
        if choice.keys == '1':
            GambleAmt.setColor('green')
            chosenMoney = leftMoney
            choice.status = FINISHED
        if choice.keys == '2':
            SureAmt.setColor('green')
            chosenMoney = rightMoney
            choice.status = FINISHED

        if (choice.keys == '1' or choice.keys == '2') and blank.status == NOT_STARTED:
            blank.tStart = t
            blank.frameNStart = frameN
            blank.setAutoDraw(True)
        #gamProbability(gambleProb)
        #gambleFunc(gambleProb)
        #earningsFunct(gambleProb, chosenMoney, WinLossCode, earnings)
        #print(earnings)



        #earningsText.setText(earningsStr)
      Each JS Frame:
        if (choice.keys == '1'){
            GambleAmt.setColor('green');
            chosenMoney = leftMoney;
            }
        if (choice.keys == '2'){
            SureAmt.setColor('green');
            chosenMoney = rightMoney;
            }

        if ((choice.keys == '1' or choice.keys == '2') && blank.status == NOT_STARTED){
            blank.tStart = t;
            blank.frameNStart = frameN;
            blank.setAutoDraw(true);
            }
      End JS Routine:
        if (choice.keys == '1'){
            chosenMoney = leftMoney;
            }
        if (choice.keys == '2'){
            chosenMoney = rightMoney;
            }
        if (choice.keys != None){
            if (subID%2==1){
               if (choice.keys == '1' && WinLossCode== 1){
                   print('gambled during win condition');
                   probs = int(gambleProb);
                   if (probs == 65){
                       probability = SixtyGamble;
                       print('65% gamble');
                       }
                   if (probs == 35){
                       probability = ThirtyGamble;
                       print('35% gamble');
                       }
                   if (probs == 50){
                       probability = FiftyGamble;
                       print('50% gamble');
                       }
                   result = random.choice(probability);
                   print('gamble result:');
                   print(result);
                   }
                   if (result == 1){
                       earnings = earnings + chosenMoney;
                       print('Won money earnings:');
                       print(earnings);
                   #    if result == 0: #lose
                    #       earnings += 0

               if (choice.keys == '1' && WinLossCode==0){
                   print('gambled during lose condition');
                  #gamProbability(gamProb)
                   probs = int(gambleProb);
                   if (probs == 65){
                       probability = SixtyGamble;
                       print('65% gamble');
                       }
                   if (probs == 35){
                       probability = ThirtyGamble;
                       print('35% gamble');
                       }
                   if (probs == 50){
                       probability = FiftyGamble;
                       print('50% gamble');
                       }
                   result = random.choice(probability);
                   print('gamble result:');
                   print(result);
                   }
                   if (result == 1){
                      earnings = earnings - chosenMoney;
                      print('Lost Money earnings:');
                      print(earnings);
                      }
                 #      if result == 0: #win
                 #          earnings += 0

               if (choice.keys == '2'&& WinLossCode ==1){
                   print('did not gamble for win condition');
                   earnings = earnings + chosenMoney;
                   print('Won sure money earnings:');
                   print(earnings)       ;
                   }
               if (choice.keys == '2' and WinLossCode == 0){
                   earnings = earnings - chosenMoney;
                   print('Lost sure Money earnings:');
                   print(earnings);
                   }


            if (subID%2==0){
               if (choice.keys == '2' && WinLossCode == 1){
                   print('gambled during win condition');
                   probs = int(gambleProb);
                   }
                   if (probs == 65){
                       probability = SixtyGamble;
                       print('65% gamble');
                       }
                   if (probs == 35){
                       probability = ThirtyGamble;
                       print('35% gamble');
                   if (probs == 50){
                       probability = FiftyGamble;
                       print('50% gamble');
                       }
                   result = random.choice(probability);
                   print('gamble result:');
                   print(result);
                   }
                   if (result == 1){
                       earnings = earnings + chosenMoney;
                       print('won money earnings:');
                       print(earnings);
                       }

               if (choice.keys == '2' && WinLossCode == 0){
                   print('gambled during lose condition');

                   probs = int(gambleProb);
                   }
                   if (probs == 65){
                       probability = SixtyGamble;
                       print('65% gamble');
                       }
                   if (probs == 35){
                       probability = ThirtyGamble;
                       print('35% gamble');
                       }
                   if (probs == 50){
                       probability = FiftyGamble;
                       print('50% gamble');
                       }
                   result = random.choice(probability);
                   print('gamble result:');
                   print(result);
                   }
                   if (result == 1){
                       earnings = earnings - chosenMoney;
                       print('Lost Money earnings:');
                       print(earnings);
                       }

               if (choice.keys == '1' && WinLossCode == 1){
                   print('did not gamble during win condition');
                   earnings = earnings + chosenMoney;
                   print('Won sure money earnings:');
                   print(earnings);
                   }
               if (choice.keys == '1' && WinLossCode == 0){
                   print('did not gamble for loss condition');
                   earnings = earnings - chosenMoney;
                   print('Lost sure Money earnings:');
                   print(earnings);
                   }
            earningsStr= str(earnings);
            earningsText.setText(earningsStr);
        GambleAmt.setColor('white');
        SureAmt.setColor('white');

        if (blank.status==FINISHED){
            GambleAmt.setAutoDraw(false);
            SureAmt.setAutoDraw(false);
            SureProb.setAutoDraw(false);
            GambleProb.setAutoDraw(false);
            Line.setAutoDraw(false);
            moneyBank.setAutoDraw(false);
            }
      End Routine:
        if choice.keys == '1':
            chosenMoney = leftMoney
        if choice.keys == '2':
            chosenMoney = rightMoney
        if choice.keys != None:
            if subID%2==1:   #gambles are on left side of screen
               if choice.keys == '1' and WinLossCode== 1 :
                   print('gambled during win condition')
                   probs = int(gambleProb)
                   if probs == 65:
                       probability = SixtyGamble
                       print('65% gamble')
                   if probs == 35:
                       probability = ThirtyGamble
                       print('35% gamble')
                   if probs == 50:
                       probability = FiftyGamble
                       print('50% gamble')
                   result = random.choice(probability)
                   print('gamble result:')
                   print(result)
                   if result == 1:   #win
                       feedbackVar = 1 #gambled during win and won
                       earnings = earnings + chosenMoney
                       print('Won money earnings:')
                       print(earnings)
                   if result == 0: #lose
                       feedbackVar = 3
                    #       earnings += 0

               if choice.keys == '1' and WinLossCode==0:
                   print('gambled during lose condition')
                  #gamProbability(gamProb)
                   probs = int(gambleProb)
                   if probs == 65:
                       probability = SixtyGamble
                       print('65% gamble')
                   if probs == 35:
                       probability = ThirtyGamble
                       print('35% gamble')
                   if probs == 50:
                       probability = FiftyGamble
                       print('50% gamble')
                   result = random.choice(probability)
                   print('gamble result:')
                   print(result)
                   if result == 1: #lose
                      feedbackVar = 2 #gambled during loss and lost
                      earnings = earnings - chosenMoney
                      print('Lost Money earnings:')
                      print(earnings)
                   if result == 0: #win
                      feedbackVar = 3
                 #          earnings += 0

               if choice.keys == '2'and WinLossCode ==1:
                   print('did not gamble for win condition')
                   earnings = earnings + chosenMoney
                   feedbackVar = 1
                   print('Won sure money earnings:')
                   print(earnings)
               if choice.keys == '2' and WinLossCode == 0: #did not gamble for lose condition
                   earnings = earnings - chosenMoney
                   feedbackVar = 2
                   print('Lost sure Money earnings:')
                   print(earnings)


            if subID%2==0:  #gambles are on right side of screen
               if choice.keys == '2' and WinLossCode == 1:
                   print('gambled during win condition')
                   probs = int(gambleProb)
                   if probs == 65:
                       probability = SixtyGamble
                       print('65% gamble')
                   if probs == 35:
                       probability = ThirtyGamble
                       print('35% gamble')
                   if probs == 50:
                       probability = FiftyGamble
                       print('50% gamble')
                   result = random.choice(probability)
                   print('gamble result:')
                   print(result)
                   if result == 1: #win
                       feedbackVar = 1
                       earnings = earnings + chosenMoney
                       print('won money earnings:')
                       print(earnings)
                   if result == 0: #lost
                       feedbackVar = 3
                #           earnings += 0


               if choice.keys == '2' and WinLossCode == 0:
                   print('gambled during lose condition')
                      #gamProbability(gamProb)
                   probs = int(gambleProb)
                   if probs == 65:
                       probability = SixtyGamble
                       print('65% gamble')
                   if probs == 35:
                       probability = ThirtyGamble
                       print('35% gamble')
                   if probs == 50:
                       probability = FiftyGamble
                       print('50% gamble')
                   result = random.choice(probability)
                   print('gamble result:')
                   print(result)
                   if result == 1: #lose
                       feedbackVar = 2
                       earnings = earnings - chosenMoney
                       print('Lost Money earnings:')
                       print(earnings)
                   if result == 0: #win
                       feedbackVar = 3
                 #          earnings += 0

               if choice.keys == '1' and WinLossCode == 1:
                   print('did not gamble during win condition')
                   earnings = earnings + chosenMoney
                   feedbackVar = 1
                   print('Won sure money earnings:')
                   print(earnings)
               if choice.keys == '1' and WinLossCode == 0:
                   print('did not gamble for loss condition')
                   feedbackVar = 2
                   earnings = earnings - chosenMoney
                   print('Lost sure Money earnings:')
                   print(earnings)
            earningsStr = "$" + '%.2f' % earnings
            earningsText.setText('$' + earningsStr)
        if choice.keys == None:
            feedbackVar = 4;

        GambleAmt.setColor('white')
        SureAmt.setColor('white')

        if (blank.status==FINISHED):
            GambleAmt.setAutoDraw(False)
            SureAmt.setAutoDraw(False)
            SureProb.setAutoDraw(False)
            GambleProb.setAutoDraw(False)
            Line.setAutoDraw(False)
            moneyBank.setAutoDraw(False)
    TextComponent blank
      letterHeight = 0.1
      stopVal [duration (s)] = 1.5
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    PolygonComponent moneyBank
      lineColor = $[-1.000,-1.000,-1.000]
      lineWidth = 8
      pos = (0.68, -0.42)
      shape = rectangle
      size = (0.46, 0.24)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent earningsText
      letterHeight = 0.09
      pos = (0.64, -0.42)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $earningsStr
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  Routine BeginInst
    TextComponent text_2
      letterHeight = 0.085
      startVal [time (s)] = 0.0
      wrapWidth = 1.4
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      text:
        You will now be completing the full task. Your money bank will begin with the \$6.00 you earned from the card task

        Press SPACE to start!
    CodeComponent code_3
      Code Type = Both
      Begin Routine:
        earning = 6
        earnings = 6
        earningsStr = "$" + '%.2f' % earnings
        earningsText.setText('$' + earningsStr)
      End JS Routine:
        earnings = 0;
        earning = 0;
        earningsText.setText("$0.00")
      End Routine:
        earnings = 6
        earning = 6
        earningsStr = "$" + '%.2f' % earnings
        earningsText.setText('$' + earningsStr)
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Main
    KeyboardComponent choice2
      allowedKeys [set every repeat] = '1','2'
      forceEndRoutine = False
      stopVal [duration (s)] = 3
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    TextComponent sureAmt
      letterHeight = 0.11
      pos = (0.41, -0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      text [set every repeat] = $sure
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    TextComponent gambleAmt
      letterHeight = 0.11
      pos = (-0.41, -0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      text [set every repeat] = $gamble
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    TextComponent GambleProbability
      letterHeight = 0.13
      pos = (-0.41, 0.3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      text [set every repeat] = $gambleProb
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    TextComponent sureProb
      letterHeight = 0.13
      pos = (0.41, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = 100%
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    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        if choice2.keys == '1':
            gambleAmt.setColor('green')
        if choice2.keys == '2':
            sureAmt.setColor('green')

        if (choice2.keys == '1' or choice.keys == '2') and blank.status == NOT_STARTED:
            blank.tStart = t
            blank.frameNStart = frameN
            blank.setAutoDraw(True)
      Each Frame:
        if choice2.keys == '1':
            gambleAmt.setColor('green')
        if choice2.keys == '2':
            sureAmt.setColor('green')

        if (choice2.keys == '1' or choice.keys == '2') and blank.status == NOT_STARTED:
            blank.tStart = t
            blank.frameNStart = frameN
            blank.setAutoDraw(True)
      End Routine:
        gambleAmt.setColor('white')
        sureAmt.setColor('white')

        if (blank.status==FINISHED):
            gambleAmt.setAutoDraw(False)
            sureAmt.setAutoDraw(False)
            sureProb.setAutoDraw(False)
            GambleProbability.setAutoDraw(False)
    TextComponent blank2
      letterHeight = 0.1
      stopVal [duration (s)] = 2
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    PolygonComponent line
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      lineWidth [set every repeat] = 4
      ori = 90
      shape = line
      size [set every repeat] = (3, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine isi
    TextComponent isi2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = +
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  Routine Cue
    TextComponent cue
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $CueType
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    CodeComponent code_4
      Code Type = Py
      End Routine:
        earning = 6
        earnings = 6
  Routine PracticeCue
    TextComponent text
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = EMPHASIZE
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  Routine ThankYou
    TextComponent tyText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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    CodeComponent code_7
      Code Type = Py
      Begin Routine:
        #
        #return earnings;
        #earningsStr = "$" + '%.2f' % earnings
        if earnings < 0:
            earningsStr = "$" + 0.00
        tyText.setText("Thank you for playing!\n\nYour total earnings are " + earningsStr)
  Routine code_5
    CodeComponent code_6
      Code Type = Py
      Begin Routine:
        earning = 0
        earnings = 0
      End Routine:
        earnings = 0
        earningsStr= str(earnings)
  Routine Feedback
    TextComponent text_3
      letterHeight = 0.09
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = placeholder
      wrapWidth = 1.4
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    CodeComponent code_8
      Code Type = Py
      Begin Routine:
        chosenStr = "$" + '%.2f' % chosenMoney
        winVar = []
        if WinLossCode == 1:
            winVar = "won "
        if WinLossCode == 0:
            winVar = 'lost '
        if feedbackVar == 1:
            text_3.setText("You won " + chosenStr)
        if feedbackVar == 2:
            text_3.setText("You lost " + chosenStr)
        if feedbackVar == 3 and WinLossCode == 1:
            text_3.setText("You won $0.00")
        if feedbackVar == 3 and WinLossCode == 0:
            text_3.setText("You lost $0.00")
        if feedbackVar ==4 :
            text_3.setText("No response made")
  Routine inst3
    TextComponent text_4
      letterHeight = 0.045
      startVal [time (s)] = 0.0
      wrapWidth = 1.4
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      text:
        You will have three seconds to make your choice upon seeing the options.

        To choose the option on the left, press "1". To choose the option on the right, press "2".

        You will first be playing some practice rounds. To begin the practice, press ENTER!
    KeyboardComponent key_resp_2
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instr
  Routine Inst2
  Routine inst3
  Routine isi
  Routine PracticeCue
  LoopInitiator PracticeLoop loopType="TrialHandler"
    Selected rows = 0:3
    conditionsFile = PracticeSlotMach.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('sure', 4.5), ('gamble', 6.75), ('gambleProb', 50.0), ('Rows', '000:0010'), ('CueType', 'EMPHASIZE'), ('gambleWinLoss', '50%  WIN'), ('sureWinLoss', '100%  WIN'), ('WinLossCode', 1.0), ('plus', '+')]),
      OrderedDict([('sure', 2.0), ('gamble', 4.25), ('gambleProb', 65.0), ('Rows', '00010:0020'), ('CueType', 'DE-EMPHASIZE'), ('gambleWinLoss', '65%  WIN'), ('sureWinLoss', '100%  WIN'), ('WinLossCode', 1.0), ('plus', '+')]),
      OrderedDict([('sure', 3.75), ('gamble', 7.5), ('gambleProb', 35.0), ('Rows', '00020:0030'), ('CueType', 'DE-EMPHASIZE'), ('gambleWinLoss', '35%  LOSE'), ('sureWinLoss', '100%  LOSE'), ('WinLossCode', 0.0), ('plus', '+')]),
      OrderedDict([('sure', None), ('gamble', None), ('gambleProb', None), ('Rows', '0030:0040'), ('CueType', 'EMPHASIZE'), ('gambleWinLoss', None), ('sureWinLoss', None), ('WinLossCode', None), ('plus', None)]),
      OrderedDict([('sure', None), ('gamble', None), ('gambleProb', None), ('Rows', '0040:0050'), ('CueType', 'DE-EMPHASIZE'), ('gambleWinLoss', None), ('sureWinLoss', None), ('WinLossCode', None), ('plus', None)]),
      OrderedDict([('sure', None), ('gamble', None), ('gambleProb', None), ('Rows', '0050:0060'), ('CueType', 'EMPHASIZE'), ('gambleWinLoss', None), ('sureWinLoss', None), ('WinLossCode', None), ('plus', None)])]
    Routine isi
    Routine Practice
    Routine isi
    Routine Feedback
  LoopTerminator PracticeLoop
  Routine BeginInst
  LoopInitiator mainLoop loopType="TrialHandler"
    conditionsFile = PracticeSlotMach.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('sure', 4.5), ('gamble', 6.75), ('gambleProb', 50.0), ('Rows', '000:0010'), ('CueType', 'EMPHASIZE'), ('gambleWinLoss', '50%  WIN'), ('sureWinLoss', '100%  WIN'), ('WinLossCode', 1.0), ('plus', '+')]),
      OrderedDict([('sure', 2.0), ('gamble', 4.25), ('gambleProb', 65.0), ('Rows', '00010:0020'), ('CueType', 'DE-EMPHASIZE'), ('gambleWinLoss', '65%  WIN'), ('sureWinLoss', '100%  WIN'), ('WinLossCode', 1.0), ('plus', '+')]),
      OrderedDict([('sure', 3.75), ('gamble', 7.5), ('gambleProb', 35.0), ('Rows', '00020:0030'), ('CueType', 'DE-EMPHASIZE'), ('gambleWinLoss', '35%  LOSE'), ('sureWinLoss', '100%  LOSE'), ('WinLossCode', 0.0), ('plus', '+')]),
      OrderedDict([('sure', None), ('gamble', None), ('gambleProb', None), ('Rows', '0030:0040'), ('CueType', 'EMPHASIZE'), ('gambleWinLoss', None), ('sureWinLoss', None), ('WinLossCode', None), ('plus', None)]),
      OrderedDict([('sure', None), ('gamble', None), ('gambleProb', None), ('Rows', '0040:0050'), ('CueType', 'DE-EMPHASIZE'), ('gambleWinLoss', None), ('sureWinLoss', None), ('WinLossCode', None), ('plus', None)]),
      OrderedDict([('sure', None), ('gamble', None), ('gambleProb', None), ('Rows', '0050:0060'), ('CueType', 'EMPHASIZE'), ('gambleWinLoss', None), ('sureWinLoss', None), ('WinLossCode', None), ('plus', None)])]
    Routine isi
    Routine Cue
    LoopInitiator trials loopType="TrialHandler"
      Selected rows = $Rows
      conditionsFile = SlotMachine.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('sure', 2.5), ('gamble', 6.75), ('gambleProb', 50.0), ('WinLoss', 'WIN'), ('gambleWinLoss', '50%  WIN'), ('sureWinLoss', '100%  WIN'), ('WinLossCode', 1.0), ('Evgamble', '3.375'), ('riskyAdDis', 'ad')]),
        OrderedDict([('sure', 4.25), ('gamble', 10.75), ('gambleProb', 35.0), ('WinLoss', 'WIN'), ('gambleWinLoss', '35%  WIN'), ('sureWinLoss', '100%  WIN'), ('WinLossCode', 1.0), ('Evgamble', '3.7625'), ('riskyAdDis', 'dis')]),
        OrderedDict([('sure', 8.0), ('gamble', 12.25), ('gambleProb', 65.0), ('WinLoss', 'WIN'), ('gambleWinLoss', '65%  WIN'), ('sureWinLoss', '100%  WIN'), ('WinLossCode', 1.0), ('Evgamble', '~7.96'), ('riskyAdDis', 'EQUAL')]),
        OrderedDict([('sure', 1.25), ('gamble', 4.75), ('gambleProb', 35.0), ('WinLoss', 'WIN'), ('gambleWinLoss', '35%  WIN'), ('sureWinLoss', '100%  WIN'), ('WinLossCode', 1.0), ('Evgamble', '1.663'), ('riskyAdDis', 'ad')]),
        OrderedDict([('sure', 3.75), ('gamble', 5.25), ('gambleProb', 65.0), ('WinLoss', 'WIN'), ('gambleWinLoss', '65%  WIN'), ('sureWinLoss', '100%  WIN'), ('WinLossCode', 1.0), ('Evgamble', '3.143'), ('riskyAdDis', 'dis')]),
        OrderedDict([('sure', 4.25), ('gamble', 5.5), ('gambleProb', 50.0), ('WinLoss', 'LOSE'), ('gambleWinLoss', '50%  LOSE'), ('sureWinLoss', '100%  LOSE'), ('WinLossCode', 0.0), ('Evgamble', '-2.25'), ('riskyAdDis', 'dis')])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
      Routine isi
      Routine Practice
      Routine isi
      Routine Feedback
    LoopTerminator trials
  LoopTerminator mainLoop
  Routine ThankYou
